def model generic_adaptive_cell_fermenter as

  def comp cell as
    var ATP_dmg_mod_bio: millimolar {pub: in};
    var ATP_floor_mod_bio: millimolar {pub: in};
    var ATP_floor_mod_protein: millimolar {pub: in};
    var ATP_ref_mod_bio: millimolar {pub: in};
    var ATP_ref_mod_pool_ABC: millimolar {pub: in};
    var ATP_ref_mod_pool_Flagellum: millimolar {pub: in};
    var ATP_ref_mod_pool_GalP: millimolar {pub: in};
    var ATP_ref_mod_pool_Glf: millimolar {pub: in};
    var ATP_ref_mod_pool_Glyc: millimolar {pub: in};
    var ATP_ref_mod_pool_H_ATPase: millimolar {pub: in};
    var ATP_ref_mod_pool_Hydrolase: millimolar {pub: in};
    var ATP_ref_mod_pool_KefC: millimolar {pub: in};
    var ATP_ref_mod_pool_LacT: millimolar {pub: in};
    var ATP_ref_mod_pool_NCX: millimolar {pub: in};
    var ATP_ref_mod_pool_NhaA: millimolar {pub: in};
    var ATP_ref_mod_pool_PTS: millimolar {pub: in};
    var ATP_ref_mod_pool_Trk: millimolar {pub: in};
    var ATP_ref_mod_pool_proteome: millimolar {pub: in};
    var ATP_ref_mod_protein: millimolar {pub: in};
    var B_Ca_init_mod_Ca: millimolar {pub: in};
    var B_Ca_total_mod_Ca: millimolar {pub: in};
    var C_ADP_init_mod_cytosol: millimolar {pub: in};
    var C_ATP_init_mod_cytosol: millimolar {pub: in};
    var C_ATP_rest_mod_reg: millimolar {pub: in};
    var C_G6P_init_mod_cytosol: millimolar {pub: in};
    var C_G6P_rest_mod_reg: millimolar {pub: in};
    var C_Pi_init_mod_cytosol: millimolar {pub: in};
    var C_glc_e_mod_glc_ABC: millimolar {pub: in};
    var C_glc_e_mod_glc_GalP: millimolar {pub: in};
    var C_glc_e_mod_glc_PTS: millimolar {pub: in};
    var C_glc_e_mod_membrane_face: millimolar {pub: in};
    var C_glc_init_mod_cytosol: millimolar {pub: in};
    var C_glc_rest_mod_reg: millimolar {pub: in};
    var C_glyc_init_mod_cytosol: millimolar {pub: in};
    var C_glyc_max_mod_cytosol: millimolar {pub: in};
    var C_lac_e_mod_glc_ABC: millimolar {pub: in};
    var C_lac_e_mod_glc_GalP: millimolar {pub: in};
    var C_lac_e_mod_glc_PTS: millimolar {pub: in};
    var C_lac_e_mod_membrane_face: millimolar {pub: in};
    var C_lac_init_mod_cytosol: millimolar {pub: in};
    var C_repair_mod_bio: mole {pub: in};
    var Ca__B_Cai: millimolar {pub: out, init: B_Ca_init_mod_Ca};
    var Ca__CaB_Cai: millimolar {pub: out};
    var Ca__Ca_total: millimolar {pub: out};
    var Ca__Cai: millimolar {pub: out, init: Cai_init_mod_Ca};
    var Cai_init_mod_Ca: millimolar {pub: in};
    var Cao_mod_i_NaCa: millimolar {pub: in};
    var Cao_mod_i_leak_Ca: millimolar {pub: in};
    var D_energy_init_mod_bio: dimensionless {pub: in};
    var D_phys_init_mod_bio: dimensionless {pub: in};
    var D_rad_init_mod_bio: dimensionless {pub: in};
    var D_ribo_init_mod_bio: dimensionless {pub: in};
    var F: C_per_mol {pub: in};
    var H__E_H: milliV {pub: out};
    var H__H_i: millimolar {pub: out, init: H_i_init_mod_H};
    var H__H_total_rel: millimolar {pub: out};
    var H__pH_i: dimensionless {pub: out};
    var H__pH_o: dimensionless {pub: out};
    var H_e_mod_membrane_face: millimolar {pub: in};
    var H_i_init_mod_H: millimolar {pub: in};
    var H_o_mod_H: millimolar {pub: in};
    var H_ref_mod_membrane_face: millimolar {pub: in};
    var H_rest_mod_reg: millimolar {pub: in};
    var I_in_mod_membrane: nanoA {pub: in};
    var J_eps_mod_protein: mol_per_s {pub: in};
    var J_ref_mod_bio: mol_per_s {pub: in};
    var J_ref_mod_protein: mol_per_s {pub: in};
    var K_ADP_PEP_mod_glc_PTS: millimolar {pub: in};
    var K_ADP_gly_mod_cytosol: millimolar {pub: in};
    var K_ADP_hyd_mod_cytosol: millimolar {pub: in};
    var K_ATP_gly_mod_cytosol: millimolar {pub: in};
    var K_ATP_hk_mod_cytosol: millimolar {pub: in};
    var K_ATP_hyd_mod_cytosol: millimolar {pub: in};
    var K_ATP_mx_mod_cytosol: millimolar {pub: in};
    var K_ATP_reg_mod_reg: millimolar {pub: in};
    var K_ATP_store_mod_cytosol: millimolar {pub: in};
    var K_Ca_dmg_mod_bio: millimolar {pub: in};
    var K_D_mod_bio: dimensionless {pub: in};
    var K_G6P_lg_mod_cytosol: millimolar {pub: in};
    var K_G6P_mx_mod_cytosol: millimolar {pub: in};
    var K_G6P_reg_mod_reg: millimolar {pub: in};
    var K_G6P_store_mod_cytosol: millimolar {pub: in};
    var K_H_reg_mod_reg: millimolar {pub: in};
    var K_K_dmg_mod_bio: millimolar {pub: in};
    var K_Pi_PEP_mod_glc_PTS: millimolar {pub: in};
    var K_Pi_gly_mod_cytosol: millimolar {pub: in};
    var K_Pi_hyd_mod_cytosol: millimolar {pub: in};
    var K_Pi_mob_mod_cytosol: millimolar {pub: in};
    var K_aa_mod_protein: dimensionless {pub: in};
    var K_act_H_mod_i_H_ATPase: millimolar {pub: in};
    var K_glc_mod_cytosol: millimolar {pub: in};
    var K_glc_reg_mod_reg: millimolar {pub: in};
    var K_glc_t_mod_glc_ABC: millimolar {pub: in};
    var K_glc_t_mod_glc_GalP: millimolar {pub: in};
    var K_glc_t_mod_glc_PTS: millimolar {pub: in};
    var K_glc_t_mod_membrane_face: millimolar {pub: in};
    var K_glyc_mob_mod_cytosol: millimolar {pub: in};
    var K_i_ATP_mob_mod_cytosol: millimolar {pub: in};
    var K_lac_mod_cytosol: millimolar {pub: in};
    var K_lac_t_mod_membrane_face: millimolar {pub: in};
    var K_m_ATP_H_mod_i_H_ATPase: millimolar {pub: in};
    var K_m_ATP_bio_mod_bio: millimolar {pub: in};
    var K_m_ATP_mod_glc_ABC: millimolar {pub: in};
    var K_m_ATP_mod_glc_PTS: millimolar {pub: in};
    var K_m_ATP_mod_pool_ABC: millimolar {pub: in};
    var K_m_ATP_mod_pool_Flagellum: millimolar {pub: in};
    var K_m_ATP_mod_pool_GalP: millimolar {pub: in};
    var K_m_ATP_mod_pool_Glf: millimolar {pub: in};
    var K_m_ATP_mod_pool_Glyc: millimolar {pub: in};
    var K_m_ATP_mod_pool_H_ATPase: millimolar {pub: in};
    var K_m_ATP_mod_pool_Hydrolase: millimolar {pub: in};
    var K_m_ATP_mod_pool_KefC: millimolar {pub: in};
    var K_m_ATP_mod_pool_LacT: millimolar {pub: in};
    var K_m_ATP_mod_pool_NCX: millimolar {pub: in};
    var K_m_ATP_mod_pool_NhaA: millimolar {pub: in};
    var K_m_ATP_mod_pool_PTS: millimolar {pub: in};
    var K_m_ATP_mod_pool_Trk: millimolar {pub: in};
    var K_m_ATP_mod_pool_proteome: millimolar {pub: in};
    var K_m_poly_mod_hydrolase: millimolar {pub: in};
    var Ki_init_mod_Na_K: millimolar {pub: in};
    var KmCa_mod_i_NaCa: millimolar {pub: in};
    var KmNai_mod_i_NaCa: millimolar {pub: in};
    var Ko_mod_Na_K: millimolar {pub: in};
    var Ksat_mod_i_NaCa: dimensionless {pub: in};
    var L_mRNA_mod_bio: dimensionless {pub: in};
    var L_mod_pool_ABC: dimensionless {pub: in};
    var L_mod_pool_Flagellum: dimensionless {pub: in};
    var L_mod_pool_GalP: dimensionless {pub: in};
    var L_mod_pool_Glf: dimensionless {pub: in};
    var L_mod_pool_Glyc: dimensionless {pub: in};
    var L_mod_pool_H_ATPase: dimensionless {pub: in};
    var L_mod_pool_Hydrolase: dimensionless {pub: in};
    var L_mod_pool_KefC: dimensionless {pub: in};
    var L_mod_pool_LacT: dimensionless {pub: in};
    var L_mod_pool_NCX: dimensionless {pub: in};
    var L_mod_pool_NhaA: dimensionless {pub: in};
    var L_mod_pool_PTS: dimensionless {pub: in};
    var L_mod_pool_Trk: dimensionless {pub: in};
    var L_mod_pool_proteome: dimensionless {pub: in};
    var L_rRNA_mod_bio: dimensionless {pub: in};
    var L_rRNA_mod_ribosomes: dimensionless {pub: in};
    var N_A_mod_bio: per_mol {pub: in};
    var N_A_mod_hydrolase: per_mol {pub: in};
    var N_A_mod_i_flagellum: per_mol {pub: in};
    var N_A_mod_pool_ABC: per_mol {pub: in};
    var N_A_mod_pool_Flagellum: per_mol {pub: in};
    var N_A_mod_pool_GalP: per_mol {pub: in};
    var N_A_mod_pool_Glf: per_mol {pub: in};
    var N_A_mod_pool_Glyc: per_mol {pub: in};
    var N_A_mod_pool_H_ATPase: per_mol {pub: in};
    var N_A_mod_pool_Hydrolase: per_mol {pub: in};
    var N_A_mod_pool_KefC: per_mol {pub: in};
    var N_A_mod_pool_LacT: per_mol {pub: in};
    var N_A_mod_pool_NCX: per_mol {pub: in};
    var N_A_mod_pool_NhaA: per_mol {pub: in};
    var N_A_mod_pool_PTS: per_mol {pub: in};
    var N_A_mod_pool_Trk: per_mol {pub: in};
    var N_A_mod_pool_proteome: per_mol {pub: in};
    var N_A_mod_protein: per_mol {pub: in};
    var N_A_mod_ribosomes: per_mol {pub: in};
    var N_aa_init_mod_protein: dimensionless {pub: in};
    var Na_K__E_K: milliV {pub: out};
    var Na_K__E_Na: milliV {pub: out};
    var Na_K__Ki: millimolar {pub: out, init: Ki_init_mod_Na_K};
    var Na_K__Nai: millimolar {pub: out, init: Nai_init_mod_Na_K};
    var Nai_init_mod_Na_K: millimolar {pub: in};
    var Nao_mod_Na_K: millimolar {pub: in};
    var Nao_mod_i_NaCa: millimolar {pub: in};
    var P_init_mod_bio: mole {pub: in};
    var Q10_dmg_mod_bio: dimensionless {pub: in};
    var Q10_mod_cytosol: dimensionless {pub: in};
    var Q_eps_mod_protein: per_s {pub: in};
    var Q_prot_max_mod_protein: per_s {pub: in};
    var R: J_per_mol_K {pub: in};
    var R_body_mod_i_flagellum: um {pub: in};
    var R_cell_mod_membrane: um {pub: in};
    var T: kelvin {pub: in};
    var T_ref_dmg_mod_bio: kelvin {pub: in};
    var T_ref_mod_cytosol: kelvin {pub: in};
    var V_gly_mod_cytosol: millimolar_per_s {pub: in};
    var V_hyd_mod_cytosol: millimolar_per_s {pub: in};
    var V_lg_mod_cytosol: millimolar_per_s {pub: in};
    var V_mob_mod_cytosol: millimolar_per_s {pub: in};
    var V_mx_max_mod_cytosol: millimolar_per_s {pub: in};
    var V_rest_approx_mod_membrane: milliV {pub: in};
    var V_store_max_mod_cytosol: millimolar_per_s {pub: in};
    var a_init_mod_i_flagellum: dimensionless {pub: in};
    var a_motor_mod_i_flagellum: dimensionless {pub: in};
    var aa_ribo_mod_ribosomes: dimensionless {pub: in};
    var alpha_NaCa_mod_i_NaCa: dimensionless {pub: in};
    var area_max_fraction_mod_protein: dimensionless {pub: in};
    var area_per_lipid_mod_bio: um2 {pub: in};
    var beta_H_mod_H: millimolar {pub: in};
    var bio__D: dimensionless {pub: out};
    var bio__D_energy: dimensionless {pub: out, init: D_energy_init_mod_bio};
    var bio__D_phys: dimensionless {pub: out, init: D_phys_init_mod_bio};
    var bio__D_rad: dimensionless {pub: out, init: D_rad_init_mod_bio};
    var bio__D_ribo: dimensionless {pub: out, init: D_ribo_init_mod_bio};
    var bio__J_ATP_bio: mol_per_s {pub: out};
    var bio__J_RNA: mol_per_s {pub: out};
    var bio__J_growth: mol_per_s {pub: out};
    var bio__J_growth_used: mol_per_s {pub: out};
    var bio__J_lipid: mol_per_s {pub: out};
    var bio__J_repair: mol_per_s {pub: out};
    var bio__M_build_bio: mole {pub: out};
    var bio__M_build_protein: mole {pub: out};
    var bio__M_daughter: mole {pub: out};
    var bio__P_growth: mole {pub: out, init: P_init_mod_bio};
    var bio__R_dmg_energy: per_s {pub: out};
    var bio__R_dmg_lipid: per_s {pub: out};
    var bio__R_dmg_phys: per_s {pub: out};
    var bio__R_dmg_qc: per_s {pub: out};
    var bio__R_dmg_rad: per_s {pub: out};
    var bio__R_dmg_ribo: per_s {pub: out};
    var bio__R_reg: dimensionless {pub: out};
    var bio__R_reg_repair: dimensionless {pub: out};
    var bio__R_reg_upkeep: dimensionless {pub: out};
    var bio__R_rep_energy: per_s {pub: out};
    var bio__R_rep_phys: per_s {pub: out};
    var bio__R_rep_rad: per_s {pub: out};
    var bio__R_rep_ribo: per_s {pub: out};
    var bio__R_repair: per_s {pub: out};
    var bio__f_ATP_bio: dimensionless {pub: out};
    var bio__f_Ca_dmg: dimensionless {pub: out};
    var bio__f_K_dmg: dimensionless {pub: out};
    var bio__f_T_dmg: dimensionless {pub: out};
    var bio__f_energy_dmg: dimensionless {pub: out};
    var bio__glycogen_progress: dimensionless {pub: out};
    var bio__growth_progress: dimensionless {pub: out};
    var bio__j_ADP_bio: mol_per_s {pub: out};
    var bio__j_ATP_bio: mol_per_s {pub: out};
    var bio__j_Pi_bio: mol_per_s {pub: out};
    var bio__n_lipid: dimensionless {pub: out};
    var bio__throttle: dimensionless {pub: out};
    var bio__u_upkeep: dimensionless {pub: out};
    var bio__x_ATP: dimensionless {pub: out};
    var bio__x_unpaid: dimensionless {pub: out};
    var bio__x_unpaid_raw: dimensionless {pub: out};
    var build_capacity_rest_mod_protein: dimensionless {pub: in};
    var c_aa_build_mod_ribosomes: dimensionless {pub: in};
    var c_deg_mod_pool_ABC: dimensionless {pub: in};
    var c_deg_mod_pool_Flagellum: dimensionless {pub: in};
    var c_deg_mod_pool_GalP: dimensionless {pub: in};
    var c_deg_mod_pool_Glf: dimensionless {pub: in};
    var c_deg_mod_pool_Glyc: dimensionless {pub: in};
    var c_deg_mod_pool_H_ATPase: dimensionless {pub: in};
    var c_deg_mod_pool_Hydrolase: dimensionless {pub: in};
    var c_deg_mod_pool_KefC: dimensionless {pub: in};
    var c_deg_mod_pool_LacT: dimensionless {pub: in};
    var c_deg_mod_pool_NCX: dimensionless {pub: in};
    var c_deg_mod_pool_NhaA: dimensionless {pub: in};
    var c_deg_mod_pool_PTS: dimensionless {pub: in};
    var c_deg_mod_pool_Trk: dimensionless {pub: in};
    var c_deg_mod_pool_proteome: dimensionless {pub: in};
    var c_lipid_mod_bio: dimensionless {pub: in};
    var c_m_mod_membrane: uF_per_cm2 {pub: in};
    var c_nt_denovo_mod_bio: dimensionless {pub: in};
    var c_nt_denovo_mod_ribosomes: dimensionless {pub: in};
    var c_nt_recycle_mod_bio: dimensionless {pub: in};
    var c_nt_recycle_mod_ribosomes: dimensionless {pub: in};
    var c_poly_mod_pool_ABC: dimensionless {pub: in};
    var c_poly_mod_pool_Flagellum: dimensionless {pub: in};
    var c_poly_mod_pool_GalP: dimensionless {pub: in};
    var c_poly_mod_pool_Glf: dimensionless {pub: in};
    var c_poly_mod_pool_Glyc: dimensionless {pub: in};
    var c_poly_mod_pool_H_ATPase: dimensionless {pub: in};
    var c_poly_mod_pool_Hydrolase: dimensionless {pub: in};
    var c_poly_mod_pool_KefC: dimensionless {pub: in};
    var c_poly_mod_pool_LacT: dimensionless {pub: in};
    var c_poly_mod_pool_NCX: dimensionless {pub: in};
    var c_poly_mod_pool_NhaA: dimensionless {pub: in};
    var c_poly_mod_pool_PTS: dimensionless {pub: in};
    var c_poly_mod_pool_Trk: dimensionless {pub: in};
    var c_poly_mod_pool_proteome: dimensionless {pub: in};
    var c_recycle_mod_pool_ABC: dimensionless {pub: in};
    var c_recycle_mod_pool_Flagellum: dimensionless {pub: in};
    var c_recycle_mod_pool_GalP: dimensionless {pub: in};
    var c_recycle_mod_pool_Glf: dimensionless {pub: in};
    var c_recycle_mod_pool_Glyc: dimensionless {pub: in};
    var c_recycle_mod_pool_H_ATPase: dimensionless {pub: in};
    var c_recycle_mod_pool_Hydrolase: dimensionless {pub: in};
    var c_recycle_mod_pool_KefC: dimensionless {pub: in};
    var c_recycle_mod_pool_LacT: dimensionless {pub: in};
    var c_recycle_mod_pool_NCX: dimensionless {pub: in};
    var c_recycle_mod_pool_NhaA: dimensionless {pub: in};
    var c_recycle_mod_pool_PTS: dimensionless {pub: in};
    var c_recycle_mod_pool_Trk: dimensionless {pub: in};
    var c_recycle_mod_pool_proteome: dimensionless {pub: in};
    var c_std_mod_H: millimolar {pub: in};
    var c_std_mod_cytosol: millimolar {pub: in};
    var c_std_mod_glc_ABC: millimolar {pub: in};
    var c_std_mod_glc_GalP: millimolar {pub: in};
    var c_std_mod_glc_PTS: millimolar {pub: in};
    var c_std_mod_i_H_ATPase: millimolar {pub: in};
    var c_syn_mod_pool_ABC: dimensionless {pub: in};
    var c_syn_mod_pool_Flagellum: dimensionless {pub: in};
    var c_syn_mod_pool_GalP: dimensionless {pub: in};
    var c_syn_mod_pool_Glf: dimensionless {pub: in};
    var c_syn_mod_pool_Glyc: dimensionless {pub: in};
    var c_syn_mod_pool_H_ATPase: dimensionless {pub: in};
    var c_syn_mod_pool_Hydrolase: dimensionless {pub: in};
    var c_syn_mod_pool_KefC: dimensionless {pub: in};
    var c_syn_mod_pool_LacT: dimensionless {pub: in};
    var c_syn_mod_pool_NCX: dimensionless {pub: in};
    var c_syn_mod_pool_NhaA: dimensionless {pub: in};
    var c_syn_mod_pool_PTS: dimensionless {pub: in};
    var c_syn_mod_pool_Trk: dimensionless {pub: in};
    var c_syn_mod_pool_proteome: dimensionless {pub: in};
    var cytosol__A_hk: J_per_mol {pub: out};
    var cytosol__A_hyd: J_per_mol {pub: out};
    var cytosol__A_lg: J_per_mol {pub: out};
    var cytosol__A_mob: J_per_mol {pub: out};
    var cytosol__A_mx: J_per_mol {pub: out};
    var cytosol__A_store: J_per_mol {pub: out};
    var cytosol__C_ADP: millimolar {pub: out, init: C_ADP_init_mod_cytosol};
    var cytosol__C_ATP: millimolar {pub: out, init: C_ATP_init_mod_cytosol};
    var cytosol__C_G6P: millimolar {pub: out, init: C_G6P_init_mod_cytosol};
    var cytosol__C_Pi: millimolar {pub: out, init: C_Pi_init_mod_cytosol};
    var cytosol__C_glc: millimolar {pub: out, init: C_glc_init_mod_cytosol};
    var cytosol__C_glyc: millimolar {pub: out, init: C_glyc_init_mod_cytosol};
    var cytosol__C_lac: millimolar {pub: out, init: C_lac_init_mod_cytosol};
    var cytosol__Gamma_hk: dimensionless {pub: out};
    var cytosol__Gamma_hyd: dimensionless {pub: out};
    var cytosol__Gamma_lg: dimensionless {pub: out};
    var cytosol__Gamma_mob: dimensionless {pub: out};
    var cytosol__Gamma_mx: dimensionless {pub: out};
    var cytosol__Gamma_store: dimensionless {pub: out};
    var cytosol__J_ATP_gly: mol_per_s {pub: out};
    var cytosol__J_ATP_hk: mol_per_s {pub: out};
    var cytosol__J_ATP_lg: mol_per_s {pub: out};
    var cytosol__J_ATP_maint: mol_per_s {pub: out};
    var cytosol__J_ATP_mob: mol_per_s {pub: out};
    var cytosol__J_ATP_mx: mol_per_s {pub: out};
    var cytosol__J_ATP_store: mol_per_s {pub: out};
    var cytosol__J_ATP_turnover: mol_per_s {pub: out};
    var cytosol__J_mx: mol_per_s {pub: out};
    var cytosol__K_eq_hk: dimensionless {pub: out};
    var cytosol__K_eq_hyd: dimensionless {pub: out};
    var cytosol__K_eq_lg: dimensionless {pub: out};
    var cytosol__K_eq_mob: dimensionless {pub: out};
    var cytosol__K_eq_mx: dimensionless {pub: out};
    var cytosol__K_eq_store: dimensionless {pub: out};
    var cytosol__M_glyc_ATP: mole {pub: out};
    var cytosol__P_diss: watt {pub: out};
    var cytosol__Q_met: watt {pub: out};
    var cytosol__R_reg: dimensionless {pub: out};
    var cytosol__a_glyc: dimensionless {pub: out};
    var cytosol__f_T: dimensionless {pub: out};
    var cytosol__j_H_met: mol_per_s {pub: out};
    var cytosol__v_gly: millimolar_per_s {pub: out};
    var cytosol__v_hyd: millimolar_per_s {pub: out};
    var cytosol__v_lg: millimolar_per_s {pub: out};
    var cytosol__v_mob: millimolar_per_s {pub: out};
    var cytosol__v_mx: millimolar_per_s {pub: out};
    var cytosol__v_store: millimolar_per_s {pub: out};
    var dG0_ferm_mod_cytosol: J_per_mol {pub: in};
    var dG0_hk_mod_cytosol: J_per_mol {pub: in};
    var dG0_hk_mod_glc_PTS: J_per_mol {pub: in};
    var dG0_hyd_mod_cytosol: J_per_mol {pub: in};
    var dG0_hyd_mod_glc_ABC: J_per_mol {pub: in};
    var dG0_hyd_mod_i_H_ATPase: J_per_mol {pub: in};
    var dG0_mx_mod_cytosol: J_per_mol {pub: in};
    var dG0_store_mod_cytosol: J_per_mol {pub: in};
    var dT_Q10_mod_bio: kelvin {pub: in};
    var dT_Q10_mod_cytosol: kelvin {pub: in};
    var dose_rate_mod_bio: gray_per_s {pub: in};
    var eta_mod_i_flagellum: pascal_second {pub: in};
    var f_ref_mod_i_flagellum: per_s {pub: in};
    var footprint_mod_pool_ABC: nm2 {pub: in};
    var footprint_mod_pool_Flagellum: nm2 {pub: in};
    var footprint_mod_pool_GalP: nm2 {pub: in};
    var footprint_mod_pool_Glf: nm2 {pub: in};
    var footprint_mod_pool_Glyc: nm2 {pub: in};
    var footprint_mod_pool_H_ATPase: nm2 {pub: in};
    var footprint_mod_pool_Hydrolase: nm2 {pub: in};
    var footprint_mod_pool_KefC: nm2 {pub: in};
    var footprint_mod_pool_LacT: nm2 {pub: in};
    var footprint_mod_pool_NCX: nm2 {pub: in};
    var footprint_mod_pool_NhaA: nm2 {pub: in};
    var footprint_mod_pool_PTS: nm2 {pub: in};
    var footprint_mod_pool_Trk: nm2 {pub: in};
    var footprint_mod_pool_proteome: nm2 {pub: in};
    var g_spec_leak_H_mod_i_leak_H: microS_per_um2 {pub: in};
    var g_spec_mod_i_KH: microS_per_um2 {pub: in};
    var g_spec_mod_i_NaH: microS_per_um2 {pub: in};
    var gamma_NaCa_mod_i_NaCa: dimensionless {pub: in};
    var gamma_leak_Ca_mod_i_leak_Ca: picoS {pub: in};
    var gamma_leak_K_mod_i_K_Trk: picoS {pub: in};
    var gamma_leak_Na_mod_i_leak_Na: picoS {pub: in};
    var genome_nt_mod_bio: dimensionless {pub: in};
    var glc_ABC__ATP_eq: millimolar {pub: out};
    var glc_ABC__A_ATP: J_per_mol {pub: out};
    var glc_ABC__A_glc: J_per_mol {pub: out};
    var glc_ABC__J_ADP_c: mol_per_s {pub: out};
    var glc_ABC__J_ATP_c: mol_per_s {pub: out};
    var glc_ABC__J_ATP_cost: mol_per_s {pub: out};
    var glc_ABC__J_Pi_c: mol_per_s {pub: out};
    var glc_ABC__J_glc: mol_per_s {pub: out};
    var glc_ABC__J_glc_c: mol_per_s {pub: out};
    var glc_ABC__J_glc_e: mol_per_s {pub: out};
    var glc_ABC__J_lac_c: mol_per_s {pub: out};
    var glc_ABC__J_lac_e: mol_per_s {pub: out};
    var glc_ABC__j_ADP: mol_per_s {pub: out};
    var glc_ABC__j_ATP: mol_per_s {pub: out};
    var glc_ABC__j_Pi: mol_per_s {pub: out};
    var glc_GalP__A_glc: J_per_mol {pub: out};
    var glc_GalP__J_ADP_c: mol_per_s {pub: out};
    var glc_GalP__J_ATP_c: mol_per_s {pub: out};
    var glc_GalP__J_Pi_c: mol_per_s {pub: out};
    var glc_GalP__J_glc: mol_per_s {pub: out};
    var glc_GalP__J_glc_c: mol_per_s {pub: out};
    var glc_GalP__J_glc_e: mol_per_s {pub: out};
    var glc_GalP__J_lac_c: mol_per_s {pub: out};
    var glc_GalP__J_lac_e: mol_per_s {pub: out};
    var glc_GalP__W_H: J_per_mol {pub: out};
    var glc_GalP__i_glc_H: nanoA {pub: out};
    var glc_GalP__j_H: mol_per_s {pub: out};
    var glc_PTS__A_glc: J_per_mol {pub: out};
    var glc_PTS__Gamma: dimensionless {pub: out};
    var glc_PTS__J_ATP_cost: mol_per_s {pub: out};
    var glc_PTS__J_G6P: mol_per_s {pub: out};
    var glc_PTS__J_glc: mol_per_s {pub: out};
    var glc_PTS__J_glc_e: mol_per_s {pub: out};
    var glc_PTS__J_lac_e: mol_per_s {pub: out};
    var glc_PTS__K_eq: dimensionless {pub: out};
    var glc_PTS__f_PEP: dimensionless {pub: out};
    var glc_PTS__j_ADP: mol_per_s {pub: out};
    var glc_PTS__j_ATP: mol_per_s {pub: out};
    var glc_PTS__j_Pi: mol_per_s {pub: out};
    var growth_level_mod_bio: dimensionless {pub: in};
    var h_ATP_mod_cytosol: J_per_mol {pub: in};
    var h_cell_mod_membrane: um {pub: in};
    var h_glyc_poly_mod_cytosol: J_per_mol {pub: in};
    var h_hk_mod_cytosol: J_per_mol {pub: in};
    var h_lac_gly_mod_cytosol: J_per_mol {pub: in};
    var h_mx_poly_mod_cytosol: J_per_mol {pub: in};
    var hydrolase__V_hydrolysis_max: mol_per_s {pub: out};
    var hydrolase__n_copies: dimensionless {pub: out};
    var i_H_ATPase__A_ATP: J_per_mol {pub: out};
    var i_H_ATPase__W_H: J_per_mol {pub: out};
    var i_H_ATPase__f_thermo: dimensionless {pub: out};
    var i_H_ATPase__i_H_ATPase: nanoA {pub: out};
    var i_H_ATPase__j_ADP_H: mol_per_s {pub: out};
    var i_H_ATPase__j_ATP_H: mol_per_s {pub: out};
    var i_H_ATPase__j_H_ATPase: mol_per_s {pub: out};
    var i_H_ATPase__j_H_pumped: mol_per_s {pub: out};
    var i_H_ATPase__j_Pi_H: mol_per_s {pub: out};
    var i_H_ATPase__k_H_ATPase: nanoA {pub: out};
    var i_H_ATPase__v_ATP_H: mol_per_s {pub: out};
    var i_KH__drive: milliV {pub: out};
    var i_KH__j_KH_H: mol_per_s {pub: out};
    var i_KH__j_KH_K: mol_per_s {pub: out};
    var i_KH__r_cycle: mol_per_s {pub: out};
    var i_K_Trk__g_leak_K: microS {pub: out};
    var i_K_Trk__i_leak_K: nanoA {pub: out};
    var i_K_Trk__j_leak_K: mol_per_s {pub: out};
    var i_NaCa__i_NaCa: nanoA {pub: out};
    var i_NaCa__j_NaCa_Ca: mol_per_s {pub: out};
    var i_NaCa__j_NaCa_Na: mol_per_s {pub: out};
    var i_NaCa__k_NaCa: nanoA {pub: out};
    var i_NaH__drive: milliV {pub: out};
    var i_NaH__i_NaH: nanoA {pub: out};
    var i_NaH__j_NaH_H: mol_per_s {pub: out};
    var i_NaH__j_NaH_Na: mol_per_s {pub: out};
    var i_NaH__r_cycle: mol_per_s {pub: out};
    var i_flagellum__F_one: newton {pub: out};
    var i_flagellum__F_thrust: newton {pub: out};
    var i_flagellum__P_flag: watt {pub: out};
    var i_flagellum__P_mech: watt {pub: out};
    var i_flagellum__a_eff: dimensionless {pub: out, init: a_init_mod_i_flagellum};
    var i_flagellum__f_rot: per_s {pub: out};
    var i_flagellum__i_flag: nanoA {pub: out};
    var i_flagellum__j_H_flag: mol_per_s {pub: out};
    var i_flagellum__pmf: milliV {pub: out};
    var i_flagellum__v_swim: m_per_s {pub: out};
    var i_flagellum__xi: newton_s_per_m {pub: out};
    var i_leak_Ca__E_Ca: milliV {pub: out};
    var i_leak_Ca__g_leak_Ca: microS {pub: out};
    var i_leak_Ca__i_leak_Ca: nanoA {pub: out};
    var i_leak_Ca__j_leak_Ca: mol_per_s {pub: out};
    var i_leak_H__g_leak_H: microS {pub: out};
    var i_leak_H__i_leak_H: nanoA {pub: out};
    var i_leak_H__j_leak_H: mol_per_s {pub: out};
    var i_leak_Na__g_leak_Na: microS {pub: out};
    var i_leak_Na__i_leak_Na: nanoA {pub: out};
    var i_leak_Na__j_leak_Na: mol_per_s {pub: out};
    var jmax_glc_mod_glc_ABC: mol_per_s_per_um2 {pub: in};
    var jmax_glc_mod_glc_GalP: mol_per_s_per_um2 {pub: in};
    var jmax_glc_mod_glc_PTS: mol_per_s_per_um2 {pub: in};
    var jmax_glc_mod_membrane_face: mol_per_s_per_um2 {pub: in};
    var jmax_lac_mod_membrane_face: mol_per_s_per_um2 {pub: in};
    var k_Ca_dmg_mod_bio: per_s {pub: in};
    var k_K_dmg_mod_bio: per_s {pub: in};
    var k_bind_Ca_mod_Ca: per_millimolar_s {pub: in};
    var k_deg_mod_pool_ABC: per_s {pub: in};
    var k_deg_mod_pool_Flagellum: per_s {pub: in};
    var k_deg_mod_pool_GalP: per_s {pub: in};
    var k_deg_mod_pool_Glf: per_s {pub: in};
    var k_deg_mod_pool_Glyc: per_s {pub: in};
    var k_deg_mod_pool_H_ATPase: per_s {pub: in};
    var k_deg_mod_pool_Hydrolase: per_s {pub: in};
    var k_deg_mod_pool_KefC: per_s {pub: in};
    var k_deg_mod_pool_LacT: per_s {pub: in};
    var k_deg_mod_pool_NCX: per_s {pub: in};
    var k_deg_mod_pool_NhaA: per_s {pub: in};
    var k_deg_mod_pool_PTS: per_s {pub: in};
    var k_deg_mod_pool_Trk: per_s {pub: in};
    var k_deg_mod_pool_proteome: per_s {pub: in};
    var k_energy_dmg_mod_bio: per_s {pub: in};
    var k_lipid_dmg_mod_bio: per_s {pub: in};
    var k_lipid_mod_bio: per_s {pub: in};
    var k_qc_dmg_mod_bio: per_s {pub: in};
    var k_rad_dmg_mod_bio: per_gray {pub: in};
    var k_ribo_build_mod_ribosomes: per_s {pub: in};
    var k_ribo_mod_ribosomes: per_s {pub: in};
    var k_unbind_Ca_mod_Ca: per_s {pub: in};
    var kcat_mod_hydrolase: per_s {pub: in};
    var m_init_mod_pool_ABC: dimensionless {pub: in};
    var m_init_mod_pool_Flagellum: dimensionless {pub: in};
    var m_init_mod_pool_GalP: dimensionless {pub: in};
    var m_init_mod_pool_Glf: dimensionless {pub: in};
    var m_init_mod_pool_Glyc: dimensionless {pub: in};
    var m_init_mod_pool_H_ATPase: dimensionless {pub: in};
    var m_init_mod_pool_Hydrolase: dimensionless {pub: in};
    var m_init_mod_pool_KefC: dimensionless {pub: in};
    var m_init_mod_pool_LacT: dimensionless {pub: in};
    var m_init_mod_pool_NCX: dimensionless {pub: in};
    var m_init_mod_pool_NhaA: dimensionless {pub: in};
    var m_init_mod_pool_PTS: dimensionless {pub: in};
    var m_init_mod_pool_Trk: dimensionless {pub: in};
    var m_init_mod_pool_proteome: dimensionless {pub: in};
    var m_target_mod_pool_Flagellum: dimensionless {pub: in};
    var m_target_mod_pool_Glyc: dimensionless {pub: in};
    var m_target_mod_pool_proteome: dimensionless {pub: in};
    var membrane__A_mem: um2 {pub: out};
    var membrane__Cm: picoF {pub: out};
    var membrane__V: milliV {pub: out, init: V_rest_approx_mod_membrane};
    var membrane__Vol: m3 {pub: out};
    var membrane_face__J_ADP_c: mol_per_s {pub: out};
    var membrane_face__J_ATP_c: mol_per_s {pub: out};
    var membrane_face__J_H_lac: mol_per_s {pub: out};
    var membrane_face__J_Pi_c: mol_per_s {pub: out};
    var membrane_face__J_glc: mol_per_s {pub: out};
    var membrane_face__J_glc_c: mol_per_s {pub: out};
    var membrane_face__J_glc_e: mol_per_s {pub: out};
    var membrane_face__J_lac: mol_per_s {pub: out};
    var membrane_face__J_lac_c: mol_per_s {pub: out};
    var membrane_face__J_lac_e: mol_per_s {pub: out};
    var membrane_face__X_lac_e: millimolar {pub: out};
    var membrane_face__X_lac_i: millimolar {pub: out};
    var multiport_sum_mod_Ca_j_Ca_in__j_Ca_in: mol_per_s {pub: out};
    var multiport_sum_mod_H_j_H_in__j_H_in: mol_per_s {pub: out};
    var multiport_sum_mod_H_j_H_prod__j_H_prod: mol_per_s {pub: out};
    var multiport_sum_mod_Na_K_j_K_total__j_K_total: mol_per_s {pub: out};
    var multiport_sum_mod_Na_K_j_Na_total__j_Na_total: mol_per_s {pub: out};
    var multiport_sum_mod_bio_M_build_in__M_build_in: mole {pub: out};
    var multiport_sum_mod_cytosol_J_ADP_in__J_ADP_in: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_ADP_out__J_ADP_out: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_ATP_in__J_ATP_in: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_ATP_out__J_ATP_out: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_Pi_in__J_Pi_in: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_Pi_out__J_Pi_out: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_glc_in__J_glc_in: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_glc_out__J_glc_out: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_lac_in__J_lac_in: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_J_lac_out__J_lac_out: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_j_ADP_ext__j_ADP_ext: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_j_G6P_ext__j_G6P_ext: mol_per_s {pub: out};
    var multiport_sum_mod_cytosol_j_Pi_ext__j_Pi_ext: mol_per_s {pub: out};
    var multiport_sum_mod_membrane_i_ion__i_ion: nanoA {pub: out};
    var multiport_sum_mod_protein_A_protein_in__A_protein_in: um2 {pub: out};
    var multiport_sum_mod_protein_J_ATP_in__J_ATP_in: mol_per_s {pub: out};
    var multiport_sum_mod_protein_J_build_in__J_build_in: mol_per_s {pub: out};
    var multiport_sum_mod_protein_J_demand_in__J_demand_in: mol_per_s {pub: out};
    var multiport_sum_mod_protein_J_keep_in__J_keep_in: mol_per_s {pub: out};
    var multiport_sum_mod_protein_J_prot_in__J_prot_in: mol_per_s {pub: out};
    var multiport_sum_mod_protein_J_saved_in__J_saved_in: mol_per_s {pub: out};
    var multiport_sum_mod_protein_M_build_in__M_build_in: mole {pub: out};
    var multiport_sum_mod_protein_Q_aa_rel_in__Q_aa_rel_in: per_s {pub: out};
    var multiport_sum_mod_protein_Q_aa_use_in__Q_aa_use_in: per_s {pub: out};
    var multiport_sum_mod_protein_Q_prot_demand_in__Q_prot_demand_in: per_s {pub: out};
    var mx_alloc_mod_cytosol: dimensionless {pub: in};
    var n_0_mod_hydrolase: dimensionless {pub: in};
    var n_0_mod_pool_ABC: dimensionless {pub: in};
    var n_0_mod_pool_Flagellum: dimensionless {pub: in};
    var n_0_mod_pool_GalP: dimensionless {pub: in};
    var n_0_mod_pool_Glf: dimensionless {pub: in};
    var n_0_mod_pool_Glyc: dimensionless {pub: in};
    var n_0_mod_pool_H_ATPase: dimensionless {pub: in};
    var n_0_mod_pool_Hydrolase: dimensionless {pub: in};
    var n_0_mod_pool_KefC: dimensionless {pub: in};
    var n_0_mod_pool_LacT: dimensionless {pub: in};
    var n_0_mod_pool_NCX: dimensionless {pub: in};
    var n_0_mod_pool_NhaA: dimensionless {pub: in};
    var n_0_mod_pool_PTS: dimensionless {pub: in};
    var n_0_mod_pool_Trk: dimensionless {pub: in};
    var n_0_mod_pool_proteome: dimensionless {pub: in};
    var n_ATP_mx_mod_cytosol: dimensionless {pub: in};
    var n_Ca_dmg_mod_bio: dimensionless {pub: in};
    var n_G6P_lg_mod_cytosol: dimensionless {pub: in};
    var n_H_mod_glc_GalP: dimensionless {pub: in};
    var n_H_mod_i_H_ATPase: dimensionless {pub: in};
    var n_H_rev_mod_i_flagellum: dimensionless {pub: in};
    var n_P_mod_glc_ABC: dimensionless {pub: in};
    var n_half_mod_i_flagellum: dimensionless {pub: in};
    var n_mRNA_mod_bio: dimensionless {pub: in};
    var n_reg_mod_reg: dimensionless {pub: in};
    var n_ribo_build_mod_ribosomes: dimensionless {pub: in};
    var n_ribo_init_mod_ribosomes: dimensionless {pub: in};
    var n_ribo_mod_bio: dimensionless {pub: in};
    var n_ribo_rest_mod_ribosomes: dimensionless {pub: in};
    var pmf_ref_mod_i_flagellum: milliV {pub: in};
    var pool_ABC__A_protein: um2 {pub: out};
    var pool_ABC__J_ATP: mol_per_s {pub: out};
    var pool_ABC__J_build: mol_per_s {pub: out};
    var pool_ABC__J_demand: mol_per_s {pub: out};
    var pool_ABC__J_keep: mol_per_s {pub: out};
    var pool_ABC__J_prot: mol_per_s {pub: out};
    var pool_ABC__J_saved: mol_per_s {pub: out};
    var pool_ABC__M_build: mole {pub: out};
    var pool_ABC__Q_aa_rel: per_s {pub: out};
    var pool_ABC__Q_aa_use: per_s {pub: out};
    var pool_ABC__Q_prot_demand: per_s {pub: out};
    var pool_ABC__R_reg: dimensionless {pub: out};
    var pool_ABC__a_unit: um2 {pub: out};
    var pool_ABC__f_ATP: dimensionless {pub: out};
    var pool_ABC__f_build: dimensionless {pub: out};
    var pool_ABC__m: dimensionless {pub: out, init: m_init_mod_pool_ABC};
    var pool_ABC__m_goal: dimensionless {pub: out};
    var pool_ABC__m_kept: dimensionless {pub: out};
    var pool_ABC__m_target: dimensionless {pub: out};
    var pool_ABC__n: dimensionless {pub: out};
    var pool_ABC__r_build: per_s {pub: out};
    var pool_ABC__r_deg: per_s {pub: out};
    var pool_ABC__r_down: per_s {pub: out};
    var pool_ABC__r_prot: per_s {pub: out};
    var pool_ABC__r_rel: per_s {pub: out};
    var pool_ABC__r_rep: per_s {pub: out};
    var pool_ABC__r_up: per_s {pub: out};
    var pool_ABC__s_unit: dimensionless {pub: out};
    var pool_ABC__share: dimensionless {pub: out};
    var pool_Flagellum__A_protein: um2 {pub: out};
    var pool_Flagellum__J_ATP: mol_per_s {pub: out};
    var pool_Flagellum__J_build: mol_per_s {pub: out};
    var pool_Flagellum__J_demand: mol_per_s {pub: out};
    var pool_Flagellum__J_keep: mol_per_s {pub: out};
    var pool_Flagellum__J_prot: mol_per_s {pub: out};
    var pool_Flagellum__J_saved: mol_per_s {pub: out};
    var pool_Flagellum__M_build: mole {pub: out};
    var pool_Flagellum__Q_aa_rel: per_s {pub: out};
    var pool_Flagellum__Q_aa_use: per_s {pub: out};
    var pool_Flagellum__Q_prot_demand: per_s {pub: out};
    var pool_Flagellum__R_reg: dimensionless {pub: out};
    var pool_Flagellum__a_unit: um2 {pub: out};
    var pool_Flagellum__f_ATP: dimensionless {pub: out};
    var pool_Flagellum__f_build: dimensionless {pub: out};
    var pool_Flagellum__m: dimensionless {pub: out, init: m_init_mod_pool_Flagellum};
    var pool_Flagellum__m_goal: dimensionless {pub: out};
    var pool_Flagellum__m_kept: dimensionless {pub: out};
    var pool_Flagellum__n: dimensionless {pub: out};
    var pool_Flagellum__r_build: per_s {pub: out};
    var pool_Flagellum__r_deg: per_s {pub: out};
    var pool_Flagellum__r_down: per_s {pub: out};
    var pool_Flagellum__r_prot: per_s {pub: out};
    var pool_Flagellum__r_rel: per_s {pub: out};
    var pool_Flagellum__r_rep: per_s {pub: out};
    var pool_Flagellum__r_up: per_s {pub: out};
    var pool_Flagellum__s_unit: dimensionless {pub: out};
    var pool_Flagellum__share: dimensionless {pub: out};
    var pool_GalP__A_protein: um2 {pub: out};
    var pool_GalP__J_ATP: mol_per_s {pub: out};
    var pool_GalP__J_build: mol_per_s {pub: out};
    var pool_GalP__J_demand: mol_per_s {pub: out};
    var pool_GalP__J_keep: mol_per_s {pub: out};
    var pool_GalP__J_prot: mol_per_s {pub: out};
    var pool_GalP__J_saved: mol_per_s {pub: out};
    var pool_GalP__M_build: mole {pub: out};
    var pool_GalP__Q_aa_rel: per_s {pub: out};
    var pool_GalP__Q_aa_use: per_s {pub: out};
    var pool_GalP__Q_prot_demand: per_s {pub: out};
    var pool_GalP__R_reg: dimensionless {pub: out};
    var pool_GalP__a_unit: um2 {pub: out};
    var pool_GalP__f_ATP: dimensionless {pub: out};
    var pool_GalP__f_build: dimensionless {pub: out};
    var pool_GalP__m: dimensionless {pub: out, init: m_init_mod_pool_GalP};
    var pool_GalP__m_goal: dimensionless {pub: out};
    var pool_GalP__m_kept: dimensionless {pub: out};
    var pool_GalP__m_target: dimensionless {pub: out};
    var pool_GalP__n: dimensionless {pub: out};
    var pool_GalP__r_build: per_s {pub: out};
    var pool_GalP__r_deg: per_s {pub: out};
    var pool_GalP__r_down: per_s {pub: out};
    var pool_GalP__r_prot: per_s {pub: out};
    var pool_GalP__r_rel: per_s {pub: out};
    var pool_GalP__r_rep: per_s {pub: out};
    var pool_GalP__r_up: per_s {pub: out};
    var pool_GalP__s_unit: dimensionless {pub: out};
    var pool_GalP__share: dimensionless {pub: out};
    var pool_Glf__A_protein: um2 {pub: out};
    var pool_Glf__J_ATP: mol_per_s {pub: out};
    var pool_Glf__J_build: mol_per_s {pub: out};
    var pool_Glf__J_demand: mol_per_s {pub: out};
    var pool_Glf__J_keep: mol_per_s {pub: out};
    var pool_Glf__J_prot: mol_per_s {pub: out};
    var pool_Glf__J_saved: mol_per_s {pub: out};
    var pool_Glf__M_build: mole {pub: out};
    var pool_Glf__Q_aa_rel: per_s {pub: out};
    var pool_Glf__Q_aa_use: per_s {pub: out};
    var pool_Glf__Q_prot_demand: per_s {pub: out};
    var pool_Glf__R_reg: dimensionless {pub: out};
    var pool_Glf__a_unit: um2 {pub: out};
    var pool_Glf__f_ATP: dimensionless {pub: out};
    var pool_Glf__f_build: dimensionless {pub: out};
    var pool_Glf__m: dimensionless {pub: out, init: m_init_mod_pool_Glf};
    var pool_Glf__m_goal: dimensionless {pub: out};
    var pool_Glf__m_kept: dimensionless {pub: out};
    var pool_Glf__m_target: dimensionless {pub: out};
    var pool_Glf__n: dimensionless {pub: out};
    var pool_Glf__r_build: per_s {pub: out};
    var pool_Glf__r_deg: per_s {pub: out};
    var pool_Glf__r_down: per_s {pub: out};
    var pool_Glf__r_prot: per_s {pub: out};
    var pool_Glf__r_rel: per_s {pub: out};
    var pool_Glf__r_rep: per_s {pub: out};
    var pool_Glf__r_up: per_s {pub: out};
    var pool_Glf__s_unit: dimensionless {pub: out};
    var pool_Glf__share: dimensionless {pub: out};
    var pool_Glyc__A_protein: um2 {pub: out};
    var pool_Glyc__J_ATP: mol_per_s {pub: out};
    var pool_Glyc__J_build: mol_per_s {pub: out};
    var pool_Glyc__J_demand: mol_per_s {pub: out};
    var pool_Glyc__J_keep: mol_per_s {pub: out};
    var pool_Glyc__J_prot: mol_per_s {pub: out};
    var pool_Glyc__J_saved: mol_per_s {pub: out};
    var pool_Glyc__M_build: mole {pub: out};
    var pool_Glyc__Q_aa_rel: per_s {pub: out};
    var pool_Glyc__Q_aa_use: per_s {pub: out};
    var pool_Glyc__Q_prot_demand: per_s {pub: out};
    var pool_Glyc__R_reg: dimensionless {pub: out};
    var pool_Glyc__a_unit: um2 {pub: out};
    var pool_Glyc__f_ATP: dimensionless {pub: out};
    var pool_Glyc__f_build: dimensionless {pub: out};
    var pool_Glyc__m: dimensionless {pub: out, init: m_init_mod_pool_Glyc};
    var pool_Glyc__m_goal: dimensionless {pub: out};
    var pool_Glyc__m_kept: dimensionless {pub: out};
    var pool_Glyc__n: dimensionless {pub: out};
    var pool_Glyc__r_build: per_s {pub: out};
    var pool_Glyc__r_deg: per_s {pub: out};
    var pool_Glyc__r_down: per_s {pub: out};
    var pool_Glyc__r_prot: per_s {pub: out};
    var pool_Glyc__r_rel: per_s {pub: out};
    var pool_Glyc__r_rep: per_s {pub: out};
    var pool_Glyc__r_up: per_s {pub: out};
    var pool_Glyc__s_unit: dimensionless {pub: out};
    var pool_Glyc__share: dimensionless {pub: out};
    var pool_H_ATPase__A_protein: um2 {pub: out};
    var pool_H_ATPase__J_ATP: mol_per_s {pub: out};
    var pool_H_ATPase__J_build: mol_per_s {pub: out};
    var pool_H_ATPase__J_demand: mol_per_s {pub: out};
    var pool_H_ATPase__J_keep: mol_per_s {pub: out};
    var pool_H_ATPase__J_prot: mol_per_s {pub: out};
    var pool_H_ATPase__J_saved: mol_per_s {pub: out};
    var pool_H_ATPase__M_build: mole {pub: out};
    var pool_H_ATPase__Q_aa_rel: per_s {pub: out};
    var pool_H_ATPase__Q_aa_use: per_s {pub: out};
    var pool_H_ATPase__Q_prot_demand: per_s {pub: out};
    var pool_H_ATPase__R_reg: dimensionless {pub: out};
    var pool_H_ATPase__a_unit: um2 {pub: out};
    var pool_H_ATPase__f_ATP: dimensionless {pub: out};
    var pool_H_ATPase__f_build: dimensionless {pub: out};
    var pool_H_ATPase__m: dimensionless {pub: out, init: m_init_mod_pool_H_ATPase};
    var pool_H_ATPase__m_goal: dimensionless {pub: out};
    var pool_H_ATPase__m_kept: dimensionless {pub: out};
    var pool_H_ATPase__m_target: dimensionless {pub: out};
    var pool_H_ATPase__n: dimensionless {pub: out};
    var pool_H_ATPase__r_build: per_s {pub: out};
    var pool_H_ATPase__r_deg: per_s {pub: out};
    var pool_H_ATPase__r_down: per_s {pub: out};
    var pool_H_ATPase__r_prot: per_s {pub: out};
    var pool_H_ATPase__r_rel: per_s {pub: out};
    var pool_H_ATPase__r_rep: per_s {pub: out};
    var pool_H_ATPase__r_up: per_s {pub: out};
    var pool_H_ATPase__s_unit: dimensionless {pub: out};
    var pool_H_ATPase__share: dimensionless {pub: out};
    var pool_Hydrolase__A_protein: um2 {pub: out};
    var pool_Hydrolase__J_ATP: mol_per_s {pub: out};
    var pool_Hydrolase__J_build: mol_per_s {pub: out};
    var pool_Hydrolase__J_demand: mol_per_s {pub: out};
    var pool_Hydrolase__J_keep: mol_per_s {pub: out};
    var pool_Hydrolase__J_prot: mol_per_s {pub: out};
    var pool_Hydrolase__J_saved: mol_per_s {pub: out};
    var pool_Hydrolase__M_build: mole {pub: out};
    var pool_Hydrolase__Q_aa_rel: per_s {pub: out};
    var pool_Hydrolase__Q_aa_use: per_s {pub: out};
    var pool_Hydrolase__Q_prot_demand: per_s {pub: out};
    var pool_Hydrolase__R_reg: dimensionless {pub: out};
    var pool_Hydrolase__a_unit: um2 {pub: out};
    var pool_Hydrolase__f_ATP: dimensionless {pub: out};
    var pool_Hydrolase__f_build: dimensionless {pub: out};
    var pool_Hydrolase__m: dimensionless {pub: out, init: m_init_mod_pool_Hydrolase};
    var pool_Hydrolase__m_goal: dimensionless {pub: out};
    var pool_Hydrolase__m_kept: dimensionless {pub: out};
    var pool_Hydrolase__m_target: dimensionless {pub: out};
    var pool_Hydrolase__n: dimensionless {pub: out};
    var pool_Hydrolase__r_build: per_s {pub: out};
    var pool_Hydrolase__r_deg: per_s {pub: out};
    var pool_Hydrolase__r_down: per_s {pub: out};
    var pool_Hydrolase__r_prot: per_s {pub: out};
    var pool_Hydrolase__r_rel: per_s {pub: out};
    var pool_Hydrolase__r_rep: per_s {pub: out};
    var pool_Hydrolase__r_up: per_s {pub: out};
    var pool_Hydrolase__s_unit: dimensionless {pub: out};
    var pool_Hydrolase__share: dimensionless {pub: out};
    var pool_KefC__A_protein: um2 {pub: out};
    var pool_KefC__J_ATP: mol_per_s {pub: out};
    var pool_KefC__J_build: mol_per_s {pub: out};
    var pool_KefC__J_demand: mol_per_s {pub: out};
    var pool_KefC__J_keep: mol_per_s {pub: out};
    var pool_KefC__J_prot: mol_per_s {pub: out};
    var pool_KefC__J_saved: mol_per_s {pub: out};
    var pool_KefC__M_build: mole {pub: out};
    var pool_KefC__Q_aa_rel: per_s {pub: out};
    var pool_KefC__Q_aa_use: per_s {pub: out};
    var pool_KefC__Q_prot_demand: per_s {pub: out};
    var pool_KefC__R_reg: dimensionless {pub: out};
    var pool_KefC__a_unit: um2 {pub: out};
    var pool_KefC__f_ATP: dimensionless {pub: out};
    var pool_KefC__f_build: dimensionless {pub: out};
    var pool_KefC__m: dimensionless {pub: out, init: m_init_mod_pool_KefC};
    var pool_KefC__m_goal: dimensionless {pub: out};
    var pool_KefC__m_kept: dimensionless {pub: out};
    var pool_KefC__m_target: dimensionless {pub: out};
    var pool_KefC__n: dimensionless {pub: out};
    var pool_KefC__r_build: per_s {pub: out};
    var pool_KefC__r_deg: per_s {pub: out};
    var pool_KefC__r_down: per_s {pub: out};
    var pool_KefC__r_prot: per_s {pub: out};
    var pool_KefC__r_rel: per_s {pub: out};
    var pool_KefC__r_rep: per_s {pub: out};
    var pool_KefC__r_up: per_s {pub: out};
    var pool_KefC__s_unit: dimensionless {pub: out};
    var pool_KefC__share: dimensionless {pub: out};
    var pool_LacT__A_protein: um2 {pub: out};
    var pool_LacT__J_ATP: mol_per_s {pub: out};
    var pool_LacT__J_build: mol_per_s {pub: out};
    var pool_LacT__J_demand: mol_per_s {pub: out};
    var pool_LacT__J_keep: mol_per_s {pub: out};
    var pool_LacT__J_prot: mol_per_s {pub: out};
    var pool_LacT__J_saved: mol_per_s {pub: out};
    var pool_LacT__M_build: mole {pub: out};
    var pool_LacT__Q_aa_rel: per_s {pub: out};
    var pool_LacT__Q_aa_use: per_s {pub: out};
    var pool_LacT__Q_prot_demand: per_s {pub: out};
    var pool_LacT__R_reg: dimensionless {pub: out};
    var pool_LacT__a_unit: um2 {pub: out};
    var pool_LacT__f_ATP: dimensionless {pub: out};
    var pool_LacT__f_build: dimensionless {pub: out};
    var pool_LacT__m: dimensionless {pub: out, init: m_init_mod_pool_LacT};
    var pool_LacT__m_goal: dimensionless {pub: out};
    var pool_LacT__m_kept: dimensionless {pub: out};
    var pool_LacT__m_target: dimensionless {pub: out};
    var pool_LacT__n: dimensionless {pub: out};
    var pool_LacT__r_build: per_s {pub: out};
    var pool_LacT__r_deg: per_s {pub: out};
    var pool_LacT__r_down: per_s {pub: out};
    var pool_LacT__r_prot: per_s {pub: out};
    var pool_LacT__r_rel: per_s {pub: out};
    var pool_LacT__r_rep: per_s {pub: out};
    var pool_LacT__r_up: per_s {pub: out};
    var pool_LacT__s_unit: dimensionless {pub: out};
    var pool_LacT__share: dimensionless {pub: out};
    var pool_NCX__A_protein: um2 {pub: out};
    var pool_NCX__J_ATP: mol_per_s {pub: out};
    var pool_NCX__J_build: mol_per_s {pub: out};
    var pool_NCX__J_demand: mol_per_s {pub: out};
    var pool_NCX__J_keep: mol_per_s {pub: out};
    var pool_NCX__J_prot: mol_per_s {pub: out};
    var pool_NCX__J_saved: mol_per_s {pub: out};
    var pool_NCX__M_build: mole {pub: out};
    var pool_NCX__Q_aa_rel: per_s {pub: out};
    var pool_NCX__Q_aa_use: per_s {pub: out};
    var pool_NCX__Q_prot_demand: per_s {pub: out};
    var pool_NCX__R_reg: dimensionless {pub: out};
    var pool_NCX__a_unit: um2 {pub: out};
    var pool_NCX__f_ATP: dimensionless {pub: out};
    var pool_NCX__f_build: dimensionless {pub: out};
    var pool_NCX__m: dimensionless {pub: out, init: m_init_mod_pool_NCX};
    var pool_NCX__m_goal: dimensionless {pub: out};
    var pool_NCX__m_kept: dimensionless {pub: out};
    var pool_NCX__m_target: dimensionless {pub: out};
    var pool_NCX__n: dimensionless {pub: out};
    var pool_NCX__r_build: per_s {pub: out};
    var pool_NCX__r_deg: per_s {pub: out};
    var pool_NCX__r_down: per_s {pub: out};
    var pool_NCX__r_prot: per_s {pub: out};
    var pool_NCX__r_rel: per_s {pub: out};
    var pool_NCX__r_rep: per_s {pub: out};
    var pool_NCX__r_up: per_s {pub: out};
    var pool_NCX__s_unit: dimensionless {pub: out};
    var pool_NCX__share: dimensionless {pub: out};
    var pool_NhaA__A_protein: um2 {pub: out};
    var pool_NhaA__J_ATP: mol_per_s {pub: out};
    var pool_NhaA__J_build: mol_per_s {pub: out};
    var pool_NhaA__J_demand: mol_per_s {pub: out};
    var pool_NhaA__J_keep: mol_per_s {pub: out};
    var pool_NhaA__J_prot: mol_per_s {pub: out};
    var pool_NhaA__J_saved: mol_per_s {pub: out};
    var pool_NhaA__M_build: mole {pub: out};
    var pool_NhaA__Q_aa_rel: per_s {pub: out};
    var pool_NhaA__Q_aa_use: per_s {pub: out};
    var pool_NhaA__Q_prot_demand: per_s {pub: out};
    var pool_NhaA__R_reg: dimensionless {pub: out};
    var pool_NhaA__a_unit: um2 {pub: out};
    var pool_NhaA__f_ATP: dimensionless {pub: out};
    var pool_NhaA__f_build: dimensionless {pub: out};
    var pool_NhaA__m: dimensionless {pub: out, init: m_init_mod_pool_NhaA};
    var pool_NhaA__m_goal: dimensionless {pub: out};
    var pool_NhaA__m_kept: dimensionless {pub: out};
    var pool_NhaA__m_target: dimensionless {pub: out};
    var pool_NhaA__n: dimensionless {pub: out};
    var pool_NhaA__r_build: per_s {pub: out};
    var pool_NhaA__r_deg: per_s {pub: out};
    var pool_NhaA__r_down: per_s {pub: out};
    var pool_NhaA__r_prot: per_s {pub: out};
    var pool_NhaA__r_rel: per_s {pub: out};
    var pool_NhaA__r_rep: per_s {pub: out};
    var pool_NhaA__r_up: per_s {pub: out};
    var pool_NhaA__s_unit: dimensionless {pub: out};
    var pool_NhaA__share: dimensionless {pub: out};
    var pool_PTS__A_protein: um2 {pub: out};
    var pool_PTS__J_ATP: mol_per_s {pub: out};
    var pool_PTS__J_build: mol_per_s {pub: out};
    var pool_PTS__J_demand: mol_per_s {pub: out};
    var pool_PTS__J_keep: mol_per_s {pub: out};
    var pool_PTS__J_prot: mol_per_s {pub: out};
    var pool_PTS__J_saved: mol_per_s {pub: out};
    var pool_PTS__M_build: mole {pub: out};
    var pool_PTS__Q_aa_rel: per_s {pub: out};
    var pool_PTS__Q_aa_use: per_s {pub: out};
    var pool_PTS__Q_prot_demand: per_s {pub: out};
    var pool_PTS__R_reg: dimensionless {pub: out};
    var pool_PTS__a_unit: um2 {pub: out};
    var pool_PTS__f_ATP: dimensionless {pub: out};
    var pool_PTS__f_build: dimensionless {pub: out};
    var pool_PTS__m: dimensionless {pub: out, init: m_init_mod_pool_PTS};
    var pool_PTS__m_goal: dimensionless {pub: out};
    var pool_PTS__m_kept: dimensionless {pub: out};
    var pool_PTS__m_target: dimensionless {pub: out};
    var pool_PTS__n: dimensionless {pub: out};
    var pool_PTS__r_build: per_s {pub: out};
    var pool_PTS__r_deg: per_s {pub: out};
    var pool_PTS__r_down: per_s {pub: out};
    var pool_PTS__r_prot: per_s {pub: out};
    var pool_PTS__r_rel: per_s {pub: out};
    var pool_PTS__r_rep: per_s {pub: out};
    var pool_PTS__r_up: per_s {pub: out};
    var pool_PTS__s_unit: dimensionless {pub: out};
    var pool_PTS__share: dimensionless {pub: out};
    var pool_Trk__A_protein: um2 {pub: out};
    var pool_Trk__J_ATP: mol_per_s {pub: out};
    var pool_Trk__J_build: mol_per_s {pub: out};
    var pool_Trk__J_demand: mol_per_s {pub: out};
    var pool_Trk__J_keep: mol_per_s {pub: out};
    var pool_Trk__J_prot: mol_per_s {pub: out};
    var pool_Trk__J_saved: mol_per_s {pub: out};
    var pool_Trk__M_build: mole {pub: out};
    var pool_Trk__Q_aa_rel: per_s {pub: out};
    var pool_Trk__Q_aa_use: per_s {pub: out};
    var pool_Trk__Q_prot_demand: per_s {pub: out};
    var pool_Trk__R_reg: dimensionless {pub: out};
    var pool_Trk__a_unit: um2 {pub: out};
    var pool_Trk__f_ATP: dimensionless {pub: out};
    var pool_Trk__f_build: dimensionless {pub: out};
    var pool_Trk__m: dimensionless {pub: out, init: m_init_mod_pool_Trk};
    var pool_Trk__m_goal: dimensionless {pub: out};
    var pool_Trk__m_kept: dimensionless {pub: out};
    var pool_Trk__m_target: dimensionless {pub: out};
    var pool_Trk__n: dimensionless {pub: out};
    var pool_Trk__r_build: per_s {pub: out};
    var pool_Trk__r_deg: per_s {pub: out};
    var pool_Trk__r_down: per_s {pub: out};
    var pool_Trk__r_prot: per_s {pub: out};
    var pool_Trk__r_rel: per_s {pub: out};
    var pool_Trk__r_rep: per_s {pub: out};
    var pool_Trk__r_up: per_s {pub: out};
    var pool_Trk__s_unit: dimensionless {pub: out};
    var pool_Trk__share: dimensionless {pub: out};
    var pool_proteome__A_protein: um2 {pub: out};
    var pool_proteome__J_ATP: mol_per_s {pub: out};
    var pool_proteome__J_build: mol_per_s {pub: out};
    var pool_proteome__J_demand: mol_per_s {pub: out};
    var pool_proteome__J_keep: mol_per_s {pub: out};
    var pool_proteome__J_prot: mol_per_s {pub: out};
    var pool_proteome__J_saved: mol_per_s {pub: out};
    var pool_proteome__M_build: mole {pub: out};
    var pool_proteome__Q_aa_rel: per_s {pub: out};
    var pool_proteome__Q_aa_use: per_s {pub: out};
    var pool_proteome__Q_prot_demand: per_s {pub: out};
    var pool_proteome__R_reg: dimensionless {pub: out};
    var pool_proteome__a_unit: um2 {pub: out};
    var pool_proteome__f_ATP: dimensionless {pub: out};
    var pool_proteome__f_build: dimensionless {pub: out};
    var pool_proteome__m: dimensionless {pub: out, init: m_init_mod_pool_proteome};
    var pool_proteome__m_goal: dimensionless {pub: out};
    var pool_proteome__m_kept: dimensionless {pub: out};
    var pool_proteome__n: dimensionless {pub: out};
    var pool_proteome__r_build: per_s {pub: out};
    var pool_proteome__r_deg: per_s {pub: out};
    var pool_proteome__r_down: per_s {pub: out};
    var pool_proteome__r_prot: per_s {pub: out};
    var pool_proteome__r_rel: per_s {pub: out};
    var pool_proteome__r_rep: per_s {pub: out};
    var pool_proteome__r_up: per_s {pub: out};
    var pool_proteome__s_unit: dimensionless {pub: out};
    var pool_proteome__share: dimensionless {pub: out};
    var protein__A_protein_max: um2 {pub: out};
    var protein__A_protein_total: um2 {pub: out};
    var protein__A_surface: um2 {pub: out};
    var protein__J_ATP_total: mol_per_s {pub: out};
    var protein__J_build_total: mol_per_s {pub: out};
    var protein__J_cap: mol_per_s {pub: out};
    var protein__J_cat: mol_per_s {pub: out};
    var protein__J_demand_total: mol_per_s {pub: out};
    var protein__J_keep_total: mol_per_s {pub: out};
    var protein__J_prot_total: mol_per_s {pub: out};
    var protein__J_recycled: mol_per_s {pub: out};
    var protein__J_saved_total: mol_per_s {pub: out};
    var protein__M_build_protein: mole {pub: out};
    var protein__N_aa: dimensionless {pub: out, init: N_aa_init_mod_protein};
    var protein__Q_aa_rel_total: per_s {pub: out};
    var protein__Q_aa_use_total: per_s {pub: out};
    var protein__Q_prot_demand_total: per_s {pub: out};
    var protein__R_reg: dimensionless {pub: out};
    var protein__build_capacity: dimensionless {pub: out};
    var protein__f_area: dimensionless {pub: out};
    var protein__j_ADP_prot: mol_per_s {pub: out};
    var protein__j_ATP_prot: mol_per_s {pub: out};
    var protein__j_Pi_prot: mol_per_s {pub: out};
    var protein__phi_aa: dimensionless {pub: out};
    var protein__r_aa_cat: per_s {pub: out};
    var protein__s_build: dimensionless {pub: out};
    var protein__s_prot: dimensionless {pub: out};
    var protein__throttle: dimensionless {pub: out};
    var protein__x_ATP: dimensionless {pub: out};
    var r_H_ATPase_mod_i_H_ATPase: per_s {pub: in};
    var r_NaCa_mod_i_NaCa: per_s {pub: in};
    var r_dmg_mod_bio: per_s {pub: in};
    var r_dmg_phys_mod_bio: per_s {pub: in};
    var r_rep_max_mod_bio: per_s {pub: in};
    var reg__f_ATP_reg: dimensionless {pub: out};
    var reg__f_G6P_reg: dimensionless {pub: out};
    var reg__f_H_reg: dimensionless {pub: out};
    var reg__f_glc_reg: dimensionless {pub: out};
    var reg__u_ATP_reg: dimensionless {pub: out};
    var reg__u_G6P_reg: dimensionless {pub: out};
    var reg__u_H_reg: dimensionless {pub: out};
    var reg__u_glc_reg: dimensionless {pub: out};
    var reg__x_ATP_reg: dimensionless {pub: out};
    var reg__x_G6P_reg: dimensionless {pub: out};
    var reg__x_H_reg: dimensionless {pub: out};
    var reg__x_glc_reg: dimensionless {pub: out};
    var reg_on_ATP_mod_bio: dimensionless {pub: in};
    var reg_on_ATP_mod_cytosol: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_ABC: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_Flagellum: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_GalP: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_Glf: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_Glyc: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_H_ATPase: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_Hydrolase: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_KefC: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_LacT: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_NCX: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_NhaA: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_PTS: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_Trk: dimensionless {pub: in};
    var reg_on_ATP_mod_pool_proteome: dimensionless {pub: in};
    var reg_on_ATP_mod_protein: dimensionless {pub: in};
    var reg_on_ATP_repair_mod_bio: dimensionless {pub: in};
    var reg_on_ATP_upkeep_mod_bio: dimensionless {pub: in};
    var reg_on_G6P_mod_bio: dimensionless {pub: in};
    var reg_on_G6P_mod_cytosol: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_ABC: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_Flagellum: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_GalP: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_Glf: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_Glyc: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_H_ATPase: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_Hydrolase: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_KefC: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_LacT: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_NCX: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_NhaA: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_PTS: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_Trk: dimensionless {pub: in};
    var reg_on_G6P_mod_pool_proteome: dimensionless {pub: in};
    var reg_on_G6P_mod_protein: dimensionless {pub: in};
    var reg_on_G6P_repair_mod_bio: dimensionless {pub: in};
    var reg_on_G6P_upkeep_mod_bio: dimensionless {pub: in};
    var reg_on_H_mod_bio: dimensionless {pub: in};
    var reg_on_H_mod_cytosol: dimensionless {pub: in};
    var reg_on_H_mod_pool_ABC: dimensionless {pub: in};
    var reg_on_H_mod_pool_Flagellum: dimensionless {pub: in};
    var reg_on_H_mod_pool_GalP: dimensionless {pub: in};
    var reg_on_H_mod_pool_Glf: dimensionless {pub: in};
    var reg_on_H_mod_pool_Glyc: dimensionless {pub: in};
    var reg_on_H_mod_pool_H_ATPase: dimensionless {pub: in};
    var reg_on_H_mod_pool_Hydrolase: dimensionless {pub: in};
    var reg_on_H_mod_pool_KefC: dimensionless {pub: in};
    var reg_on_H_mod_pool_LacT: dimensionless {pub: in};
    var reg_on_H_mod_pool_NCX: dimensionless {pub: in};
    var reg_on_H_mod_pool_NhaA: dimensionless {pub: in};
    var reg_on_H_mod_pool_PTS: dimensionless {pub: in};
    var reg_on_H_mod_pool_Trk: dimensionless {pub: in};
    var reg_on_H_mod_pool_proteome: dimensionless {pub: in};
    var reg_on_H_mod_protein: dimensionless {pub: in};
    var reg_on_H_repair_mod_bio: dimensionless {pub: in};
    var reg_on_H_upkeep_mod_bio: dimensionless {pub: in};
    var reg_on_glc_mod_bio: dimensionless {pub: in};
    var reg_on_glc_mod_cytosol: dimensionless {pub: in};
    var reg_on_glc_mod_pool_ABC: dimensionless {pub: in};
    var reg_on_glc_mod_pool_Flagellum: dimensionless {pub: in};
    var reg_on_glc_mod_pool_GalP: dimensionless {pub: in};
    var reg_on_glc_mod_pool_Glf: dimensionless {pub: in};
    var reg_on_glc_mod_pool_Glyc: dimensionless {pub: in};
    var reg_on_glc_mod_pool_H_ATPase: dimensionless {pub: in};
    var reg_on_glc_mod_pool_Hydrolase: dimensionless {pub: in};
    var reg_on_glc_mod_pool_KefC: dimensionless {pub: in};
    var reg_on_glc_mod_pool_LacT: dimensionless {pub: in};
    var reg_on_glc_mod_pool_NCX: dimensionless {pub: in};
    var reg_on_glc_mod_pool_NhaA: dimensionless {pub: in};
    var reg_on_glc_mod_pool_PTS: dimensionless {pub: in};
    var reg_on_glc_mod_pool_Trk: dimensionless {pub: in};
    var reg_on_glc_mod_pool_proteome: dimensionless {pub: in};
    var reg_on_glc_mod_protein: dimensionless {pub: in};
    var reg_on_glc_repair_mod_bio: dimensionless {pub: in};
    var reg_on_glc_upkeep_mod_bio: dimensionless {pub: in};
    var repair_level_mod_bio: dimensionless {pub: in};
    var rho_H_ATPase_mod_i_H_ATPase: per_um2 {pub: in};
    var rho_NaCa_mod_i_NaCa: per_um2 {pub: in};
    var rho_leak_Ca_mod_i_leak_Ca: per_um2 {pub: in};
    var rho_leak_K_mod_i_K_Trk: per_um2 {pub: in};
    var rho_leak_Na_mod_i_leak_Na: per_um2 {pub: in};
    var ribosomes__J_ATP_ribo: mol_per_s {pub: out};
    var ribosomes__J_ribo: mol_per_s {pub: out};
    var ribosomes__J_ribo_build: mol_per_s {pub: out};
    var ribosomes__R_ribo_build: per_s {pub: out};
    var ribosomes__R_ribo_loss: per_s {pub: out};
    var ribosomes__c_ribo_build: dimensionless {pub: out};
    var ribosomes__n_ribo: dimensionless {pub: out, init: n_ribo_init_mod_ribosomes};
    var ribosomes__u_upkeep: dimensionless {pub: out};
    var ribosomes__x_ribo: dimensionless {pub: out};
    var s_target_mod_pool_ABC: dimensionless {pub: in};
    var s_target_mod_pool_GalP: dimensionless {pub: in};
    var s_target_mod_pool_Glf: dimensionless {pub: in};
    var s_target_mod_pool_H_ATPase: dimensionless {pub: in};
    var s_target_mod_pool_Hydrolase: dimensionless {pub: in};
    var s_target_mod_pool_KefC: dimensionless {pub: in};
    var s_target_mod_pool_LacT: dimensionless {pub: in};
    var s_target_mod_pool_NCX: dimensionless {pub: in};
    var s_target_mod_pool_NhaA: dimensionless {pub: in};
    var s_target_mod_pool_PTS: dimensionless {pub: in};
    var s_target_mod_pool_Trk: dimensionless {pub: in};
    var store_alloc_mod_cytosol: dimensionless {pub: in};
    var surface_factor_mod_bio: dimensionless {pub: in};
    var surface_factor_mod_protein: dimensionless {pub: in};
    var t: second {pub: in};
    var t_half_mRNA_mod_bio: second {pub: in};
    var tau_aa_cat_mod_protein: second {pub: in};
    var tau_bundle_mod_i_flagellum: second {pub: in};
    var tau_mod_pool_ABC: second {pub: in};
    var tau_mod_pool_Flagellum: second {pub: in};
    var tau_mod_pool_GalP: second {pub: in};
    var tau_mod_pool_Glf: second {pub: in};
    var tau_mod_pool_Glyc: second {pub: in};
    var tau_mod_pool_H_ATPase: second {pub: in};
    var tau_mod_pool_Hydrolase: second {pub: in};
    var tau_mod_pool_KefC: second {pub: in};
    var tau_mod_pool_LacT: second {pub: in};
    var tau_mod_pool_NCX: second {pub: in};
    var tau_mod_pool_NhaA: second {pub: in};
    var tau_mod_pool_PTS: second {pub: in};
    var tau_mod_pool_Trk: second {pub: in};
    var tau_mod_pool_proteome: second {pub: in};
    var tau_prot_mod_pool_ABC: second {pub: in};
    var tau_prot_mod_pool_Flagellum: second {pub: in};
    var tau_prot_mod_pool_GalP: second {pub: in};
    var tau_prot_mod_pool_Glf: second {pub: in};
    var tau_prot_mod_pool_Glyc: second {pub: in};
    var tau_prot_mod_pool_H_ATPase: second {pub: in};
    var tau_prot_mod_pool_Hydrolase: second {pub: in};
    var tau_prot_mod_pool_KefC: second {pub: in};
    var tau_prot_mod_pool_LacT: second {pub: in};
    var tau_prot_mod_pool_NCX: second {pub: in};
    var tau_prot_mod_pool_NhaA: second {pub: in};
    var tau_prot_mod_pool_PTS: second {pub: in};
    var tau_prot_mod_pool_Trk: second {pub: in};
    var tau_prot_mod_pool_proteome: second {pub: in};
    var v_one_mod_i_flagellum: m_per_s {pub: in};
    var y_aa_cat_mod_protein: dimensionless {pub: in};
    membrane__A_mem = 2.0{dimensionless}*pi*R_cell_mod_membrane*h_cell_mod_membrane;
    membrane__Vol = pi*sqr(R_cell_mod_membrane)*h_cell_mod_membrane*1e-18{m3_per_um3};
    membrane__Cm = c_m_mod_membrane*membrane__A_mem*0.01{picoF_cm2_per_uF_um2};
    ode(membrane__V, t) = 1000000.0{milliV_per_kiloV}*(I_in_mod_membrane-multiport_sum_mod_membrane_i_ion__i_ion)/membrane__Cm;
    Na_K__E_K = R*T/F*ln(Ko_mod_Na_K/Na_K__Ki)*1000{milliV_per_V};
    Na_K__E_Na = R*T/F*ln(Nao_mod_Na_K/Na_K__Nai)*1000{milliV_per_V};
    ode(Na_K__Nai, t) = multiport_sum_mod_Na_K_j_Na_total__j_Na_total/membrane__Vol;
    ode(Na_K__Ki, t) = multiport_sum_mod_Na_K_j_K_total__j_K_total/membrane__Vol;
    Ca__CaB_Cai = B_Ca_total_mod_Ca-Ca__B_Cai;
    ode(Ca__B_Cai, t) = k_unbind_Ca_mod_Ca*Ca__CaB_Cai-k_bind_Ca_mod_Ca*Ca__Cai*Ca__B_Cai;
    ode(Ca__Cai, t) = multiport_sum_mod_Ca_j_Ca_in__j_Ca_in/membrane__Vol+k_unbind_Ca_mod_Ca*Ca__CaB_Cai-k_bind_Ca_mod_Ca*Ca__Cai*Ca__B_Cai;
    Ca__Ca_total = Ca__Cai+Ca__CaB_Cai;
    ode(H__H_i, t) = (multiport_sum_mod_H_j_H_in__j_H_in+multiport_sum_mod_H_j_H_prod__j_H_prod)/membrane__Vol/(1.0{dimensionless}+beta_H_mod_H/(ln(10.0{dimensionless})*H__H_i));
    H__pH_i = -ln(H__H_i/c_std_mod_H)/ln(10.0{dimensionless});
    H__pH_o = -ln(H_o_mod_H/c_std_mod_H)/ln(10.0{dimensionless});
    H__E_H = R*T/F*ln(H_o_mod_H/H__H_i)*1000.0{milliV_per_V};
    H__H_total_rel = H__H_i-beta_H_mod_H*H__pH_i;
    cytosol__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_cytosol+reg_on_ATP_mod_cytosol*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_cytosol+reg_on_G6P_mod_cytosol*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_cytosol+reg_on_glc_mod_cytosol*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_cytosol+reg_on_H_mod_cytosol*reg__f_H_reg);
    cytosol__f_T = pow(Q10_mod_cytosol, (T-T_ref_mod_cytosol)/dT_Q10_mod_cytosol);
    cytosol__K_eq_hk = exp(-dG0_hk_mod_cytosol/(R*T));
    cytosol__K_eq_lg = exp(-(dG0_ferm_mod_cytosol-2.0{dimensionless}*dG0_hyd_mod_cytosol-dG0_hk_mod_cytosol)/(R*T));
    cytosol__K_eq_hyd = exp(-dG0_hyd_mod_cytosol/(R*T));
    cytosol__Gamma_hk = cytosol__C_G6P/c_std_mod_cytosol*(cytosol__C_ADP/c_std_mod_cytosol)/(cytosol__C_glc/c_std_mod_cytosol*(cytosol__C_ATP/c_std_mod_cytosol));
    cytosol__Gamma_lg = sqr(cytosol__C_lac/c_std_mod_cytosol)*pow(cytosol__C_ATP/c_std_mod_cytosol, 3.0{dimensionless})/(cytosol__C_G6P/c_std_mod_cytosol*pow(cytosol__C_ADP/c_std_mod_cytosol, 3.0{dimensionless})*sqr(cytosol__C_Pi/c_std_mod_cytosol));
    cytosol__Gamma_hyd = cytosol__C_ADP/c_std_mod_cytosol*(cytosol__C_Pi/c_std_mod_cytosol)/(cytosol__C_ATP/c_std_mod_cytosol);
    cytosol__v_gly = V_gly_mod_cytosol*pool_Glyc__m*cytosol__f_T*sqr(cytosol__C_ADP/K_ADP_gly_mod_cytosol)*sqr(cytosol__C_Pi/K_Pi_gly_mod_cytosol)*(cytosol__C_glc*cytosol__C_ATP-cytosol__C_G6P*cytosol__C_ADP/cytosol__K_eq_hk)/(K_glc_mod_cytosol*(K_ATP_hk_mod_cytosol+cytosol__C_ATP))/((1.0{dimensionless}+cytosol__C_glc/K_glc_mod_cytosol)*sqr(1.0{dimensionless}+cytosol__C_ADP/K_ADP_gly_mod_cytosol)*sqr(1.0{dimensionless}+cytosol__C_Pi/K_Pi_gly_mod_cytosol)+sqr(1.0{dimensionless}+cytosol__C_lac/K_lac_mod_cytosol)*sqr(1.0{dimensionless}+cytosol__C_ATP/K_ATP_gly_mod_cytosol)-1.0{dimensionless});
    cytosol__v_lg = V_lg_mod_cytosol*pool_Glyc__m*cytosol__f_T*pow(abs(cytosol__C_G6P), n_G6P_lg_mod_cytosol-1.0{dimensionless})*(cytosol__C_G6P-sqr(cytosol__C_lac)*pow(cytosol__C_ATP, 3.0{dimensionless})*c_std_mod_cytosol/(pow(cytosol__C_ADP, 3.0{dimensionless})*sqr(cytosol__C_Pi)*cytosol__K_eq_lg))/(pow(K_G6P_lg_mod_cytosol, n_G6P_lg_mod_cytosol)+pow(abs(cytosol__C_G6P), n_G6P_lg_mod_cytosol))*cytosol__C_ADP/(K_ADP_gly_mod_cytosol+cytosol__C_ADP)*cytosol__C_Pi/(K_Pi_gly_mod_cytosol+cytosol__C_Pi);
    cytosol__v_hyd = V_hyd_mod_cytosol*cytosol__R_reg*cytosol__f_T*(cytosol__C_ATP/K_ATP_hyd_mod_cytosol)*(1.0{dimensionless}-cytosol__Gamma_hyd/cytosol__K_eq_hyd)/(1.0{dimensionless}+cytosol__C_ATP/K_ATP_hyd_mod_cytosol+(1.0{dimensionless}+cytosol__C_ADP/K_ADP_hyd_mod_cytosol)*(1.0{dimensionless}+cytosol__C_Pi/K_Pi_hyd_mod_cytosol)-1.0{dimensionless});
    cytosol__A_hk = R*T*(ln(cytosol__K_eq_hk)-ln(abs(cytosol__Gamma_hk)+1e-300{dimensionless}));
    cytosol__A_lg = R*T*(ln(cytosol__K_eq_lg)-ln(abs(cytosol__Gamma_lg)+1e-300{dimensionless}));
    cytosol__A_hyd = R*T*(ln(cytosol__K_eq_hyd)-ln(abs(cytosol__Gamma_hyd)+1e-300{dimensionless}));
    cytosol__K_eq_store = exp(-(dG0_store_mod_cytosol-dG0_hk_mod_cytosol)/(R*T));
    cytosol__K_eq_mob = exp(-(dG0_hk_mod_cytosol+dG0_hyd_mod_cytosol-dG0_store_mod_cytosol)/(R*T));
    cytosol__a_glyc = cytosol__C_glyc/(K_glyc_mob_mod_cytosol+cytosol__C_glyc);
    cytosol__Gamma_store = cytosol__a_glyc*(cytosol__C_ADP/c_std_mod_cytosol)*sqr(cytosol__C_Pi/c_std_mod_cytosol)/(cytosol__C_G6P/c_std_mod_cytosol*(cytosol__C_ATP/c_std_mod_cytosol));
    cytosol__Gamma_mob = cytosol__C_G6P/c_std_mod_cytosol/(cytosol__C_Pi/c_std_mod_cytosol);
    cytosol__v_store = V_store_max_mod_cytosol*store_alloc_mod_cytosol*cytosol__f_T*(cytosol__C_G6P*cytosol__C_ATP-cytosol__a_glyc*cytosol__C_ADP*sqr(cytosol__C_Pi)/(c_std_mod_cytosol*cytosol__K_eq_store))/((K_G6P_store_mod_cytosol+cytosol__C_G6P)*(K_ATP_store_mod_cytosol+cytosol__C_ATP))/(1.0{dimensionless}+pow(cytosol__C_glyc/C_glyc_max_mod_cytosol, 8.0{dimensionless}));
    cytosol__v_mob = V_mob_mod_cytosol*cytosol__f_T*cytosol__C_glyc/(K_glyc_mob_mod_cytosol+cytosol__C_glyc)*(cytosol__C_Pi-cytosol__C_G6P/cytosol__K_eq_mob)/(K_Pi_mob_mod_cytosol+cytosol__C_Pi)*K_i_ATP_mob_mod_cytosol/(K_i_ATP_mob_mod_cytosol+cytosol__C_ATP);
    cytosol__A_store = R*T*(ln(cytosol__K_eq_store)-ln(abs(cytosol__Gamma_store)+1e-300{dimensionless}));
    cytosol__A_mob = R*T*(ln(cytosol__K_eq_mob)-ln(abs(cytosol__Gamma_mob)+1e-300{dimensionless}));
    cytosol__K_eq_mx = exp(-dG0_mx_mod_cytosol/(R*T));
    cytosol__Gamma_mx = pow(cytosol__C_ADP/c_std_mod_cytosol, n_ATP_mx_mod_cytosol)*pow(cytosol__C_Pi/c_std_mod_cytosol, n_ATP_mx_mod_cytosol+1.0{dimensionless})/(cytosol__C_G6P/c_std_mod_cytosol*pow(cytosol__C_ATP/c_std_mod_cytosol, n_ATP_mx_mod_cytosol));
    cytosol__v_mx = V_mx_max_mod_cytosol*mx_alloc_mod_cytosol*cytosol__f_T*cytosol__C_G6P/(K_G6P_mx_mod_cytosol+cytosol__C_G6P)*cytosol__C_ATP/(K_ATP_mx_mod_cytosol+cytosol__C_ATP)*(1.0{dimensionless}-cytosol__Gamma_mx/cytosol__K_eq_mx+abs(1.0{dimensionless}-cytosol__Gamma_mx/cytosol__K_eq_mx))/2.0{dimensionless};
    cytosol__A_mx = R*T*(ln(cytosol__K_eq_mx)-ln(abs(cytosol__Gamma_mx)+1e-300{dimensionless}));
    cytosol__P_diss = membrane__Vol*(cytosol__v_gly*cytosol__A_hk+cytosol__v_lg*cytosol__A_lg+cytosol__v_hyd*cytosol__A_hyd+cytosol__v_store*cytosol__A_store+cytosol__v_mob*cytosol__A_mob+cytosol__v_mx*cytosol__A_mx);
    cytosol__J_ATP_turnover = membrane__Vol*cytosol__v_hyd-multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext;
    cytosol__j_H_met = membrane__Vol*(cytosol__v_hyd+cytosol__v_gly-cytosol__v_lg+cytosol__v_store+n_ATP_mx_mod_cytosol*cytosol__v_mx)-multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext;
    cytosol__Q_met = membrane__Vol*(cytosol__v_gly*h_hk_mod_cytosol+cytosol__v_lg*(2.0{dimensionless}*h_lac_gly_mod_cytosol-2.0{dimensionless}*h_ATP_mod_cytosol-h_hk_mod_cytosol)+cytosol__v_hyd*h_ATP_mod_cytosol+cytosol__v_store*(2.0{dimensionless}*h_ATP_mod_cytosol+h_glyc_poly_mod_cytosol-h_hk_mod_cytosol)+cytosol__v_mob*(h_hk_mod_cytosol-h_ATP_mod_cytosol-h_glyc_poly_mod_cytosol)+cytosol__v_mx*((n_ATP_mx_mod_cytosol+1.0{dimensionless})*h_ATP_mod_cytosol+h_mx_poly_mod_cytosol-h_hk_mod_cytosol))+multiport_sum_mod_cytosol_j_Pi_ext__j_Pi_ext*h_ATP_mod_cytosol+multiport_sum_mod_cytosol_j_G6P_ext__j_G6P_ext*h_hk_mod_cytosol;
    ode(cytosol__C_glc, t) = (multiport_sum_mod_cytosol_J_glc_in__J_glc_in+multiport_sum_mod_cytosol_J_glc_out__J_glc_out)/membrane__Vol-cytosol__v_gly;
    ode(cytosol__C_G6P, t) = multiport_sum_mod_cytosol_j_G6P_ext__j_G6P_ext/membrane__Vol+cytosol__v_gly+cytosol__v_mob-cytosol__v_lg-cytosol__v_store-cytosol__v_mx;
    ode(cytosol__C_lac, t) = (multiport_sum_mod_cytosol_J_lac_in__J_lac_in+multiport_sum_mod_cytosol_J_lac_out__J_lac_out)/membrane__Vol+2.0{dimensionless}*cytosol__v_lg;
    ode(cytosol__C_ATP, t) = (multiport_sum_mod_cytosol_J_ATP_in__J_ATP_in+multiport_sum_mod_cytosol_J_ATP_out__J_ATP_out+multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext)/membrane__Vol-cytosol__v_gly+3.0{dimensionless}*cytosol__v_lg-cytosol__v_hyd-cytosol__v_store-n_ATP_mx_mod_cytosol*cytosol__v_mx;
    ode(cytosol__C_ADP, t) = (multiport_sum_mod_cytosol_J_ADP_in__J_ADP_in+multiport_sum_mod_cytosol_J_ADP_out__J_ADP_out+multiport_sum_mod_cytosol_j_ADP_ext__j_ADP_ext)/membrane__Vol+cytosol__v_gly-3.0{dimensionless}*cytosol__v_lg+cytosol__v_hyd+cytosol__v_store+n_ATP_mx_mod_cytosol*cytosol__v_mx;
    ode(cytosol__C_Pi, t) = (multiport_sum_mod_cytosol_J_Pi_in__J_Pi_in+multiport_sum_mod_cytosol_J_Pi_out__J_Pi_out+multiport_sum_mod_cytosol_j_Pi_ext__j_Pi_ext)/membrane__Vol-2.0{dimensionless}*cytosol__v_lg+cytosol__v_hyd+2.0{dimensionless}*cytosol__v_store-cytosol__v_mob+(n_ATP_mx_mod_cytosol+1.0{dimensionless})*cytosol__v_mx;
    ode(cytosol__C_glyc, t) = cytosol__v_store-cytosol__v_mob;
    cytosol__J_ATP_hk = membrane__Vol*cytosol__v_gly;
    cytosol__J_ATP_lg = 3.0{dimensionless}*membrane__Vol*cytosol__v_lg;
    cytosol__J_ATP_gly = cytosol__J_ATP_lg-cytosol__J_ATP_hk-cytosol__J_ATP_mob+membrane__Vol*cytosol__v_store+membrane__Vol*cytosol__v_mx;
    cytosol__J_ATP_mob = 3.0{dimensionless}*membrane__Vol*cytosol__v_mob;
    cytosol__J_ATP_store = 2.0{dimensionless}*membrane__Vol*cytosol__v_store;
    cytosol__J_ATP_maint = membrane__Vol*cytosol__v_hyd;
    cytosol__M_glyc_ATP = 3.0{dimensionless}*membrane__Vol*cytosol__C_glyc;
    cytosol__J_mx = membrane__Vol*cytosol__v_mx;
    cytosol__J_ATP_mx = (n_ATP_mx_mod_cytosol+1.0{dimensionless})*membrane__Vol*cytosol__v_mx;
    bio__R_reg_upkeep = (1.0{dimensionless}-reg_on_ATP_upkeep_mod_bio+reg_on_ATP_upkeep_mod_bio*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_upkeep_mod_bio+reg_on_G6P_upkeep_mod_bio*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_upkeep_mod_bio+reg_on_glc_upkeep_mod_bio*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_upkeep_mod_bio+reg_on_H_upkeep_mod_bio*reg__f_H_reg);
    bio__R_reg_repair = (1.0{dimensionless}-reg_on_ATP_repair_mod_bio+reg_on_ATP_repair_mod_bio*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_repair_mod_bio+reg_on_G6P_repair_mod_bio*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_repair_mod_bio+reg_on_glc_repair_mod_bio*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_repair_mod_bio+reg_on_H_repair_mod_bio*reg__f_H_reg);
    bio__n_lipid = 2.0{dimensionless}*membrane__A_mem*surface_factor_mod_bio/area_per_lipid_mod_bio;
    bio__f_ATP_bio = cytosol__C_ATP/(K_m_ATP_bio_mod_bio+cytosol__C_ATP)*(K_m_ATP_bio_mod_bio+ATP_ref_mod_bio)/ATP_ref_mod_bio;
    bio__f_T_dmg = pow(Q10_dmg_mod_bio, (T-T_ref_dmg_mod_bio)/dT_Q10_mod_bio);
    bio__x_unpaid_raw = K_m_ATP_bio_mod_bio*(ATP_ref_mod_bio-cytosol__C_ATP)/((K_m_ATP_bio_mod_bio+cytosol__C_ATP)*ATP_ref_mod_bio)+bio__f_ATP_bio*(1.0{dimensionless}-bio__R_reg_upkeep);
    bio__x_unpaid = (bio__x_unpaid_raw+abs(bio__x_unpaid_raw))/2.0{dimensionless};
    bio__u_upkeep = 1.0{dimensionless}-bio__x_unpaid;
    bio__J_RNA = n_mRNA_mod_bio*L_mRNA_mod_bio*c_nt_recycle_mod_bio*ln(2.0{dimensionless})/t_half_mRNA_mod_bio/N_A_mod_bio*bio__u_upkeep;
    bio__J_lipid = bio__n_lipid*c_lipid_mod_bio*k_lipid_mod_bio/N_A_mod_bio*bio__u_upkeep;
    bio__f_Ca_dmg = pow(Ca__Cai, n_Ca_dmg_mod_bio)/(pow(K_Ca_dmg_mod_bio, n_Ca_dmg_mod_bio)+pow(Ca__Cai, n_Ca_dmg_mod_bio));
    bio__f_K_dmg = sqr((1.0{dimensionless}-Na_K__Ki/K_K_dmg_mod_bio+abs(1.0{dimensionless}-Na_K__Ki/K_K_dmg_mod_bio))/2.0{dimensionless});
    bio__f_energy_dmg = sqr((1.0{dimensionless}-cytosol__C_ATP/ATP_dmg_mod_bio+abs(1.0{dimensionless}-cytosol__C_ATP/ATP_dmg_mod_bio))/2.0{dimensionless});
    bio__R_dmg_lipid = k_lipid_dmg_mod_bio*bio__x_unpaid;
    bio__R_dmg_phys = r_dmg_phys_mod_bio+bio__R_dmg_lipid;
    bio__R_dmg_qc = k_qc_dmg_mod_bio*(1.0{dimensionless}-cytosol__R_reg);
    bio__R_dmg_ribo = r_dmg_mod_bio*bio__f_T_dmg+k_Ca_dmg_mod_bio*bio__f_Ca_dmg+k_K_dmg_mod_bio*bio__f_K_dmg+bio__R_dmg_qc;
    bio__R_dmg_energy = k_energy_dmg_mod_bio*bio__f_energy_dmg;
    bio__R_dmg_rad = k_rad_dmg_mod_bio*dose_rate_mod_bio;
    bio__R_rep_phys = repair_level_mod_bio*r_rep_max_mod_bio*bio__D_phys/(K_D_mod_bio+bio__D_phys)*bio__f_ATP_bio*bio__R_reg_repair;
    bio__R_rep_rad = repair_level_mod_bio*r_rep_max_mod_bio*bio__D_rad/(K_D_mod_bio+bio__D_rad)*bio__f_ATP_bio*bio__R_reg_repair;
    bio__R_rep_ribo = repair_level_mod_bio*r_rep_max_mod_bio*bio__D_ribo/(K_D_mod_bio+bio__D_ribo)*bio__f_ATP_bio*bio__R_reg_repair;
    bio__R_rep_energy = repair_level_mod_bio*r_rep_max_mod_bio*bio__D_energy/(K_D_mod_bio+bio__D_energy)*bio__f_ATP_bio*bio__R_reg_repair;
    bio__R_repair = bio__R_rep_phys+bio__R_rep_rad+bio__R_rep_ribo+bio__R_rep_energy;
    bio__D = bio__D_phys+bio__D_rad+bio__D_ribo+bio__D_energy;
    bio__J_repair = bio__R_repair*C_repair_mod_bio;
    bio__x_ATP = (cytosol__C_ATP-ATP_floor_mod_bio)/(ATP_ref_mod_bio-ATP_floor_mod_bio);
    bio__throttle = ((bio__x_ATP+abs(bio__x_ATP))/2.0{dimensionless}+1.0{dimensionless}-abs((bio__x_ATP+abs(bio__x_ATP))/2.0{dimensionless}-1.0{dimensionless}))/2.0{dimensionless};
    bio__M_build_protein = multiport_sum_mod_bio_M_build_in__M_build_in;
    bio__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_bio+reg_on_ATP_mod_bio*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_bio+reg_on_G6P_mod_bio*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_bio+reg_on_glc_mod_bio*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_bio+reg_on_H_mod_bio*reg__f_H_reg);
    bio__J_growth = growth_level_mod_bio*J_ref_mod_bio*bio__throttle*bio__R_reg;
    bio__J_growth_used = bio__J_growth*bio__f_ATP_bio;
    bio__M_daughter = bio__M_build_bio+bio__M_build_protein;
    bio__growth_progress = bio__P_growth/bio__M_daughter;
    bio__glycogen_progress = cytosol__M_glyc_ATP/bio__M_daughter;
    bio__J_ATP_bio = bio__J_RNA+ribosomes__J_ATP_ribo+bio__J_lipid+bio__J_repair+bio__J_growth_used;
    bio__M_build_bio = ((n_mRNA_mod_bio*L_mRNA_mod_bio+n_ribo_mod_bio*L_rRNA_mod_bio+genome_nt_mod_bio)*c_nt_denovo_mod_bio+bio__n_lipid*c_lipid_mod_bio)/N_A_mod_bio;
    bio__j_ATP_bio = -bio__J_ATP_bio;
    bio__j_ADP_bio = bio__J_ATP_bio;
    bio__j_Pi_bio = bio__J_ATP_bio;
    ode(bio__D_phys, t) = bio__R_dmg_phys-bio__R_rep_phys;
    ode(bio__D_rad, t) = bio__R_dmg_rad-bio__R_rep_rad;
    ode(bio__D_ribo, t) = bio__R_dmg_ribo-bio__R_rep_ribo;
    ode(bio__D_energy, t) = bio__R_dmg_energy-bio__R_rep_energy;
    ode(bio__P_growth, t) = bio__J_growth_used;
    ribosomes__u_upkeep = 1.0{dimensionless}-bio__x_unpaid;
    ribosomes__x_ribo = ribosomes__n_ribo/n_ribo_rest_mod_ribosomes;
    ribosomes__R_ribo_loss = k_ribo_mod_ribosomes*ribosomes__n_ribo*bio__x_unpaid;
    ribosomes__R_ribo_build = k_ribo_build_mod_ribosomes*(n_ribo_rest_mod_ribosomes-ribosomes__n_ribo+abs(n_ribo_rest_mod_ribosomes-ribosomes__n_ribo))/2.0{dimensionless}*pow(ribosomes__u_upkeep, n_ribo_build_mod_ribosomes);
    ribosomes__c_ribo_build = L_rRNA_mod_ribosomes*c_nt_denovo_mod_ribosomes+aa_ribo_mod_ribosomes*c_aa_build_mod_ribosomes;
    ribosomes__J_ribo = ribosomes__n_ribo*L_rRNA_mod_ribosomes*c_nt_recycle_mod_ribosomes*k_ribo_mod_ribosomes/N_A_mod_ribosomes*ribosomes__u_upkeep;
    ribosomes__J_ribo_build = ribosomes__R_ribo_build*ribosomes__c_ribo_build/N_A_mod_ribosomes;
    ribosomes__J_ATP_ribo = ribosomes__J_ribo+ribosomes__J_ribo_build;
    ode(ribosomes__n_ribo, t) = ribosomes__R_ribo_build-ribosomes__R_ribo_loss;
    protein__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_protein+reg_on_ATP_mod_protein*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_protein+reg_on_G6P_mod_protein*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_protein+reg_on_glc_mod_protein*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_protein+reg_on_H_mod_protein*reg__f_H_reg);
    protein__J_demand_total = multiport_sum_mod_protein_J_demand_in__J_demand_in;
    protein__J_keep_total = multiport_sum_mod_protein_J_keep_in__J_keep_in;
    protein__Q_prot_demand_total = multiport_sum_mod_protein_Q_prot_demand_in__Q_prot_demand_in;
    protein__Q_aa_rel_total = multiport_sum_mod_protein_Q_aa_rel_in__Q_aa_rel_in;
    protein__Q_aa_use_total = multiport_sum_mod_protein_Q_aa_use_in__Q_aa_use_in;
    protein__J_prot_total = multiport_sum_mod_protein_J_prot_in__J_prot_in;
    protein__J_saved_total = multiport_sum_mod_protein_J_saved_in__J_saved_in;
    protein__s_prot = (Q_prot_max_mod_protein+Q_eps_mod_protein)/((Q_prot_max_mod_protein+protein__Q_prot_demand_total+abs(Q_prot_max_mod_protein-protein__Q_prot_demand_total))/2.0{dimensionless}+Q_eps_mod_protein);
    protein__phi_aa = (protein__N_aa+abs(protein__N_aa))/2.0{dimensionless}/(K_aa_mod_protein+(protein__N_aa+abs(protein__N_aa))/2.0{dimensionless});
    protein__r_aa_cat = (protein__N_aa+abs(protein__N_aa))/2.0{dimensionless}/tau_aa_cat_mod_protein;
    protein__J_cat = y_aa_cat_mod_protein*protein__r_aa_cat/N_A_mod_protein;
    ode(protein__N_aa, t) = multiport_sum_mod_protein_Q_aa_rel_in__Q_aa_rel_in-multiport_sum_mod_protein_Q_aa_use_in__Q_aa_use_in-protein__r_aa_cat;
    protein__J_recycled = multiport_sum_mod_protein_J_saved_in__J_saved_in+protein__J_cat;
    protein__J_ATP_total = multiport_sum_mod_protein_J_ATP_in__J_ATP_in-protein__J_cat;
    protein__J_build_total = multiport_sum_mod_protein_J_build_in__J_build_in;
    protein__M_build_protein = multiport_sum_mod_protein_M_build_in__M_build_in;
    protein__A_protein_total = multiport_sum_mod_protein_A_protein_in__A_protein_in;
    protein__x_ATP = (cytosol__C_ATP-ATP_floor_mod_protein)/(ATP_ref_mod_protein-ATP_floor_mod_protein);
    protein__throttle = ((protein__x_ATP+abs(protein__x_ATP))/2.0{dimensionless}+1.0{dimensionless}-abs((protein__x_ATP+abs(protein__x_ATP))/2.0{dimensionless}-1.0{dimensionless}))/2.0{dimensionless};
    protein__build_capacity = build_capacity_rest_mod_protein*ribosomes__x_ribo;
    protein__J_cap = protein__build_capacity*J_ref_mod_protein*protein__throttle*protein__R_reg;
    protein__s_build = (protein__J_cap+J_eps_mod_protein)/((protein__J_cap+protein__J_demand_total+abs(protein__J_cap-protein__J_demand_total))/2.0{dimensionless}+J_eps_mod_protein);
    protein__A_surface = membrane__A_mem*surface_factor_mod_protein;
    protein__A_protein_max = area_max_fraction_mod_protein*protein__A_surface;
    protein__f_area = protein__A_protein_total/protein__A_protein_max;
    protein__j_ATP_prot = -protein__J_ATP_total;
    protein__j_ADP_prot = protein__J_ATP_total;
    protein__j_Pi_prot = protein__J_ATP_total;
    pool_proteome__n = n_0_mod_pool_proteome*pool_proteome__m;
    pool_proteome__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_proteome+reg_on_ATP_mod_pool_proteome*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_proteome+reg_on_G6P_mod_pool_proteome*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_proteome+reg_on_glc_mod_pool_proteome*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_proteome+reg_on_H_mod_pool_proteome*reg__f_H_reg);
    pool_proteome__m_goal = m_target_mod_pool_proteome*pool_proteome__R_reg;
    pool_proteome__r_rel = (pool_proteome__m_goal-pool_proteome__m)/tau_mod_pool_proteome;
    pool_proteome__r_up = (pool_proteome__r_rel+abs(pool_proteome__r_rel))/2.0{dimensionless};
    pool_proteome__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_proteome+cytosol__C_ATP)*(K_m_ATP_mod_pool_proteome+ATP_ref_mod_pool_proteome)/ATP_ref_mod_pool_proteome;
    pool_proteome__f_build = (pool_proteome__f_ATP+1.0{dimensionless}-abs(pool_proteome__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_proteome__m_kept = (pool_proteome__m+pool_proteome__m_goal-abs(pool_proteome__m-pool_proteome__m_goal))/2.0{dimensionless};
    pool_proteome__r_deg = k_deg_mod_pool_proteome*pool_proteome__m*pool_proteome__f_build;
    pool_proteome__r_down = -k_deg_mod_pool_proteome*pool_proteome__f_build*((pool_proteome__m-pool_proteome__m_goal+abs(pool_proteome__m-pool_proteome__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_proteome__m_kept);
    pool_proteome__r_rep = pool_proteome__r_deg+pool_proteome__r_down;
    pool_proteome__J_keep = n_0_mod_pool_proteome*L_mod_pool_proteome*((c_poly_mod_pool_proteome+c_recycle_mod_pool_proteome)*pool_proteome__r_rep+c_deg_mod_pool_proteome*pool_proteome__r_deg)/N_A_mod_pool_proteome;
    pool_proteome__J_demand = pool_proteome__r_up*n_0_mod_pool_proteome*L_mod_pool_proteome*(c_syn_mod_pool_proteome+c_poly_mod_pool_proteome)/N_A_mod_pool_proteome;
    pool_proteome__r_build = pool_proteome__r_up*protein__s_build*pool_proteome__f_build;
    pool_proteome__Q_prot_demand = n_0_mod_pool_proteome*L_mod_pool_proteome*(pool_proteome__m-pool_proteome__m_goal+abs(pool_proteome__m-pool_proteome__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_proteome;
    pool_proteome__r_prot = (pool_proteome__m-pool_proteome__m_goal+abs(pool_proteome__m-pool_proteome__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_proteome*protein__s_prot*pool_proteome__f_build;
    pool_proteome__J_prot = c_deg_mod_pool_proteome*n_0_mod_pool_proteome*L_mod_pool_proteome*pool_proteome__r_prot/N_A_mod_pool_proteome;
    pool_proteome__Q_aa_rel = n_0_mod_pool_proteome*L_mod_pool_proteome*(pool_proteome__r_prot-pool_proteome__r_down);
    pool_proteome__Q_aa_use = n_0_mod_pool_proteome*L_mod_pool_proteome*protein__phi_aa*pool_proteome__r_build;
    pool_proteome__J_saved = (c_syn_mod_pool_proteome-c_recycle_mod_pool_proteome)*pool_proteome__Q_aa_use/N_A_mod_pool_proteome;
    pool_proteome__J_build = pool_proteome__r_build*n_0_mod_pool_proteome*L_mod_pool_proteome*(c_syn_mod_pool_proteome+c_poly_mod_pool_proteome)/N_A_mod_pool_proteome-pool_proteome__J_saved;
    pool_proteome__J_ATP = pool_proteome__J_keep+pool_proteome__J_build+pool_proteome__J_prot;
    pool_proteome__M_build = pool_proteome__n*L_mod_pool_proteome*(c_syn_mod_pool_proteome+c_poly_mod_pool_proteome)/N_A_mod_pool_proteome;
    pool_proteome__a_unit = n_0_mod_pool_proteome*footprint_mod_pool_proteome*1e-6{um2_per_nm2};
    pool_proteome__A_protein = pool_proteome__a_unit*pool_proteome__m;
    pool_proteome__share = pool_proteome__A_protein/protein__A_protein_max;
    pool_proteome__s_unit = pool_proteome__a_unit/protein__A_protein_max;
    ode(pool_proteome__m, t) = pool_proteome__r_build+pool_proteome__r_down-pool_proteome__r_prot;
    pool_Glyc__n = n_0_mod_pool_Glyc*pool_Glyc__m;
    pool_Glyc__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_Glyc+reg_on_ATP_mod_pool_Glyc*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_Glyc+reg_on_G6P_mod_pool_Glyc*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_Glyc+reg_on_glc_mod_pool_Glyc*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_Glyc+reg_on_H_mod_pool_Glyc*reg__f_H_reg);
    pool_Glyc__m_goal = m_target_mod_pool_Glyc*pool_Glyc__R_reg;
    pool_Glyc__r_rel = (pool_Glyc__m_goal-pool_Glyc__m)/tau_mod_pool_Glyc;
    pool_Glyc__r_up = (pool_Glyc__r_rel+abs(pool_Glyc__r_rel))/2.0{dimensionless};
    pool_Glyc__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_Glyc+cytosol__C_ATP)*(K_m_ATP_mod_pool_Glyc+ATP_ref_mod_pool_Glyc)/ATP_ref_mod_pool_Glyc;
    pool_Glyc__f_build = (pool_Glyc__f_ATP+1.0{dimensionless}-abs(pool_Glyc__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_Glyc__m_kept = (pool_Glyc__m+pool_Glyc__m_goal-abs(pool_Glyc__m-pool_Glyc__m_goal))/2.0{dimensionless};
    pool_Glyc__r_deg = k_deg_mod_pool_Glyc*pool_Glyc__m*pool_Glyc__f_build;
    pool_Glyc__r_down = -k_deg_mod_pool_Glyc*pool_Glyc__f_build*((pool_Glyc__m-pool_Glyc__m_goal+abs(pool_Glyc__m-pool_Glyc__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_Glyc__m_kept);
    pool_Glyc__r_rep = pool_Glyc__r_deg+pool_Glyc__r_down;
    pool_Glyc__J_keep = n_0_mod_pool_Glyc*L_mod_pool_Glyc*((c_poly_mod_pool_Glyc+c_recycle_mod_pool_Glyc)*pool_Glyc__r_rep+c_deg_mod_pool_Glyc*pool_Glyc__r_deg)/N_A_mod_pool_Glyc;
    pool_Glyc__J_demand = pool_Glyc__r_up*n_0_mod_pool_Glyc*L_mod_pool_Glyc*(c_syn_mod_pool_Glyc+c_poly_mod_pool_Glyc)/N_A_mod_pool_Glyc;
    pool_Glyc__r_build = pool_Glyc__r_up*protein__s_build*pool_Glyc__f_build;
    pool_Glyc__Q_prot_demand = n_0_mod_pool_Glyc*L_mod_pool_Glyc*(pool_Glyc__m-pool_Glyc__m_goal+abs(pool_Glyc__m-pool_Glyc__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Glyc;
    pool_Glyc__r_prot = (pool_Glyc__m-pool_Glyc__m_goal+abs(pool_Glyc__m-pool_Glyc__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Glyc*protein__s_prot*pool_Glyc__f_build;
    pool_Glyc__J_prot = c_deg_mod_pool_Glyc*n_0_mod_pool_Glyc*L_mod_pool_Glyc*pool_Glyc__r_prot/N_A_mod_pool_Glyc;
    pool_Glyc__Q_aa_rel = n_0_mod_pool_Glyc*L_mod_pool_Glyc*(pool_Glyc__r_prot-pool_Glyc__r_down);
    pool_Glyc__Q_aa_use = n_0_mod_pool_Glyc*L_mod_pool_Glyc*protein__phi_aa*pool_Glyc__r_build;
    pool_Glyc__J_saved = (c_syn_mod_pool_Glyc-c_recycle_mod_pool_Glyc)*pool_Glyc__Q_aa_use/N_A_mod_pool_Glyc;
    pool_Glyc__J_build = pool_Glyc__r_build*n_0_mod_pool_Glyc*L_mod_pool_Glyc*(c_syn_mod_pool_Glyc+c_poly_mod_pool_Glyc)/N_A_mod_pool_Glyc-pool_Glyc__J_saved;
    pool_Glyc__J_ATP = pool_Glyc__J_keep+pool_Glyc__J_build+pool_Glyc__J_prot;
    pool_Glyc__M_build = pool_Glyc__n*L_mod_pool_Glyc*(c_syn_mod_pool_Glyc+c_poly_mod_pool_Glyc)/N_A_mod_pool_Glyc;
    pool_Glyc__a_unit = n_0_mod_pool_Glyc*footprint_mod_pool_Glyc*1e-6{um2_per_nm2};
    pool_Glyc__A_protein = pool_Glyc__a_unit*pool_Glyc__m;
    pool_Glyc__share = pool_Glyc__A_protein/protein__A_protein_max;
    pool_Glyc__s_unit = pool_Glyc__a_unit/protein__A_protein_max;
    ode(pool_Glyc__m, t) = pool_Glyc__r_build+pool_Glyc__r_down-pool_Glyc__r_prot;
    reg__x_ATP_reg = (cytosol__C_ATP+abs(cytosol__C_ATP))/(2.0{dimensionless}*C_ATP_rest_mod_reg);
    reg__u_ATP_reg = (1.0{dimensionless}-reg__x_ATP_reg+abs(1.0{dimensionless}-reg__x_ATP_reg))/(2.0{dimensionless}*(1.0{dimensionless}-K_ATP_reg_mod_reg/C_ATP_rest_mod_reg));
    reg__f_ATP_reg = 1.0{dimensionless}/(1.0{dimensionless}+pow(reg__u_ATP_reg, n_reg_mod_reg));
    reg__x_G6P_reg = (cytosol__C_G6P+abs(cytosol__C_G6P))/(2.0{dimensionless}*C_G6P_rest_mod_reg);
    reg__u_G6P_reg = (1.0{dimensionless}-reg__x_G6P_reg+abs(1.0{dimensionless}-reg__x_G6P_reg))/(2.0{dimensionless}*(1.0{dimensionless}-K_G6P_reg_mod_reg/C_G6P_rest_mod_reg));
    reg__f_G6P_reg = 1.0{dimensionless}/(1.0{dimensionless}+pow(reg__u_G6P_reg, n_reg_mod_reg));
    reg__x_glc_reg = (cytosol__C_glc+abs(cytosol__C_glc))/(2.0{dimensionless}*C_glc_rest_mod_reg);
    reg__u_glc_reg = (1.0{dimensionless}-reg__x_glc_reg+abs(1.0{dimensionless}-reg__x_glc_reg))/(2.0{dimensionless}*(1.0{dimensionless}-K_glc_reg_mod_reg/C_glc_rest_mod_reg));
    reg__f_glc_reg = 1.0{dimensionless}/(1.0{dimensionless}+pow(reg__u_glc_reg, n_reg_mod_reg));
    reg__x_H_reg = H_rest_mod_reg/H__H_i;
    reg__u_H_reg = (1.0{dimensionless}-reg__x_H_reg+abs(1.0{dimensionless}-reg__x_H_reg))/(2.0{dimensionless}*(1.0{dimensionless}-H_rest_mod_reg/K_H_reg_mod_reg));
    reg__f_H_reg = 1.0{dimensionless}/(1.0{dimensionless}+pow(reg__u_H_reg, n_reg_mod_reg));
    i_leak_Na__i_leak_Na = i_leak_Na__g_leak_Na*(membrane__V-Na_K__E_Na);
    i_leak_Na__j_leak_Na = -i_leak_Na__i_leak_Na/F*1e-9{A_per_nanoA};
    i_leak_Na__g_leak_Na = membrane__A_mem*rho_leak_Na_mod_i_leak_Na*gamma_leak_Na_mod_i_leak_Na*1e-6{microS_per_picoS};
    i_leak_Ca__g_leak_Ca = membrane__A_mem*rho_leak_Ca_mod_i_leak_Ca*gamma_leak_Ca_mod_i_leak_Ca*1e-6{microS_per_picoS};
    i_leak_Ca__E_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao_mod_i_leak_Ca/Ca__Cai)*1000.0{milliV_per_V};
    i_leak_Ca__i_leak_Ca = i_leak_Ca__g_leak_Ca*(membrane__V-i_leak_Ca__E_Ca);
    i_leak_Ca__j_leak_Ca = -i_leak_Ca__i_leak_Ca/(2.0{dimensionless}*F)*1e-9{A_per_nanoA};
    i_leak_H__g_leak_H = membrane__A_mem*g_spec_leak_H_mod_i_leak_H;
    i_leak_H__i_leak_H = i_leak_H__g_leak_H*(membrane__V-H__E_H);
    i_leak_H__j_leak_H = -i_leak_H__i_leak_H/F*1e-9{A_per_nanoA};
    i_H_ATPase__k_H_ATPase = membrane__A_mem*rho_H_ATPase_mod_i_H_ATPase*pool_H_ATPase__m*r_H_ATPase_mod_i_H_ATPase*n_H_mod_i_H_ATPase*1.602176634e-10{nanoC};
    i_H_ATPase__A_ATP = -dG0_hyd_mod_i_H_ATPase-R*T*ln(abs(cytosol__C_ADP/c_std_mod_i_H_ATPase*(cytosol__C_Pi/c_std_mod_i_H_ATPase)/(cytosol__C_ATP/c_std_mod_i_H_ATPase))+1e-300{dimensionless});
    i_H_ATPase__W_H = n_H_mod_i_H_ATPase*F*(H__E_H-membrane__V)*0.001{V_per_milliV};
    i_H_ATPase__f_thermo = 1.0{dimensionless}-exp(-(i_H_ATPase__A_ATP-i_H_ATPase__W_H)/(R*T));
    i_H_ATPase__i_H_ATPase = i_H_ATPase__k_H_ATPase*cytosol__C_ATP/(K_m_ATP_H_mod_i_H_ATPase+cytosol__C_ATP)*H__H_i/(K_act_H_mod_i_H_ATPase+H__H_i)*i_H_ATPase__f_thermo;
    i_H_ATPase__v_ATP_H = i_H_ATPase__i_H_ATPase/(n_H_mod_i_H_ATPase*F)*1e-9{A_per_nanoA};
    i_H_ATPase__j_H_pumped = -n_H_mod_i_H_ATPase*i_H_ATPase__v_ATP_H;
    i_H_ATPase__j_H_ATPase = i_H_ATPase__j_H_pumped;
    i_H_ATPase__j_ATP_H = -i_H_ATPase__v_ATP_H;
    i_H_ATPase__j_ADP_H = i_H_ATPase__v_ATP_H;
    i_H_ATPase__j_Pi_H = i_H_ATPase__v_ATP_H;
    i_NaH__drive = -(membrane__V+Na_K__E_Na-2.0{dimensionless}*H__E_H);
    i_NaH__r_cycle = membrane__A_mem*g_spec_mod_i_NaH*pool_NhaA__m*i_NaH__drive/F*1e-9{A_per_nanoA};
    i_NaH__i_NaH = -i_NaH__r_cycle*F*1000000000.0{nanoA_per_A};
    i_NaH__j_NaH_Na = -i_NaH__r_cycle;
    i_NaH__j_NaH_H = 2.0{dimensionless}*i_NaH__r_cycle;
    i_KH__drive = H__E_H-Na_K__E_K;
    i_KH__r_cycle = membrane__A_mem*g_spec_mod_i_KH*pool_KefC__m*i_KH__drive/F*1e-9{A_per_nanoA};
    i_KH__j_KH_K = -i_KH__r_cycle;
    i_KH__j_KH_H = i_KH__r_cycle;
    i_K_Trk__i_leak_K = i_K_Trk__g_leak_K*(membrane__V-Na_K__E_K);
    i_K_Trk__j_leak_K = -i_K_Trk__i_leak_K/F*1e-9{A_per_nanoA};
    i_K_Trk__g_leak_K = membrane__A_mem*(rho_leak_K_mod_i_K_Trk*pool_Trk__m)*gamma_leak_K_mod_i_K_Trk*1e-6{microS_per_picoS};
    i_NaCa__i_NaCa = i_NaCa__k_NaCa*(exp(gamma_NaCa_mod_i_NaCa*membrane__V*1e-3{V_per_milliV}*F/(R*T))*pow(Na_K__Nai, 3{dimensionless})*Cao_mod_i_NaCa-exp((gamma_NaCa_mod_i_NaCa-1{dimensionless})*membrane__V*1e-3{V_per_milliV}*F/(R*T))*pow(Nao_mod_i_NaCa, 3{dimensionless})*Ca__Cai*alpha_NaCa_mod_i_NaCa)/((pow(KmNai_mod_i_NaCa, 3{dimensionless})+pow(Nao_mod_i_NaCa, 3{dimensionless}))*(KmCa_mod_i_NaCa+Cao_mod_i_NaCa)*(1{dimensionless}+Ksat_mod_i_NaCa*exp((gamma_NaCa_mod_i_NaCa-1{dimensionless})*membrane__V*1e-3{V_per_milliV}*F/(R*T))));
    i_NaCa__j_NaCa_Ca = i_NaCa__i_NaCa/F*1e-9{A_per_nanoA};
    i_NaCa__j_NaCa_Na = -3{dimensionless}*i_NaCa__i_NaCa/F*1e-9{A_per_nanoA};
    i_NaCa__k_NaCa = membrane__A_mem*(rho_NaCa_mod_i_NaCa*pool_NCX__m)*r_NaCa_mod_i_NaCa*1.602176634e-10{nanoC};
    membrane_face__J_glc = jmax_glc_mod_membrane_face*pool_Glf__m*membrane__A_mem*(C_glc_e_mod_membrane_face/(K_glc_t_mod_membrane_face+C_glc_e_mod_membrane_face)-cytosol__C_glc/(K_glc_t_mod_membrane_face+cytosol__C_glc));
    membrane_face__X_lac_e = C_lac_e_mod_membrane_face*H_e_mod_membrane_face/H_ref_mod_membrane_face;
    membrane_face__X_lac_i = cytosol__C_lac*H__H_i/H_ref_mod_membrane_face;
    membrane_face__J_lac = jmax_lac_mod_membrane_face*pool_LacT__m*membrane__A_mem*(membrane_face__X_lac_e/(K_lac_t_mod_membrane_face+membrane_face__X_lac_e)-membrane_face__X_lac_i/(K_lac_t_mod_membrane_face+membrane_face__X_lac_i));
    membrane_face__J_H_lac = membrane_face__J_lac;
    membrane_face__J_glc_e = -membrane_face__J_glc;
    membrane_face__J_lac_e = -membrane_face__J_lac;
    membrane_face__J_glc_c = membrane_face__J_glc;
    membrane_face__J_lac_c = membrane_face__J_lac;
    membrane_face__J_ATP_c = 0.0{mol_per_s};
    membrane_face__J_ADP_c = 0.0{mol_per_s};
    membrane_face__J_Pi_c = 0.0{mol_per_s};
    i_flagellum__pmf = H__E_H-membrane__V;
    ode(i_flagellum__a_eff, t) = (a_motor_mod_i_flagellum-i_flagellum__a_eff)/tau_bundle_mod_i_flagellum;
    i_flagellum__f_rot = i_flagellum__a_eff*f_ref_mod_i_flagellum*i_flagellum__pmf/pmf_ref_mod_i_flagellum;
    i_flagellum__j_H_flag = pool_Flagellum__m*i_flagellum__f_rot*n_H_rev_mod_i_flagellum/N_A_mod_i_flagellum;
    i_flagellum__i_flag = -i_flagellum__j_H_flag*F*1000000000.0{nanoA_per_A};
    i_flagellum__P_flag = i_flagellum__j_H_flag*F*i_flagellum__pmf*0.001{V_per_milliV};
    i_flagellum__xi = 6.0{dimensionless}*pi*eta_mod_i_flagellum*R_body_mod_i_flagellum*1e-6{m_per_um};
    i_flagellum__F_one = i_flagellum__xi*v_one_mod_i_flagellum*i_flagellum__f_rot/f_ref_mod_i_flagellum*(1.0{dimensionless}+n_half_mod_i_flagellum)/(pool_Flagellum__m+n_half_mod_i_flagellum);
    i_flagellum__F_thrust = pool_Flagellum__m*i_flagellum__F_one;
    i_flagellum__v_swim = i_flagellum__F_thrust/i_flagellum__xi;
    i_flagellum__P_mech = i_flagellum__F_thrust*i_flagellum__v_swim;
    hydrolase__n_copies = n_0_mod_hydrolase*pool_Hydrolase__m;
    hydrolase__V_hydrolysis_max = kcat_mod_hydrolase*hydrolase__n_copies/N_A_mod_hydrolase;
    glc_PTS__K_eq = exp(-dG0_hk_mod_glc_PTS/(R*T));
    glc_PTS__Gamma = cytosol__C_G6P/c_std_mod_glc_PTS*(cytosol__C_ADP/c_std_mod_glc_PTS)/(C_glc_e_mod_glc_PTS/c_std_mod_glc_PTS*(cytosol__C_ATP/c_std_mod_glc_PTS));
    glc_PTS__f_PEP = cytosol__C_ADP/(K_ADP_PEP_mod_glc_PTS+cytosol__C_ADP)*cytosol__C_Pi/(K_Pi_PEP_mod_glc_PTS+cytosol__C_Pi);
    glc_PTS__J_glc = jmax_glc_mod_glc_PTS*pool_PTS__m*membrane__A_mem*glc_PTS__f_PEP*(C_glc_e_mod_glc_PTS*cytosol__C_ATP-cytosol__C_G6P*cytosol__C_ADP/glc_PTS__K_eq)/((K_m_ATP_mod_glc_PTS+cytosol__C_ATP)*(K_glc_t_mod_glc_PTS+C_glc_e_mod_glc_PTS));
    glc_PTS__A_glc = R*T*(ln(glc_PTS__K_eq)-ln(abs(glc_PTS__Gamma)+1e-300{dimensionless}));
    glc_PTS__J_glc_e = -glc_PTS__J_glc;
    glc_PTS__J_lac_e = 0.0{mol_per_s};
    glc_PTS__J_G6P = glc_PTS__J_glc;
    glc_PTS__J_ATP_cost = glc_PTS__J_glc;
    glc_PTS__j_ATP = -glc_PTS__J_glc;
    glc_PTS__j_ADP = glc_PTS__J_glc;
    glc_PTS__j_Pi = 0.0{mol_per_s};
    glc_ABC__ATP_eq = cytosol__C_ADP*cytosol__C_Pi/c_std_mod_glc_ABC*exp(dG0_hyd_mod_glc_ABC/(R*T));
    glc_ABC__A_ATP = -dG0_hyd_mod_glc_ABC-R*T*ln(abs(cytosol__C_ADP/c_std_mod_glc_ABC*(cytosol__C_Pi/c_std_mod_glc_ABC)/(cytosol__C_ATP/c_std_mod_glc_ABC))+1e-300{dimensionless});
    glc_ABC__J_glc = jmax_glc_mod_glc_ABC*pool_ABC__m*membrane__A_mem*(C_glc_e_mod_glc_ABC*pow(cytosol__C_ATP/K_m_ATP_mod_glc_ABC, n_P_mod_glc_ABC)-cytosol__C_glc*pow(glc_ABC__ATP_eq/K_m_ATP_mod_glc_ABC, n_P_mod_glc_ABC))/((K_glc_t_mod_glc_ABC+C_glc_e_mod_glc_ABC)*pow(1.0{dimensionless}+cytosol__C_ATP/K_m_ATP_mod_glc_ABC, n_P_mod_glc_ABC));
    glc_ABC__A_glc = R*T*(ln(abs(C_glc_e_mod_glc_ABC/c_std_mod_glc_ABC)+1e-300{dimensionless})-ln(abs(cytosol__C_glc/c_std_mod_glc_ABC)+1e-300{dimensionless}))+n_P_mod_glc_ABC*glc_ABC__A_ATP;
    glc_ABC__J_ATP_cost = n_P_mod_glc_ABC*glc_ABC__J_glc;
    glc_ABC__j_ATP = -glc_ABC__J_ATP_cost;
    glc_ABC__j_ADP = glc_ABC__J_ATP_cost;
    glc_ABC__j_Pi = glc_ABC__J_ATP_cost;
    glc_ABC__J_glc_e = -glc_ABC__J_glc;
    glc_ABC__J_lac_e = 0.0{mol_per_s};
    glc_ABC__J_glc_c = glc_ABC__J_glc;
    glc_ABC__J_lac_c = 0.0{mol_per_s};
    glc_ABC__J_ATP_c = 0.0{mol_per_s};
    glc_ABC__J_ADP_c = 0.0{mol_per_s};
    glc_ABC__J_Pi_c = 0.0{mol_per_s};
    glc_GalP__W_H = n_H_mod_glc_GalP*F*(H__E_H-membrane__V)*0.001{V_per_milliV};
    glc_GalP__J_glc = jmax_glc_mod_glc_GalP*pool_GalP__m*membrane__A_mem*(C_glc_e_mod_glc_GalP-cytosol__C_glc*exp(-glc_GalP__W_H/(R*T)))/(K_glc_t_mod_glc_GalP+C_glc_e_mod_glc_GalP);
    glc_GalP__A_glc = R*T*(ln(abs(C_glc_e_mod_glc_GalP/c_std_mod_glc_GalP)+1e-300{dimensionless})-ln(abs(cytosol__C_glc/c_std_mod_glc_GalP)+1e-300{dimensionless}))+glc_GalP__W_H;
    glc_GalP__j_H = n_H_mod_glc_GalP*glc_GalP__J_glc;
    glc_GalP__i_glc_H = -F*glc_GalP__j_H*1000000000.0{nanoA_per_A};
    glc_GalP__J_glc_e = -glc_GalP__J_glc;
    glc_GalP__J_lac_e = 0.0{mol_per_s};
    glc_GalP__J_glc_c = glc_GalP__J_glc;
    glc_GalP__J_lac_c = 0.0{mol_per_s};
    glc_GalP__J_ATP_c = 0.0{mol_per_s};
    glc_GalP__J_ADP_c = 0.0{mol_per_s};
    glc_GalP__J_Pi_c = 0.0{mol_per_s};
    pool_H_ATPase__m_target = s_target_mod_pool_H_ATPase*protein__A_protein_max/pool_H_ATPase__a_unit;
    pool_H_ATPase__n = n_0_mod_pool_H_ATPase*pool_H_ATPase__m;
    pool_H_ATPase__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_H_ATPase+reg_on_ATP_mod_pool_H_ATPase*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_H_ATPase+reg_on_G6P_mod_pool_H_ATPase*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_H_ATPase+reg_on_glc_mod_pool_H_ATPase*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_H_ATPase+reg_on_H_mod_pool_H_ATPase*reg__f_H_reg);
    pool_H_ATPase__m_goal = pool_H_ATPase__m_target*pool_H_ATPase__R_reg;
    pool_H_ATPase__r_rel = (pool_H_ATPase__m_goal-pool_H_ATPase__m)/tau_mod_pool_H_ATPase;
    pool_H_ATPase__r_up = (pool_H_ATPase__r_rel+abs(pool_H_ATPase__r_rel))/2.0{dimensionless};
    pool_H_ATPase__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_H_ATPase+cytosol__C_ATP)*(K_m_ATP_mod_pool_H_ATPase+ATP_ref_mod_pool_H_ATPase)/ATP_ref_mod_pool_H_ATPase;
    pool_H_ATPase__f_build = (pool_H_ATPase__f_ATP+1.0{dimensionless}-abs(pool_H_ATPase__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_H_ATPase__m_kept = (pool_H_ATPase__m+pool_H_ATPase__m_goal-abs(pool_H_ATPase__m-pool_H_ATPase__m_goal))/2.0{dimensionless};
    pool_H_ATPase__r_deg = k_deg_mod_pool_H_ATPase*pool_H_ATPase__m*pool_H_ATPase__f_build;
    pool_H_ATPase__r_down = -k_deg_mod_pool_H_ATPase*pool_H_ATPase__f_build*((pool_H_ATPase__m-pool_H_ATPase__m_goal+abs(pool_H_ATPase__m-pool_H_ATPase__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_H_ATPase__m_kept);
    pool_H_ATPase__r_rep = pool_H_ATPase__r_deg+pool_H_ATPase__r_down;
    pool_H_ATPase__J_keep = n_0_mod_pool_H_ATPase*L_mod_pool_H_ATPase*((c_poly_mod_pool_H_ATPase+c_recycle_mod_pool_H_ATPase)*pool_H_ATPase__r_rep+c_deg_mod_pool_H_ATPase*pool_H_ATPase__r_deg)/N_A_mod_pool_H_ATPase;
    pool_H_ATPase__J_demand = pool_H_ATPase__r_up*n_0_mod_pool_H_ATPase*L_mod_pool_H_ATPase*(c_syn_mod_pool_H_ATPase+c_poly_mod_pool_H_ATPase)/N_A_mod_pool_H_ATPase;
    pool_H_ATPase__r_build = pool_H_ATPase__r_up*protein__s_build*pool_H_ATPase__f_build;
    pool_H_ATPase__Q_prot_demand = n_0_mod_pool_H_ATPase*L_mod_pool_H_ATPase*(pool_H_ATPase__m-pool_H_ATPase__m_goal+abs(pool_H_ATPase__m-pool_H_ATPase__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_H_ATPase;
    pool_H_ATPase__r_prot = (pool_H_ATPase__m-pool_H_ATPase__m_goal+abs(pool_H_ATPase__m-pool_H_ATPase__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_H_ATPase*protein__s_prot*pool_H_ATPase__f_build;
    pool_H_ATPase__J_prot = c_deg_mod_pool_H_ATPase*n_0_mod_pool_H_ATPase*L_mod_pool_H_ATPase*pool_H_ATPase__r_prot/N_A_mod_pool_H_ATPase;
    pool_H_ATPase__Q_aa_rel = n_0_mod_pool_H_ATPase*L_mod_pool_H_ATPase*(pool_H_ATPase__r_prot-pool_H_ATPase__r_down);
    pool_H_ATPase__Q_aa_use = n_0_mod_pool_H_ATPase*L_mod_pool_H_ATPase*protein__phi_aa*pool_H_ATPase__r_build;
    pool_H_ATPase__J_saved = (c_syn_mod_pool_H_ATPase-c_recycle_mod_pool_H_ATPase)*pool_H_ATPase__Q_aa_use/N_A_mod_pool_H_ATPase;
    pool_H_ATPase__J_build = pool_H_ATPase__r_build*n_0_mod_pool_H_ATPase*L_mod_pool_H_ATPase*(c_syn_mod_pool_H_ATPase+c_poly_mod_pool_H_ATPase)/N_A_mod_pool_H_ATPase-pool_H_ATPase__J_saved;
    pool_H_ATPase__J_ATP = pool_H_ATPase__J_keep+pool_H_ATPase__J_build+pool_H_ATPase__J_prot;
    pool_H_ATPase__M_build = pool_H_ATPase__n*L_mod_pool_H_ATPase*(c_syn_mod_pool_H_ATPase+c_poly_mod_pool_H_ATPase)/N_A_mod_pool_H_ATPase;
    pool_H_ATPase__a_unit = n_0_mod_pool_H_ATPase*footprint_mod_pool_H_ATPase*1e-6{um2_per_nm2};
    pool_H_ATPase__A_protein = pool_H_ATPase__a_unit*pool_H_ATPase__m;
    pool_H_ATPase__share = pool_H_ATPase__A_protein/protein__A_protein_max;
    pool_H_ATPase__s_unit = pool_H_ATPase__a_unit/protein__A_protein_max;
    ode(pool_H_ATPase__m, t) = pool_H_ATPase__r_build+pool_H_ATPase__r_down-pool_H_ATPase__r_prot;
    pool_NhaA__m_target = s_target_mod_pool_NhaA*protein__A_protein_max/pool_NhaA__a_unit;
    pool_NhaA__n = n_0_mod_pool_NhaA*pool_NhaA__m;
    pool_NhaA__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_NhaA+reg_on_ATP_mod_pool_NhaA*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_NhaA+reg_on_G6P_mod_pool_NhaA*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_NhaA+reg_on_glc_mod_pool_NhaA*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_NhaA+reg_on_H_mod_pool_NhaA*reg__f_H_reg);
    pool_NhaA__m_goal = pool_NhaA__m_target*pool_NhaA__R_reg;
    pool_NhaA__r_rel = (pool_NhaA__m_goal-pool_NhaA__m)/tau_mod_pool_NhaA;
    pool_NhaA__r_up = (pool_NhaA__r_rel+abs(pool_NhaA__r_rel))/2.0{dimensionless};
    pool_NhaA__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_NhaA+cytosol__C_ATP)*(K_m_ATP_mod_pool_NhaA+ATP_ref_mod_pool_NhaA)/ATP_ref_mod_pool_NhaA;
    pool_NhaA__f_build = (pool_NhaA__f_ATP+1.0{dimensionless}-abs(pool_NhaA__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_NhaA__m_kept = (pool_NhaA__m+pool_NhaA__m_goal-abs(pool_NhaA__m-pool_NhaA__m_goal))/2.0{dimensionless};
    pool_NhaA__r_deg = k_deg_mod_pool_NhaA*pool_NhaA__m*pool_NhaA__f_build;
    pool_NhaA__r_down = -k_deg_mod_pool_NhaA*pool_NhaA__f_build*((pool_NhaA__m-pool_NhaA__m_goal+abs(pool_NhaA__m-pool_NhaA__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_NhaA__m_kept);
    pool_NhaA__r_rep = pool_NhaA__r_deg+pool_NhaA__r_down;
    pool_NhaA__J_keep = n_0_mod_pool_NhaA*L_mod_pool_NhaA*((c_poly_mod_pool_NhaA+c_recycle_mod_pool_NhaA)*pool_NhaA__r_rep+c_deg_mod_pool_NhaA*pool_NhaA__r_deg)/N_A_mod_pool_NhaA;
    pool_NhaA__J_demand = pool_NhaA__r_up*n_0_mod_pool_NhaA*L_mod_pool_NhaA*(c_syn_mod_pool_NhaA+c_poly_mod_pool_NhaA)/N_A_mod_pool_NhaA;
    pool_NhaA__r_build = pool_NhaA__r_up*protein__s_build*pool_NhaA__f_build;
    pool_NhaA__Q_prot_demand = n_0_mod_pool_NhaA*L_mod_pool_NhaA*(pool_NhaA__m-pool_NhaA__m_goal+abs(pool_NhaA__m-pool_NhaA__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_NhaA;
    pool_NhaA__r_prot = (pool_NhaA__m-pool_NhaA__m_goal+abs(pool_NhaA__m-pool_NhaA__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_NhaA*protein__s_prot*pool_NhaA__f_build;
    pool_NhaA__J_prot = c_deg_mod_pool_NhaA*n_0_mod_pool_NhaA*L_mod_pool_NhaA*pool_NhaA__r_prot/N_A_mod_pool_NhaA;
    pool_NhaA__Q_aa_rel = n_0_mod_pool_NhaA*L_mod_pool_NhaA*(pool_NhaA__r_prot-pool_NhaA__r_down);
    pool_NhaA__Q_aa_use = n_0_mod_pool_NhaA*L_mod_pool_NhaA*protein__phi_aa*pool_NhaA__r_build;
    pool_NhaA__J_saved = (c_syn_mod_pool_NhaA-c_recycle_mod_pool_NhaA)*pool_NhaA__Q_aa_use/N_A_mod_pool_NhaA;
    pool_NhaA__J_build = pool_NhaA__r_build*n_0_mod_pool_NhaA*L_mod_pool_NhaA*(c_syn_mod_pool_NhaA+c_poly_mod_pool_NhaA)/N_A_mod_pool_NhaA-pool_NhaA__J_saved;
    pool_NhaA__J_ATP = pool_NhaA__J_keep+pool_NhaA__J_build+pool_NhaA__J_prot;
    pool_NhaA__M_build = pool_NhaA__n*L_mod_pool_NhaA*(c_syn_mod_pool_NhaA+c_poly_mod_pool_NhaA)/N_A_mod_pool_NhaA;
    pool_NhaA__a_unit = n_0_mod_pool_NhaA*footprint_mod_pool_NhaA*1e-6{um2_per_nm2};
    pool_NhaA__A_protein = pool_NhaA__a_unit*pool_NhaA__m;
    pool_NhaA__share = pool_NhaA__A_protein/protein__A_protein_max;
    pool_NhaA__s_unit = pool_NhaA__a_unit/protein__A_protein_max;
    ode(pool_NhaA__m, t) = pool_NhaA__r_build+pool_NhaA__r_down-pool_NhaA__r_prot;
    pool_KefC__m_target = s_target_mod_pool_KefC*protein__A_protein_max/pool_KefC__a_unit;
    pool_KefC__n = n_0_mod_pool_KefC*pool_KefC__m;
    pool_KefC__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_KefC+reg_on_ATP_mod_pool_KefC*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_KefC+reg_on_G6P_mod_pool_KefC*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_KefC+reg_on_glc_mod_pool_KefC*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_KefC+reg_on_H_mod_pool_KefC*reg__f_H_reg);
    pool_KefC__m_goal = pool_KefC__m_target*pool_KefC__R_reg;
    pool_KefC__r_rel = (pool_KefC__m_goal-pool_KefC__m)/tau_mod_pool_KefC;
    pool_KefC__r_up = (pool_KefC__r_rel+abs(pool_KefC__r_rel))/2.0{dimensionless};
    pool_KefC__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_KefC+cytosol__C_ATP)*(K_m_ATP_mod_pool_KefC+ATP_ref_mod_pool_KefC)/ATP_ref_mod_pool_KefC;
    pool_KefC__f_build = (pool_KefC__f_ATP+1.0{dimensionless}-abs(pool_KefC__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_KefC__m_kept = (pool_KefC__m+pool_KefC__m_goal-abs(pool_KefC__m-pool_KefC__m_goal))/2.0{dimensionless};
    pool_KefC__r_deg = k_deg_mod_pool_KefC*pool_KefC__m*pool_KefC__f_build;
    pool_KefC__r_down = -k_deg_mod_pool_KefC*pool_KefC__f_build*((pool_KefC__m-pool_KefC__m_goal+abs(pool_KefC__m-pool_KefC__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_KefC__m_kept);
    pool_KefC__r_rep = pool_KefC__r_deg+pool_KefC__r_down;
    pool_KefC__J_keep = n_0_mod_pool_KefC*L_mod_pool_KefC*((c_poly_mod_pool_KefC+c_recycle_mod_pool_KefC)*pool_KefC__r_rep+c_deg_mod_pool_KefC*pool_KefC__r_deg)/N_A_mod_pool_KefC;
    pool_KefC__J_demand = pool_KefC__r_up*n_0_mod_pool_KefC*L_mod_pool_KefC*(c_syn_mod_pool_KefC+c_poly_mod_pool_KefC)/N_A_mod_pool_KefC;
    pool_KefC__r_build = pool_KefC__r_up*protein__s_build*pool_KefC__f_build;
    pool_KefC__Q_prot_demand = n_0_mod_pool_KefC*L_mod_pool_KefC*(pool_KefC__m-pool_KefC__m_goal+abs(pool_KefC__m-pool_KefC__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_KefC;
    pool_KefC__r_prot = (pool_KefC__m-pool_KefC__m_goal+abs(pool_KefC__m-pool_KefC__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_KefC*protein__s_prot*pool_KefC__f_build;
    pool_KefC__J_prot = c_deg_mod_pool_KefC*n_0_mod_pool_KefC*L_mod_pool_KefC*pool_KefC__r_prot/N_A_mod_pool_KefC;
    pool_KefC__Q_aa_rel = n_0_mod_pool_KefC*L_mod_pool_KefC*(pool_KefC__r_prot-pool_KefC__r_down);
    pool_KefC__Q_aa_use = n_0_mod_pool_KefC*L_mod_pool_KefC*protein__phi_aa*pool_KefC__r_build;
    pool_KefC__J_saved = (c_syn_mod_pool_KefC-c_recycle_mod_pool_KefC)*pool_KefC__Q_aa_use/N_A_mod_pool_KefC;
    pool_KefC__J_build = pool_KefC__r_build*n_0_mod_pool_KefC*L_mod_pool_KefC*(c_syn_mod_pool_KefC+c_poly_mod_pool_KefC)/N_A_mod_pool_KefC-pool_KefC__J_saved;
    pool_KefC__J_ATP = pool_KefC__J_keep+pool_KefC__J_build+pool_KefC__J_prot;
    pool_KefC__M_build = pool_KefC__n*L_mod_pool_KefC*(c_syn_mod_pool_KefC+c_poly_mod_pool_KefC)/N_A_mod_pool_KefC;
    pool_KefC__a_unit = n_0_mod_pool_KefC*footprint_mod_pool_KefC*1e-6{um2_per_nm2};
    pool_KefC__A_protein = pool_KefC__a_unit*pool_KefC__m;
    pool_KefC__share = pool_KefC__A_protein/protein__A_protein_max;
    pool_KefC__s_unit = pool_KefC__a_unit/protein__A_protein_max;
    ode(pool_KefC__m, t) = pool_KefC__r_build+pool_KefC__r_down-pool_KefC__r_prot;
    pool_Trk__m_target = s_target_mod_pool_Trk*protein__A_protein_max/pool_Trk__a_unit;
    pool_Trk__n = n_0_mod_pool_Trk*pool_Trk__m;
    pool_Trk__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_Trk+reg_on_ATP_mod_pool_Trk*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_Trk+reg_on_G6P_mod_pool_Trk*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_Trk+reg_on_glc_mod_pool_Trk*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_Trk+reg_on_H_mod_pool_Trk*reg__f_H_reg);
    pool_Trk__m_goal = pool_Trk__m_target*pool_Trk__R_reg;
    pool_Trk__r_rel = (pool_Trk__m_goal-pool_Trk__m)/tau_mod_pool_Trk;
    pool_Trk__r_up = (pool_Trk__r_rel+abs(pool_Trk__r_rel))/2.0{dimensionless};
    pool_Trk__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_Trk+cytosol__C_ATP)*(K_m_ATP_mod_pool_Trk+ATP_ref_mod_pool_Trk)/ATP_ref_mod_pool_Trk;
    pool_Trk__f_build = (pool_Trk__f_ATP+1.0{dimensionless}-abs(pool_Trk__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_Trk__m_kept = (pool_Trk__m+pool_Trk__m_goal-abs(pool_Trk__m-pool_Trk__m_goal))/2.0{dimensionless};
    pool_Trk__r_deg = k_deg_mod_pool_Trk*pool_Trk__m*pool_Trk__f_build;
    pool_Trk__r_down = -k_deg_mod_pool_Trk*pool_Trk__f_build*((pool_Trk__m-pool_Trk__m_goal+abs(pool_Trk__m-pool_Trk__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_Trk__m_kept);
    pool_Trk__r_rep = pool_Trk__r_deg+pool_Trk__r_down;
    pool_Trk__J_keep = n_0_mod_pool_Trk*L_mod_pool_Trk*((c_poly_mod_pool_Trk+c_recycle_mod_pool_Trk)*pool_Trk__r_rep+c_deg_mod_pool_Trk*pool_Trk__r_deg)/N_A_mod_pool_Trk;
    pool_Trk__J_demand = pool_Trk__r_up*n_0_mod_pool_Trk*L_mod_pool_Trk*(c_syn_mod_pool_Trk+c_poly_mod_pool_Trk)/N_A_mod_pool_Trk;
    pool_Trk__r_build = pool_Trk__r_up*protein__s_build*pool_Trk__f_build;
    pool_Trk__Q_prot_demand = n_0_mod_pool_Trk*L_mod_pool_Trk*(pool_Trk__m-pool_Trk__m_goal+abs(pool_Trk__m-pool_Trk__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Trk;
    pool_Trk__r_prot = (pool_Trk__m-pool_Trk__m_goal+abs(pool_Trk__m-pool_Trk__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Trk*protein__s_prot*pool_Trk__f_build;
    pool_Trk__J_prot = c_deg_mod_pool_Trk*n_0_mod_pool_Trk*L_mod_pool_Trk*pool_Trk__r_prot/N_A_mod_pool_Trk;
    pool_Trk__Q_aa_rel = n_0_mod_pool_Trk*L_mod_pool_Trk*(pool_Trk__r_prot-pool_Trk__r_down);
    pool_Trk__Q_aa_use = n_0_mod_pool_Trk*L_mod_pool_Trk*protein__phi_aa*pool_Trk__r_build;
    pool_Trk__J_saved = (c_syn_mod_pool_Trk-c_recycle_mod_pool_Trk)*pool_Trk__Q_aa_use/N_A_mod_pool_Trk;
    pool_Trk__J_build = pool_Trk__r_build*n_0_mod_pool_Trk*L_mod_pool_Trk*(c_syn_mod_pool_Trk+c_poly_mod_pool_Trk)/N_A_mod_pool_Trk-pool_Trk__J_saved;
    pool_Trk__J_ATP = pool_Trk__J_keep+pool_Trk__J_build+pool_Trk__J_prot;
    pool_Trk__M_build = pool_Trk__n*L_mod_pool_Trk*(c_syn_mod_pool_Trk+c_poly_mod_pool_Trk)/N_A_mod_pool_Trk;
    pool_Trk__a_unit = n_0_mod_pool_Trk*footprint_mod_pool_Trk*1e-6{um2_per_nm2};
    pool_Trk__A_protein = pool_Trk__a_unit*pool_Trk__m;
    pool_Trk__share = pool_Trk__A_protein/protein__A_protein_max;
    pool_Trk__s_unit = pool_Trk__a_unit/protein__A_protein_max;
    ode(pool_Trk__m, t) = pool_Trk__r_build+pool_Trk__r_down-pool_Trk__r_prot;
    pool_NCX__m_target = s_target_mod_pool_NCX*protein__A_protein_max/pool_NCX__a_unit;
    pool_NCX__n = n_0_mod_pool_NCX*pool_NCX__m;
    pool_NCX__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_NCX+reg_on_ATP_mod_pool_NCX*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_NCX+reg_on_G6P_mod_pool_NCX*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_NCX+reg_on_glc_mod_pool_NCX*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_NCX+reg_on_H_mod_pool_NCX*reg__f_H_reg);
    pool_NCX__m_goal = pool_NCX__m_target*pool_NCX__R_reg;
    pool_NCX__r_rel = (pool_NCX__m_goal-pool_NCX__m)/tau_mod_pool_NCX;
    pool_NCX__r_up = (pool_NCX__r_rel+abs(pool_NCX__r_rel))/2.0{dimensionless};
    pool_NCX__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_NCX+cytosol__C_ATP)*(K_m_ATP_mod_pool_NCX+ATP_ref_mod_pool_NCX)/ATP_ref_mod_pool_NCX;
    pool_NCX__f_build = (pool_NCX__f_ATP+1.0{dimensionless}-abs(pool_NCX__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_NCX__m_kept = (pool_NCX__m+pool_NCX__m_goal-abs(pool_NCX__m-pool_NCX__m_goal))/2.0{dimensionless};
    pool_NCX__r_deg = k_deg_mod_pool_NCX*pool_NCX__m*pool_NCX__f_build;
    pool_NCX__r_down = -k_deg_mod_pool_NCX*pool_NCX__f_build*((pool_NCX__m-pool_NCX__m_goal+abs(pool_NCX__m-pool_NCX__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_NCX__m_kept);
    pool_NCX__r_rep = pool_NCX__r_deg+pool_NCX__r_down;
    pool_NCX__J_keep = n_0_mod_pool_NCX*L_mod_pool_NCX*((c_poly_mod_pool_NCX+c_recycle_mod_pool_NCX)*pool_NCX__r_rep+c_deg_mod_pool_NCX*pool_NCX__r_deg)/N_A_mod_pool_NCX;
    pool_NCX__J_demand = pool_NCX__r_up*n_0_mod_pool_NCX*L_mod_pool_NCX*(c_syn_mod_pool_NCX+c_poly_mod_pool_NCX)/N_A_mod_pool_NCX;
    pool_NCX__r_build = pool_NCX__r_up*protein__s_build*pool_NCX__f_build;
    pool_NCX__Q_prot_demand = n_0_mod_pool_NCX*L_mod_pool_NCX*(pool_NCX__m-pool_NCX__m_goal+abs(pool_NCX__m-pool_NCX__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_NCX;
    pool_NCX__r_prot = (pool_NCX__m-pool_NCX__m_goal+abs(pool_NCX__m-pool_NCX__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_NCX*protein__s_prot*pool_NCX__f_build;
    pool_NCX__J_prot = c_deg_mod_pool_NCX*n_0_mod_pool_NCX*L_mod_pool_NCX*pool_NCX__r_prot/N_A_mod_pool_NCX;
    pool_NCX__Q_aa_rel = n_0_mod_pool_NCX*L_mod_pool_NCX*(pool_NCX__r_prot-pool_NCX__r_down);
    pool_NCX__Q_aa_use = n_0_mod_pool_NCX*L_mod_pool_NCX*protein__phi_aa*pool_NCX__r_build;
    pool_NCX__J_saved = (c_syn_mod_pool_NCX-c_recycle_mod_pool_NCX)*pool_NCX__Q_aa_use/N_A_mod_pool_NCX;
    pool_NCX__J_build = pool_NCX__r_build*n_0_mod_pool_NCX*L_mod_pool_NCX*(c_syn_mod_pool_NCX+c_poly_mod_pool_NCX)/N_A_mod_pool_NCX-pool_NCX__J_saved;
    pool_NCX__J_ATP = pool_NCX__J_keep+pool_NCX__J_build+pool_NCX__J_prot;
    pool_NCX__M_build = pool_NCX__n*L_mod_pool_NCX*(c_syn_mod_pool_NCX+c_poly_mod_pool_NCX)/N_A_mod_pool_NCX;
    pool_NCX__a_unit = n_0_mod_pool_NCX*footprint_mod_pool_NCX*1e-6{um2_per_nm2};
    pool_NCX__A_protein = pool_NCX__a_unit*pool_NCX__m;
    pool_NCX__share = pool_NCX__A_protein/protein__A_protein_max;
    pool_NCX__s_unit = pool_NCX__a_unit/protein__A_protein_max;
    ode(pool_NCX__m, t) = pool_NCX__r_build+pool_NCX__r_down-pool_NCX__r_prot;
    pool_Glf__m_target = s_target_mod_pool_Glf*protein__A_protein_max/pool_Glf__a_unit;
    pool_Glf__n = n_0_mod_pool_Glf*pool_Glf__m;
    pool_Glf__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_Glf+reg_on_ATP_mod_pool_Glf*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_Glf+reg_on_G6P_mod_pool_Glf*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_Glf+reg_on_glc_mod_pool_Glf*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_Glf+reg_on_H_mod_pool_Glf*reg__f_H_reg);
    pool_Glf__m_goal = pool_Glf__m_target*pool_Glf__R_reg;
    pool_Glf__r_rel = (pool_Glf__m_goal-pool_Glf__m)/tau_mod_pool_Glf;
    pool_Glf__r_up = (pool_Glf__r_rel+abs(pool_Glf__r_rel))/2.0{dimensionless};
    pool_Glf__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_Glf+cytosol__C_ATP)*(K_m_ATP_mod_pool_Glf+ATP_ref_mod_pool_Glf)/ATP_ref_mod_pool_Glf;
    pool_Glf__f_build = (pool_Glf__f_ATP+1.0{dimensionless}-abs(pool_Glf__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_Glf__m_kept = (pool_Glf__m+pool_Glf__m_goal-abs(pool_Glf__m-pool_Glf__m_goal))/2.0{dimensionless};
    pool_Glf__r_deg = k_deg_mod_pool_Glf*pool_Glf__m*pool_Glf__f_build;
    pool_Glf__r_down = -k_deg_mod_pool_Glf*pool_Glf__f_build*((pool_Glf__m-pool_Glf__m_goal+abs(pool_Glf__m-pool_Glf__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_Glf__m_kept);
    pool_Glf__r_rep = pool_Glf__r_deg+pool_Glf__r_down;
    pool_Glf__J_keep = n_0_mod_pool_Glf*L_mod_pool_Glf*((c_poly_mod_pool_Glf+c_recycle_mod_pool_Glf)*pool_Glf__r_rep+c_deg_mod_pool_Glf*pool_Glf__r_deg)/N_A_mod_pool_Glf;
    pool_Glf__J_demand = pool_Glf__r_up*n_0_mod_pool_Glf*L_mod_pool_Glf*(c_syn_mod_pool_Glf+c_poly_mod_pool_Glf)/N_A_mod_pool_Glf;
    pool_Glf__r_build = pool_Glf__r_up*protein__s_build*pool_Glf__f_build;
    pool_Glf__Q_prot_demand = n_0_mod_pool_Glf*L_mod_pool_Glf*(pool_Glf__m-pool_Glf__m_goal+abs(pool_Glf__m-pool_Glf__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Glf;
    pool_Glf__r_prot = (pool_Glf__m-pool_Glf__m_goal+abs(pool_Glf__m-pool_Glf__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Glf*protein__s_prot*pool_Glf__f_build;
    pool_Glf__J_prot = c_deg_mod_pool_Glf*n_0_mod_pool_Glf*L_mod_pool_Glf*pool_Glf__r_prot/N_A_mod_pool_Glf;
    pool_Glf__Q_aa_rel = n_0_mod_pool_Glf*L_mod_pool_Glf*(pool_Glf__r_prot-pool_Glf__r_down);
    pool_Glf__Q_aa_use = n_0_mod_pool_Glf*L_mod_pool_Glf*protein__phi_aa*pool_Glf__r_build;
    pool_Glf__J_saved = (c_syn_mod_pool_Glf-c_recycle_mod_pool_Glf)*pool_Glf__Q_aa_use/N_A_mod_pool_Glf;
    pool_Glf__J_build = pool_Glf__r_build*n_0_mod_pool_Glf*L_mod_pool_Glf*(c_syn_mod_pool_Glf+c_poly_mod_pool_Glf)/N_A_mod_pool_Glf-pool_Glf__J_saved;
    pool_Glf__J_ATP = pool_Glf__J_keep+pool_Glf__J_build+pool_Glf__J_prot;
    pool_Glf__M_build = pool_Glf__n*L_mod_pool_Glf*(c_syn_mod_pool_Glf+c_poly_mod_pool_Glf)/N_A_mod_pool_Glf;
    pool_Glf__a_unit = n_0_mod_pool_Glf*footprint_mod_pool_Glf*1e-6{um2_per_nm2};
    pool_Glf__A_protein = pool_Glf__a_unit*pool_Glf__m;
    pool_Glf__share = pool_Glf__A_protein/protein__A_protein_max;
    pool_Glf__s_unit = pool_Glf__a_unit/protein__A_protein_max;
    ode(pool_Glf__m, t) = pool_Glf__r_build+pool_Glf__r_down-pool_Glf__r_prot;
    pool_LacT__m_target = s_target_mod_pool_LacT*protein__A_protein_max/pool_LacT__a_unit;
    pool_LacT__n = n_0_mod_pool_LacT*pool_LacT__m;
    pool_LacT__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_LacT+reg_on_ATP_mod_pool_LacT*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_LacT+reg_on_G6P_mod_pool_LacT*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_LacT+reg_on_glc_mod_pool_LacT*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_LacT+reg_on_H_mod_pool_LacT*reg__f_H_reg);
    pool_LacT__m_goal = pool_LacT__m_target*pool_LacT__R_reg;
    pool_LacT__r_rel = (pool_LacT__m_goal-pool_LacT__m)/tau_mod_pool_LacT;
    pool_LacT__r_up = (pool_LacT__r_rel+abs(pool_LacT__r_rel))/2.0{dimensionless};
    pool_LacT__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_LacT+cytosol__C_ATP)*(K_m_ATP_mod_pool_LacT+ATP_ref_mod_pool_LacT)/ATP_ref_mod_pool_LacT;
    pool_LacT__f_build = (pool_LacT__f_ATP+1.0{dimensionless}-abs(pool_LacT__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_LacT__m_kept = (pool_LacT__m+pool_LacT__m_goal-abs(pool_LacT__m-pool_LacT__m_goal))/2.0{dimensionless};
    pool_LacT__r_deg = k_deg_mod_pool_LacT*pool_LacT__m*pool_LacT__f_build;
    pool_LacT__r_down = -k_deg_mod_pool_LacT*pool_LacT__f_build*((pool_LacT__m-pool_LacT__m_goal+abs(pool_LacT__m-pool_LacT__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_LacT__m_kept);
    pool_LacT__r_rep = pool_LacT__r_deg+pool_LacT__r_down;
    pool_LacT__J_keep = n_0_mod_pool_LacT*L_mod_pool_LacT*((c_poly_mod_pool_LacT+c_recycle_mod_pool_LacT)*pool_LacT__r_rep+c_deg_mod_pool_LacT*pool_LacT__r_deg)/N_A_mod_pool_LacT;
    pool_LacT__J_demand = pool_LacT__r_up*n_0_mod_pool_LacT*L_mod_pool_LacT*(c_syn_mod_pool_LacT+c_poly_mod_pool_LacT)/N_A_mod_pool_LacT;
    pool_LacT__r_build = pool_LacT__r_up*protein__s_build*pool_LacT__f_build;
    pool_LacT__Q_prot_demand = n_0_mod_pool_LacT*L_mod_pool_LacT*(pool_LacT__m-pool_LacT__m_goal+abs(pool_LacT__m-pool_LacT__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_LacT;
    pool_LacT__r_prot = (pool_LacT__m-pool_LacT__m_goal+abs(pool_LacT__m-pool_LacT__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_LacT*protein__s_prot*pool_LacT__f_build;
    pool_LacT__J_prot = c_deg_mod_pool_LacT*n_0_mod_pool_LacT*L_mod_pool_LacT*pool_LacT__r_prot/N_A_mod_pool_LacT;
    pool_LacT__Q_aa_rel = n_0_mod_pool_LacT*L_mod_pool_LacT*(pool_LacT__r_prot-pool_LacT__r_down);
    pool_LacT__Q_aa_use = n_0_mod_pool_LacT*L_mod_pool_LacT*protein__phi_aa*pool_LacT__r_build;
    pool_LacT__J_saved = (c_syn_mod_pool_LacT-c_recycle_mod_pool_LacT)*pool_LacT__Q_aa_use/N_A_mod_pool_LacT;
    pool_LacT__J_build = pool_LacT__r_build*n_0_mod_pool_LacT*L_mod_pool_LacT*(c_syn_mod_pool_LacT+c_poly_mod_pool_LacT)/N_A_mod_pool_LacT-pool_LacT__J_saved;
    pool_LacT__J_ATP = pool_LacT__J_keep+pool_LacT__J_build+pool_LacT__J_prot;
    pool_LacT__M_build = pool_LacT__n*L_mod_pool_LacT*(c_syn_mod_pool_LacT+c_poly_mod_pool_LacT)/N_A_mod_pool_LacT;
    pool_LacT__a_unit = n_0_mod_pool_LacT*footprint_mod_pool_LacT*1e-6{um2_per_nm2};
    pool_LacT__A_protein = pool_LacT__a_unit*pool_LacT__m;
    pool_LacT__share = pool_LacT__A_protein/protein__A_protein_max;
    pool_LacT__s_unit = pool_LacT__a_unit/protein__A_protein_max;
    ode(pool_LacT__m, t) = pool_LacT__r_build+pool_LacT__r_down-pool_LacT__r_prot;
    pool_Flagellum__n = n_0_mod_pool_Flagellum*pool_Flagellum__m;
    pool_Flagellum__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_Flagellum+reg_on_ATP_mod_pool_Flagellum*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_Flagellum+reg_on_G6P_mod_pool_Flagellum*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_Flagellum+reg_on_glc_mod_pool_Flagellum*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_Flagellum+reg_on_H_mod_pool_Flagellum*reg__f_H_reg);
    pool_Flagellum__m_goal = m_target_mod_pool_Flagellum*pool_Flagellum__R_reg;
    pool_Flagellum__r_rel = (pool_Flagellum__m_goal-pool_Flagellum__m)/tau_mod_pool_Flagellum;
    pool_Flagellum__r_up = (pool_Flagellum__r_rel+abs(pool_Flagellum__r_rel))/2.0{dimensionless};
    pool_Flagellum__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_Flagellum+cytosol__C_ATP)*(K_m_ATP_mod_pool_Flagellum+ATP_ref_mod_pool_Flagellum)/ATP_ref_mod_pool_Flagellum;
    pool_Flagellum__f_build = (pool_Flagellum__f_ATP+1.0{dimensionless}-abs(pool_Flagellum__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_Flagellum__m_kept = (pool_Flagellum__m+pool_Flagellum__m_goal-abs(pool_Flagellum__m-pool_Flagellum__m_goal))/2.0{dimensionless};
    pool_Flagellum__r_deg = k_deg_mod_pool_Flagellum*pool_Flagellum__m*pool_Flagellum__f_build;
    pool_Flagellum__r_down = -k_deg_mod_pool_Flagellum*pool_Flagellum__f_build*((pool_Flagellum__m-pool_Flagellum__m_goal+abs(pool_Flagellum__m-pool_Flagellum__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_Flagellum__m_kept);
    pool_Flagellum__r_rep = pool_Flagellum__r_deg+pool_Flagellum__r_down;
    pool_Flagellum__J_keep = n_0_mod_pool_Flagellum*L_mod_pool_Flagellum*((c_poly_mod_pool_Flagellum+c_recycle_mod_pool_Flagellum)*pool_Flagellum__r_rep+c_deg_mod_pool_Flagellum*pool_Flagellum__r_deg)/N_A_mod_pool_Flagellum;
    pool_Flagellum__J_demand = pool_Flagellum__r_up*n_0_mod_pool_Flagellum*L_mod_pool_Flagellum*(c_syn_mod_pool_Flagellum+c_poly_mod_pool_Flagellum)/N_A_mod_pool_Flagellum;
    pool_Flagellum__r_build = pool_Flagellum__r_up*protein__s_build*pool_Flagellum__f_build;
    pool_Flagellum__Q_prot_demand = n_0_mod_pool_Flagellum*L_mod_pool_Flagellum*(pool_Flagellum__m-pool_Flagellum__m_goal+abs(pool_Flagellum__m-pool_Flagellum__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Flagellum;
    pool_Flagellum__r_prot = (pool_Flagellum__m-pool_Flagellum__m_goal+abs(pool_Flagellum__m-pool_Flagellum__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Flagellum*protein__s_prot*pool_Flagellum__f_build;
    pool_Flagellum__J_prot = c_deg_mod_pool_Flagellum*n_0_mod_pool_Flagellum*L_mod_pool_Flagellum*pool_Flagellum__r_prot/N_A_mod_pool_Flagellum;
    pool_Flagellum__Q_aa_rel = n_0_mod_pool_Flagellum*L_mod_pool_Flagellum*(pool_Flagellum__r_prot-pool_Flagellum__r_down);
    pool_Flagellum__Q_aa_use = n_0_mod_pool_Flagellum*L_mod_pool_Flagellum*protein__phi_aa*pool_Flagellum__r_build;
    pool_Flagellum__J_saved = (c_syn_mod_pool_Flagellum-c_recycle_mod_pool_Flagellum)*pool_Flagellum__Q_aa_use/N_A_mod_pool_Flagellum;
    pool_Flagellum__J_build = pool_Flagellum__r_build*n_0_mod_pool_Flagellum*L_mod_pool_Flagellum*(c_syn_mod_pool_Flagellum+c_poly_mod_pool_Flagellum)/N_A_mod_pool_Flagellum-pool_Flagellum__J_saved;
    pool_Flagellum__J_ATP = pool_Flagellum__J_keep+pool_Flagellum__J_build+pool_Flagellum__J_prot;
    pool_Flagellum__M_build = pool_Flagellum__n*L_mod_pool_Flagellum*(c_syn_mod_pool_Flagellum+c_poly_mod_pool_Flagellum)/N_A_mod_pool_Flagellum;
    pool_Flagellum__a_unit = n_0_mod_pool_Flagellum*footprint_mod_pool_Flagellum*1e-6{um2_per_nm2};
    pool_Flagellum__A_protein = pool_Flagellum__a_unit*pool_Flagellum__m;
    pool_Flagellum__share = pool_Flagellum__A_protein/protein__A_protein_max;
    pool_Flagellum__s_unit = pool_Flagellum__a_unit/protein__A_protein_max;
    ode(pool_Flagellum__m, t) = pool_Flagellum__r_build+pool_Flagellum__r_down-pool_Flagellum__r_prot;
    pool_Hydrolase__m_target = s_target_mod_pool_Hydrolase*protein__A_protein_max/pool_Hydrolase__a_unit;
    pool_Hydrolase__n = n_0_mod_pool_Hydrolase*pool_Hydrolase__m;
    pool_Hydrolase__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_Hydrolase+reg_on_ATP_mod_pool_Hydrolase*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_Hydrolase+reg_on_G6P_mod_pool_Hydrolase*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_Hydrolase+reg_on_glc_mod_pool_Hydrolase*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_Hydrolase+reg_on_H_mod_pool_Hydrolase*reg__f_H_reg);
    pool_Hydrolase__m_goal = pool_Hydrolase__m_target*pool_Hydrolase__R_reg;
    pool_Hydrolase__r_rel = (pool_Hydrolase__m_goal-pool_Hydrolase__m)/tau_mod_pool_Hydrolase;
    pool_Hydrolase__r_up = (pool_Hydrolase__r_rel+abs(pool_Hydrolase__r_rel))/2.0{dimensionless};
    pool_Hydrolase__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_Hydrolase+cytosol__C_ATP)*(K_m_ATP_mod_pool_Hydrolase+ATP_ref_mod_pool_Hydrolase)/ATP_ref_mod_pool_Hydrolase;
    pool_Hydrolase__f_build = (pool_Hydrolase__f_ATP+1.0{dimensionless}-abs(pool_Hydrolase__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_Hydrolase__m_kept = (pool_Hydrolase__m+pool_Hydrolase__m_goal-abs(pool_Hydrolase__m-pool_Hydrolase__m_goal))/2.0{dimensionless};
    pool_Hydrolase__r_deg = k_deg_mod_pool_Hydrolase*pool_Hydrolase__m*pool_Hydrolase__f_build;
    pool_Hydrolase__r_down = -k_deg_mod_pool_Hydrolase*pool_Hydrolase__f_build*((pool_Hydrolase__m-pool_Hydrolase__m_goal+abs(pool_Hydrolase__m-pool_Hydrolase__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_Hydrolase__m_kept);
    pool_Hydrolase__r_rep = pool_Hydrolase__r_deg+pool_Hydrolase__r_down;
    pool_Hydrolase__J_keep = n_0_mod_pool_Hydrolase*L_mod_pool_Hydrolase*((c_poly_mod_pool_Hydrolase+c_recycle_mod_pool_Hydrolase)*pool_Hydrolase__r_rep+c_deg_mod_pool_Hydrolase*pool_Hydrolase__r_deg)/N_A_mod_pool_Hydrolase;
    pool_Hydrolase__J_demand = pool_Hydrolase__r_up*n_0_mod_pool_Hydrolase*L_mod_pool_Hydrolase*(c_syn_mod_pool_Hydrolase+c_poly_mod_pool_Hydrolase)/N_A_mod_pool_Hydrolase;
    pool_Hydrolase__r_build = pool_Hydrolase__r_up*protein__s_build*pool_Hydrolase__f_build;
    pool_Hydrolase__Q_prot_demand = n_0_mod_pool_Hydrolase*L_mod_pool_Hydrolase*(pool_Hydrolase__m-pool_Hydrolase__m_goal+abs(pool_Hydrolase__m-pool_Hydrolase__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Hydrolase;
    pool_Hydrolase__r_prot = (pool_Hydrolase__m-pool_Hydrolase__m_goal+abs(pool_Hydrolase__m-pool_Hydrolase__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_Hydrolase*protein__s_prot*pool_Hydrolase__f_build;
    pool_Hydrolase__J_prot = c_deg_mod_pool_Hydrolase*n_0_mod_pool_Hydrolase*L_mod_pool_Hydrolase*pool_Hydrolase__r_prot/N_A_mod_pool_Hydrolase;
    pool_Hydrolase__Q_aa_rel = n_0_mod_pool_Hydrolase*L_mod_pool_Hydrolase*(pool_Hydrolase__r_prot-pool_Hydrolase__r_down);
    pool_Hydrolase__Q_aa_use = n_0_mod_pool_Hydrolase*L_mod_pool_Hydrolase*protein__phi_aa*pool_Hydrolase__r_build;
    pool_Hydrolase__J_saved = (c_syn_mod_pool_Hydrolase-c_recycle_mod_pool_Hydrolase)*pool_Hydrolase__Q_aa_use/N_A_mod_pool_Hydrolase;
    pool_Hydrolase__J_build = pool_Hydrolase__r_build*n_0_mod_pool_Hydrolase*L_mod_pool_Hydrolase*(c_syn_mod_pool_Hydrolase+c_poly_mod_pool_Hydrolase)/N_A_mod_pool_Hydrolase-pool_Hydrolase__J_saved;
    pool_Hydrolase__J_ATP = pool_Hydrolase__J_keep+pool_Hydrolase__J_build+pool_Hydrolase__J_prot;
    pool_Hydrolase__M_build = pool_Hydrolase__n*L_mod_pool_Hydrolase*(c_syn_mod_pool_Hydrolase+c_poly_mod_pool_Hydrolase)/N_A_mod_pool_Hydrolase;
    pool_Hydrolase__a_unit = n_0_mod_pool_Hydrolase*footprint_mod_pool_Hydrolase*1e-6{um2_per_nm2};
    pool_Hydrolase__A_protein = pool_Hydrolase__a_unit*pool_Hydrolase__m;
    pool_Hydrolase__share = pool_Hydrolase__A_protein/protein__A_protein_max;
    pool_Hydrolase__s_unit = pool_Hydrolase__a_unit/protein__A_protein_max;
    ode(pool_Hydrolase__m, t) = pool_Hydrolase__r_build+pool_Hydrolase__r_down-pool_Hydrolase__r_prot;
    pool_PTS__m_target = s_target_mod_pool_PTS*protein__A_protein_max/pool_PTS__a_unit;
    pool_PTS__n = n_0_mod_pool_PTS*pool_PTS__m;
    pool_PTS__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_PTS+reg_on_ATP_mod_pool_PTS*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_PTS+reg_on_G6P_mod_pool_PTS*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_PTS+reg_on_glc_mod_pool_PTS*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_PTS+reg_on_H_mod_pool_PTS*reg__f_H_reg);
    pool_PTS__m_goal = pool_PTS__m_target*pool_PTS__R_reg;
    pool_PTS__r_rel = (pool_PTS__m_goal-pool_PTS__m)/tau_mod_pool_PTS;
    pool_PTS__r_up = (pool_PTS__r_rel+abs(pool_PTS__r_rel))/2.0{dimensionless};
    pool_PTS__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_PTS+cytosol__C_ATP)*(K_m_ATP_mod_pool_PTS+ATP_ref_mod_pool_PTS)/ATP_ref_mod_pool_PTS;
    pool_PTS__f_build = (pool_PTS__f_ATP+1.0{dimensionless}-abs(pool_PTS__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_PTS__m_kept = (pool_PTS__m+pool_PTS__m_goal-abs(pool_PTS__m-pool_PTS__m_goal))/2.0{dimensionless};
    pool_PTS__r_deg = k_deg_mod_pool_PTS*pool_PTS__m*pool_PTS__f_build;
    pool_PTS__r_down = -k_deg_mod_pool_PTS*pool_PTS__f_build*((pool_PTS__m-pool_PTS__m_goal+abs(pool_PTS__m-pool_PTS__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_PTS__m_kept);
    pool_PTS__r_rep = pool_PTS__r_deg+pool_PTS__r_down;
    pool_PTS__J_keep = n_0_mod_pool_PTS*L_mod_pool_PTS*((c_poly_mod_pool_PTS+c_recycle_mod_pool_PTS)*pool_PTS__r_rep+c_deg_mod_pool_PTS*pool_PTS__r_deg)/N_A_mod_pool_PTS;
    pool_PTS__J_demand = pool_PTS__r_up*n_0_mod_pool_PTS*L_mod_pool_PTS*(c_syn_mod_pool_PTS+c_poly_mod_pool_PTS)/N_A_mod_pool_PTS;
    pool_PTS__r_build = pool_PTS__r_up*protein__s_build*pool_PTS__f_build;
    pool_PTS__Q_prot_demand = n_0_mod_pool_PTS*L_mod_pool_PTS*(pool_PTS__m-pool_PTS__m_goal+abs(pool_PTS__m-pool_PTS__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_PTS;
    pool_PTS__r_prot = (pool_PTS__m-pool_PTS__m_goal+abs(pool_PTS__m-pool_PTS__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_PTS*protein__s_prot*pool_PTS__f_build;
    pool_PTS__J_prot = c_deg_mod_pool_PTS*n_0_mod_pool_PTS*L_mod_pool_PTS*pool_PTS__r_prot/N_A_mod_pool_PTS;
    pool_PTS__Q_aa_rel = n_0_mod_pool_PTS*L_mod_pool_PTS*(pool_PTS__r_prot-pool_PTS__r_down);
    pool_PTS__Q_aa_use = n_0_mod_pool_PTS*L_mod_pool_PTS*protein__phi_aa*pool_PTS__r_build;
    pool_PTS__J_saved = (c_syn_mod_pool_PTS-c_recycle_mod_pool_PTS)*pool_PTS__Q_aa_use/N_A_mod_pool_PTS;
    pool_PTS__J_build = pool_PTS__r_build*n_0_mod_pool_PTS*L_mod_pool_PTS*(c_syn_mod_pool_PTS+c_poly_mod_pool_PTS)/N_A_mod_pool_PTS-pool_PTS__J_saved;
    pool_PTS__J_ATP = pool_PTS__J_keep+pool_PTS__J_build+pool_PTS__J_prot;
    pool_PTS__M_build = pool_PTS__n*L_mod_pool_PTS*(c_syn_mod_pool_PTS+c_poly_mod_pool_PTS)/N_A_mod_pool_PTS;
    pool_PTS__a_unit = n_0_mod_pool_PTS*footprint_mod_pool_PTS*1e-6{um2_per_nm2};
    pool_PTS__A_protein = pool_PTS__a_unit*pool_PTS__m;
    pool_PTS__share = pool_PTS__A_protein/protein__A_protein_max;
    pool_PTS__s_unit = pool_PTS__a_unit/protein__A_protein_max;
    ode(pool_PTS__m, t) = pool_PTS__r_build+pool_PTS__r_down-pool_PTS__r_prot;
    pool_ABC__m_target = s_target_mod_pool_ABC*protein__A_protein_max/pool_ABC__a_unit;
    pool_ABC__n = n_0_mod_pool_ABC*pool_ABC__m;
    pool_ABC__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_ABC+reg_on_ATP_mod_pool_ABC*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_ABC+reg_on_G6P_mod_pool_ABC*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_ABC+reg_on_glc_mod_pool_ABC*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_ABC+reg_on_H_mod_pool_ABC*reg__f_H_reg);
    pool_ABC__m_goal = pool_ABC__m_target*pool_ABC__R_reg;
    pool_ABC__r_rel = (pool_ABC__m_goal-pool_ABC__m)/tau_mod_pool_ABC;
    pool_ABC__r_up = (pool_ABC__r_rel+abs(pool_ABC__r_rel))/2.0{dimensionless};
    pool_ABC__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_ABC+cytosol__C_ATP)*(K_m_ATP_mod_pool_ABC+ATP_ref_mod_pool_ABC)/ATP_ref_mod_pool_ABC;
    pool_ABC__f_build = (pool_ABC__f_ATP+1.0{dimensionless}-abs(pool_ABC__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_ABC__m_kept = (pool_ABC__m+pool_ABC__m_goal-abs(pool_ABC__m-pool_ABC__m_goal))/2.0{dimensionless};
    pool_ABC__r_deg = k_deg_mod_pool_ABC*pool_ABC__m*pool_ABC__f_build;
    pool_ABC__r_down = -k_deg_mod_pool_ABC*pool_ABC__f_build*((pool_ABC__m-pool_ABC__m_goal+abs(pool_ABC__m-pool_ABC__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_ABC__m_kept);
    pool_ABC__r_rep = pool_ABC__r_deg+pool_ABC__r_down;
    pool_ABC__J_keep = n_0_mod_pool_ABC*L_mod_pool_ABC*((c_poly_mod_pool_ABC+c_recycle_mod_pool_ABC)*pool_ABC__r_rep+c_deg_mod_pool_ABC*pool_ABC__r_deg)/N_A_mod_pool_ABC;
    pool_ABC__J_demand = pool_ABC__r_up*n_0_mod_pool_ABC*L_mod_pool_ABC*(c_syn_mod_pool_ABC+c_poly_mod_pool_ABC)/N_A_mod_pool_ABC;
    pool_ABC__r_build = pool_ABC__r_up*protein__s_build*pool_ABC__f_build;
    pool_ABC__Q_prot_demand = n_0_mod_pool_ABC*L_mod_pool_ABC*(pool_ABC__m-pool_ABC__m_goal+abs(pool_ABC__m-pool_ABC__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_ABC;
    pool_ABC__r_prot = (pool_ABC__m-pool_ABC__m_goal+abs(pool_ABC__m-pool_ABC__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_ABC*protein__s_prot*pool_ABC__f_build;
    pool_ABC__J_prot = c_deg_mod_pool_ABC*n_0_mod_pool_ABC*L_mod_pool_ABC*pool_ABC__r_prot/N_A_mod_pool_ABC;
    pool_ABC__Q_aa_rel = n_0_mod_pool_ABC*L_mod_pool_ABC*(pool_ABC__r_prot-pool_ABC__r_down);
    pool_ABC__Q_aa_use = n_0_mod_pool_ABC*L_mod_pool_ABC*protein__phi_aa*pool_ABC__r_build;
    pool_ABC__J_saved = (c_syn_mod_pool_ABC-c_recycle_mod_pool_ABC)*pool_ABC__Q_aa_use/N_A_mod_pool_ABC;
    pool_ABC__J_build = pool_ABC__r_build*n_0_mod_pool_ABC*L_mod_pool_ABC*(c_syn_mod_pool_ABC+c_poly_mod_pool_ABC)/N_A_mod_pool_ABC-pool_ABC__J_saved;
    pool_ABC__J_ATP = pool_ABC__J_keep+pool_ABC__J_build+pool_ABC__J_prot;
    pool_ABC__M_build = pool_ABC__n*L_mod_pool_ABC*(c_syn_mod_pool_ABC+c_poly_mod_pool_ABC)/N_A_mod_pool_ABC;
    pool_ABC__a_unit = n_0_mod_pool_ABC*footprint_mod_pool_ABC*1e-6{um2_per_nm2};
    pool_ABC__A_protein = pool_ABC__a_unit*pool_ABC__m;
    pool_ABC__share = pool_ABC__A_protein/protein__A_protein_max;
    pool_ABC__s_unit = pool_ABC__a_unit/protein__A_protein_max;
    ode(pool_ABC__m, t) = pool_ABC__r_build+pool_ABC__r_down-pool_ABC__r_prot;
    pool_GalP__m_target = s_target_mod_pool_GalP*protein__A_protein_max/pool_GalP__a_unit;
    pool_GalP__n = n_0_mod_pool_GalP*pool_GalP__m;
    pool_GalP__R_reg = (1.0{dimensionless}-reg_on_ATP_mod_pool_GalP+reg_on_ATP_mod_pool_GalP*reg__f_ATP_reg)*(1.0{dimensionless}-reg_on_G6P_mod_pool_GalP+reg_on_G6P_mod_pool_GalP*reg__f_G6P_reg)*(1.0{dimensionless}-reg_on_glc_mod_pool_GalP+reg_on_glc_mod_pool_GalP*reg__f_glc_reg)*(1.0{dimensionless}-reg_on_H_mod_pool_GalP+reg_on_H_mod_pool_GalP*reg__f_H_reg);
    pool_GalP__m_goal = pool_GalP__m_target*pool_GalP__R_reg;
    pool_GalP__r_rel = (pool_GalP__m_goal-pool_GalP__m)/tau_mod_pool_GalP;
    pool_GalP__r_up = (pool_GalP__r_rel+abs(pool_GalP__r_rel))/2.0{dimensionless};
    pool_GalP__f_ATP = cytosol__C_ATP/(K_m_ATP_mod_pool_GalP+cytosol__C_ATP)*(K_m_ATP_mod_pool_GalP+ATP_ref_mod_pool_GalP)/ATP_ref_mod_pool_GalP;
    pool_GalP__f_build = (pool_GalP__f_ATP+1.0{dimensionless}-abs(pool_GalP__f_ATP-1.0{dimensionless}))/2.0{dimensionless};
    pool_GalP__m_kept = (pool_GalP__m+pool_GalP__m_goal-abs(pool_GalP__m-pool_GalP__m_goal))/2.0{dimensionless};
    pool_GalP__r_deg = k_deg_mod_pool_GalP*pool_GalP__m*pool_GalP__f_build;
    pool_GalP__r_down = -k_deg_mod_pool_GalP*pool_GalP__f_build*((pool_GalP__m-pool_GalP__m_goal+abs(pool_GalP__m-pool_GalP__m_goal))/2.0{dimensionless}+(1.0{dimensionless}-protein__R_reg)*pool_GalP__m_kept);
    pool_GalP__r_rep = pool_GalP__r_deg+pool_GalP__r_down;
    pool_GalP__J_keep = n_0_mod_pool_GalP*L_mod_pool_GalP*((c_poly_mod_pool_GalP+c_recycle_mod_pool_GalP)*pool_GalP__r_rep+c_deg_mod_pool_GalP*pool_GalP__r_deg)/N_A_mod_pool_GalP;
    pool_GalP__J_demand = pool_GalP__r_up*n_0_mod_pool_GalP*L_mod_pool_GalP*(c_syn_mod_pool_GalP+c_poly_mod_pool_GalP)/N_A_mod_pool_GalP;
    pool_GalP__r_build = pool_GalP__r_up*protein__s_build*pool_GalP__f_build;
    pool_GalP__Q_prot_demand = n_0_mod_pool_GalP*L_mod_pool_GalP*(pool_GalP__m-pool_GalP__m_goal+abs(pool_GalP__m-pool_GalP__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_GalP;
    pool_GalP__r_prot = (pool_GalP__m-pool_GalP__m_goal+abs(pool_GalP__m-pool_GalP__m_goal))/2.0{dimensionless}/tau_prot_mod_pool_GalP*protein__s_prot*pool_GalP__f_build;
    pool_GalP__J_prot = c_deg_mod_pool_GalP*n_0_mod_pool_GalP*L_mod_pool_GalP*pool_GalP__r_prot/N_A_mod_pool_GalP;
    pool_GalP__Q_aa_rel = n_0_mod_pool_GalP*L_mod_pool_GalP*(pool_GalP__r_prot-pool_GalP__r_down);
    pool_GalP__Q_aa_use = n_0_mod_pool_GalP*L_mod_pool_GalP*protein__phi_aa*pool_GalP__r_build;
    pool_GalP__J_saved = (c_syn_mod_pool_GalP-c_recycle_mod_pool_GalP)*pool_GalP__Q_aa_use/N_A_mod_pool_GalP;
    pool_GalP__J_build = pool_GalP__r_build*n_0_mod_pool_GalP*L_mod_pool_GalP*(c_syn_mod_pool_GalP+c_poly_mod_pool_GalP)/N_A_mod_pool_GalP-pool_GalP__J_saved;
    pool_GalP__J_ATP = pool_GalP__J_keep+pool_GalP__J_build+pool_GalP__J_prot;
    pool_GalP__M_build = pool_GalP__n*L_mod_pool_GalP*(c_syn_mod_pool_GalP+c_poly_mod_pool_GalP)/N_A_mod_pool_GalP;
    pool_GalP__a_unit = n_0_mod_pool_GalP*footprint_mod_pool_GalP*1e-6{um2_per_nm2};
    pool_GalP__A_protein = pool_GalP__a_unit*pool_GalP__m;
    pool_GalP__share = pool_GalP__A_protein/protein__A_protein_max;
    pool_GalP__s_unit = pool_GalP__a_unit/protein__A_protein_max;
    ode(pool_GalP__m, t) = pool_GalP__r_build+pool_GalP__r_down-pool_GalP__r_prot;
    multiport_sum_mod_membrane_i_ion__i_ion = i_leak_Na__i_leak_Na+i_leak_Ca__i_leak_Ca+i_leak_H__i_leak_H+i_H_ATPase__i_H_ATPase+i_NaH__i_NaH+i_K_Trk__i_leak_K+i_NaCa__i_NaCa+i_flagellum__i_flag+glc_GalP__i_glc_H;
    multiport_sum_mod_Na_K_j_Na_total__j_Na_total = i_leak_Na__j_leak_Na+i_NaH__j_NaH_Na+i_NaCa__j_NaCa_Na;
    multiport_sum_mod_Na_K_j_K_total__j_K_total = i_K_Trk__j_leak_K+i_KH__j_KH_K;
    multiport_sum_mod_Ca_j_Ca_in__j_Ca_in = i_leak_Ca__j_leak_Ca+i_NaCa__j_NaCa_Ca;
    multiport_sum_mod_H_j_H_in__j_H_in = i_leak_H__j_leak_H+i_H_ATPase__j_H_ATPase+i_NaH__j_NaH_H+i_KH__j_KH_H+i_flagellum__j_H_flag+glc_GalP__j_H+membrane_face__J_H_lac;
    multiport_sum_mod_H_j_H_prod__j_H_prod = cytosol__j_H_met;
    multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext = protein__j_ATP_prot+bio__j_ATP_bio+i_H_ATPase__j_ATP_H+glc_PTS__j_ATP+glc_ABC__j_ATP;
    multiport_sum_mod_cytosol_j_ADP_ext__j_ADP_ext = protein__j_ADP_prot+bio__j_ADP_bio+i_H_ATPase__j_ADP_H+glc_PTS__j_ADP+glc_ABC__j_ADP;
    multiport_sum_mod_cytosol_j_Pi_ext__j_Pi_ext = protein__j_Pi_prot+bio__j_Pi_bio+i_H_ATPase__j_Pi_H+glc_PTS__j_Pi+glc_ABC__j_Pi;
    multiport_sum_mod_protein_J_demand_in__J_demand_in = pool_proteome__J_demand+pool_Glyc__J_demand+pool_H_ATPase__J_demand+pool_NhaA__J_demand+pool_KefC__J_demand+pool_Trk__J_demand+pool_NCX__J_demand+pool_Glf__J_demand+pool_LacT__J_demand+pool_Flagellum__J_demand+pool_Hydrolase__J_demand+pool_PTS__J_demand+pool_ABC__J_demand+pool_GalP__J_demand;
    multiport_sum_mod_protein_J_ATP_in__J_ATP_in = pool_proteome__J_ATP+pool_Glyc__J_ATP+pool_H_ATPase__J_ATP+pool_NhaA__J_ATP+pool_KefC__J_ATP+pool_Trk__J_ATP+pool_NCX__J_ATP+pool_Glf__J_ATP+pool_LacT__J_ATP+pool_Flagellum__J_ATP+pool_Hydrolase__J_ATP+pool_PTS__J_ATP+pool_ABC__J_ATP+pool_GalP__J_ATP;
    multiport_sum_mod_protein_J_keep_in__J_keep_in = pool_proteome__J_keep+pool_Glyc__J_keep+pool_H_ATPase__J_keep+pool_NhaA__J_keep+pool_KefC__J_keep+pool_Trk__J_keep+pool_NCX__J_keep+pool_Glf__J_keep+pool_LacT__J_keep+pool_Flagellum__J_keep+pool_Hydrolase__J_keep+pool_PTS__J_keep+pool_ABC__J_keep+pool_GalP__J_keep;
    multiport_sum_mod_protein_J_build_in__J_build_in = pool_proteome__J_build+pool_Glyc__J_build+pool_H_ATPase__J_build+pool_NhaA__J_build+pool_KefC__J_build+pool_Trk__J_build+pool_NCX__J_build+pool_Glf__J_build+pool_LacT__J_build+pool_Flagellum__J_build+pool_Hydrolase__J_build+pool_PTS__J_build+pool_ABC__J_build+pool_GalP__J_build;
    multiport_sum_mod_protein_M_build_in__M_build_in = pool_proteome__M_build+pool_Glyc__M_build+pool_H_ATPase__M_build+pool_NhaA__M_build+pool_KefC__M_build+pool_Trk__M_build+pool_NCX__M_build+pool_Glf__M_build+pool_LacT__M_build+pool_Flagellum__M_build+pool_Hydrolase__M_build+pool_PTS__M_build+pool_ABC__M_build+pool_GalP__M_build;
    multiport_sum_mod_protein_A_protein_in__A_protein_in = pool_proteome__A_protein+pool_Glyc__A_protein+pool_H_ATPase__A_protein+pool_NhaA__A_protein+pool_KefC__A_protein+pool_Trk__A_protein+pool_NCX__A_protein+pool_Glf__A_protein+pool_LacT__A_protein+pool_Flagellum__A_protein+pool_Hydrolase__A_protein+pool_PTS__A_protein+pool_ABC__A_protein+pool_GalP__A_protein;
    multiport_sum_mod_protein_Q_prot_demand_in__Q_prot_demand_in = pool_proteome__Q_prot_demand+pool_Glyc__Q_prot_demand+pool_H_ATPase__Q_prot_demand+pool_NhaA__Q_prot_demand+pool_KefC__Q_prot_demand+pool_Trk__Q_prot_demand+pool_NCX__Q_prot_demand+pool_Glf__Q_prot_demand+pool_LacT__Q_prot_demand+pool_Flagellum__Q_prot_demand+pool_Hydrolase__Q_prot_demand+pool_PTS__Q_prot_demand+pool_ABC__Q_prot_demand+pool_GalP__Q_prot_demand;
    multiport_sum_mod_protein_Q_aa_rel_in__Q_aa_rel_in = pool_proteome__Q_aa_rel+pool_Glyc__Q_aa_rel+pool_H_ATPase__Q_aa_rel+pool_NhaA__Q_aa_rel+pool_KefC__Q_aa_rel+pool_Trk__Q_aa_rel+pool_NCX__Q_aa_rel+pool_Glf__Q_aa_rel+pool_LacT__Q_aa_rel+pool_Flagellum__Q_aa_rel+pool_Hydrolase__Q_aa_rel+pool_PTS__Q_aa_rel+pool_ABC__Q_aa_rel+pool_GalP__Q_aa_rel;
    multiport_sum_mod_protein_Q_aa_use_in__Q_aa_use_in = pool_proteome__Q_aa_use+pool_Glyc__Q_aa_use+pool_H_ATPase__Q_aa_use+pool_NhaA__Q_aa_use+pool_KefC__Q_aa_use+pool_Trk__Q_aa_use+pool_NCX__Q_aa_use+pool_Glf__Q_aa_use+pool_LacT__Q_aa_use+pool_Flagellum__Q_aa_use+pool_Hydrolase__Q_aa_use+pool_PTS__Q_aa_use+pool_ABC__Q_aa_use+pool_GalP__Q_aa_use;
    multiport_sum_mod_protein_J_prot_in__J_prot_in = pool_proteome__J_prot+pool_Glyc__J_prot+pool_H_ATPase__J_prot+pool_NhaA__J_prot+pool_KefC__J_prot+pool_Trk__J_prot+pool_NCX__J_prot+pool_Glf__J_prot+pool_LacT__J_prot+pool_Flagellum__J_prot+pool_Hydrolase__J_prot+pool_PTS__J_prot+pool_ABC__J_prot+pool_GalP__J_prot;
    multiport_sum_mod_protein_J_saved_in__J_saved_in = pool_proteome__J_saved+pool_Glyc__J_saved+pool_H_ATPase__J_saved+pool_NhaA__J_saved+pool_KefC__J_saved+pool_Trk__J_saved+pool_NCX__J_saved+pool_Glf__J_saved+pool_LacT__J_saved+pool_Flagellum__J_saved+pool_Hydrolase__J_saved+pool_PTS__J_saved+pool_ABC__J_saved+pool_GalP__J_saved;
    multiport_sum_mod_bio_M_build_in__M_build_in = pool_proteome__M_build+pool_Glyc__M_build+pool_H_ATPase__M_build+pool_NhaA__M_build+pool_KefC__M_build+pool_Trk__M_build+pool_NCX__M_build+pool_Glf__M_build+pool_LacT__M_build+pool_Flagellum__M_build+pool_Hydrolase__M_build+pool_PTS__M_build+pool_ABC__M_build+pool_GalP__M_build;
    multiport_sum_mod_cytosol_J_glc_in__J_glc_in = membrane_face__J_glc_c+glc_ABC__J_glc_c+glc_GalP__J_glc_c;
    multiport_sum_mod_cytosol_J_lac_in__J_lac_in = membrane_face__J_lac_c+glc_ABC__J_lac_c+glc_GalP__J_lac_c;
    multiport_sum_mod_cytosol_J_ATP_in__J_ATP_in = membrane_face__J_ATP_c+glc_ABC__J_ATP_c+glc_GalP__J_ATP_c;
    multiport_sum_mod_cytosol_J_ADP_in__J_ADP_in = membrane_face__J_ADP_c+glc_ABC__J_ADP_c+glc_GalP__J_ADP_c;
    multiport_sum_mod_cytosol_J_Pi_in__J_Pi_in = membrane_face__J_Pi_c+glc_ABC__J_Pi_c+glc_GalP__J_Pi_c;
    multiport_sum_mod_cytosol_j_G6P_ext__j_G6P_ext = glc_PTS__J_G6P;
    multiport_sum_mod_cytosol_J_glc_out__J_glc_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_lac_out__J_lac_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_ATP_out__J_ATP_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_ADP_out__J_ADP_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_Pi_out__J_Pi_out = 0{mol_per_s};
  enddef;
enddef;
