def model prokaryote_fermenter as
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit um2 as
    unit metre {expo: 2, pref: micro};
  enddef;
  def unit um3_per_m3 as
    unit metre {expo: 3, pref: micro};
    unit metre {expo: -3};
  enddef;
  def unit per_um2 as
    unit metre {expo: -2, pref: micro};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit um3_per_s as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3_per_um3 as
    unit metre {expo: 3};
    unit metre {expo: -3, pref: micro};
  enddef;
  def unit um as
    unit metre {pref: micro};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_per_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit microS_per_picoS as
    unit siemens {pref: micro};
    unit siemens {expo: -1, pref: pico};
  enddef;
  def unit picoS as
    unit siemens {pref: pico};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit nanoC as
    unit coulomb {pref: nano};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit microS_per_um2 as
    unit siemens {pref: micro};
    unit metre {expo: -2, pref: micro};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit um3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit uF_per_cm2 as
    unit farad {pref: micro};
    unit metre {expo: -2, pref: centi};
  enddef;
  def unit picoF_cm2_per_uF_um2 as
    unit farad {pref: pico};
    unit metre {expo: 2, pref: centi};
    unit farad {expo: -1, pref: micro};
    unit metre {expo: -2, pref: micro};
  enddef;
  def unit ohm_cm as
    unit ohm;
    unit metre {pref: centi};
  enddef;
  def unit megaOhm_um_per_ohm_cm as
    unit ohm {pref: mega};
    unit metre {pref: micro};
    unit ohm {expo: -1};
    unit metre {expo: -1, pref: centi};
  enddef;
  def unit millimol_per_mol as
    unit mole {pref: milli};
    unit mole {expo: -1};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit kg as
    unit kilogram;
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_L as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit L_per_mol as
    unit litre;
    unit mole {expo: -1};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_s_per_um2 as
    unit mole;
    unit second {expo: -1};
    unit metre {expo: -2, pref: micro};
  enddef;
  def unit W_per_m_K as
    unit watt;
    unit metre {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit W_per_K as
    unit watt;
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_kg_K as
    unit joule;
    unit kilogram {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_K as
    unit joule;
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit per_millimolar_s_1 as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s_1 as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_V_1 as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit per_millimolar_s_2 as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit milliV_per_V_2 as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit millimolar_per_s_2 as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_V_3 as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV_1 as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_milliV_2 as
    unit volt;
    unit milliV {expo: -1};
  enddef;

  def comp cell as
    var ATP_ref_mod_bio: millimolar;
    var ATP_ref_mod_protein: millimolar;
    var B_Ca_init_mod_Ca: millimolar;
    var B_Ca_total_mod_Ca: millimolar;
    var C_ADP_init_mod_cytosol: millimolar;
    var C_ATP_init_mod_cytosol: millimolar;
    var C_Pi_init_mod_cytosol: millimolar;
    var C_glc_e_mod_membrane_face: millimolar;
    var C_glc_init_mod_cytosol: millimolar;
    var C_glyc_init_mod_cytosol: millimolar;
    var C_glyc_max_mod_cytosol: millimolar;
    var C_lac_e_mod_membrane_face: millimolar;
    var C_lac_init_mod_cytosol: millimolar;
    var C_repair_mod_bio: mole;
    var Ca__B_Cai: millimolar {init: B_Ca_init_mod_Ca};
    var Ca__CaB_Cai: millimolar;
    var Ca__Ca_total: millimolar;
    var Ca__Cai: millimolar {init: Cai_init_mod_Ca};
    var Cai_init_mod_Ca: millimolar;
    var Cao_mod_i_NaCa: millimolar;
    var Cao_mod_i_leak_Ca: millimolar;
    var D_init_mod_bio: dimensionless;
    var F: C_per_mol;
    var H__E_H: milliV;
    var H__H_i: millimolar {init: H_i_init_mod_H};
    var H__H_total_rel: millimolar;
    var H__pH_i: dimensionless;
    var H__pH_o: dimensionless;
    var H_e_mod_membrane_face: millimolar;
    var H_i_init_mod_H: millimolar;
    var H_o_mod_H: millimolar;
    var H_ref_mod_membrane_face: millimolar;
    var I_in_mod_membrane: nanoA;
    var J_build_mod_protein: mol_per_s;
    var J_growth_mod_bio: mol_per_s;
    var K_ADP_gly_mod_cytosol: millimolar;
    var K_ADP_hyd_mod_cytosol: millimolar;
    var K_ADP_mob_mod_cytosol: millimolar;
    var K_ATP_gly_mod_cytosol: millimolar;
    var K_ATP_hyd_mod_cytosol: millimolar;
    var K_ATP_store_mod_cytosol: millimolar;
    var K_D_mod_bio: dimensionless;
    var K_Pi_gly_mod_cytosol: millimolar;
    var K_Pi_hyd_mod_cytosol: millimolar;
    var K_Pi_mob_mod_cytosol: millimolar;
    var K_act_H_mod_i_H_ATPase: millimolar;
    var K_glc_mod_cytosol: millimolar;
    var K_glc_store_mod_cytosol: millimolar;
    var K_glc_t_mod_membrane_face: millimolar;
    var K_glyc_mob_mod_cytosol: millimolar;
    var K_i_ATP_mob_mod_cytosol: millimolar;
    var K_lac_mod_cytosol: millimolar;
    var K_lac_t_mod_membrane_face: millimolar;
    var K_m_ATP_H_mod_i_H_ATPase: millimolar;
    var K_m_ATP_bio_mod_bio: millimolar;
    var K_m_ATP_prot_mod_protein: millimolar;
    var Ki_init_mod_Na_K: millimolar;
    var KmCa_mod_i_NaCa: millimolar;
    var KmNai_mod_i_NaCa: millimolar;
    var Ko_mod_Na_K: millimolar;
    var Ksat_mod_i_NaCa: dimensionless;
    var L_Glf_mod_protein: dimensionless;
    var L_Glyc_mod_protein: dimensionless;
    var L_H_ATPase_mod_protein: dimensionless;
    var L_KefC_mod_protein: dimensionless;
    var L_LacT_mod_protein: dimensionless;
    var L_NCX_mod_protein: dimensionless;
    var L_NhaA_mod_protein: dimensionless;
    var L_Trk_mod_protein: dimensionless;
    var L_mRNA_mod_bio: dimensionless;
    var L_proteome_mod_protein: dimensionless;
    var L_rRNA_mod_bio: dimensionless;
    var N_A_mod_bio: per_mol;
    var N_A_mod_protein: per_mol;
    var Na_K__E_K: milliV;
    var Na_K__E_Na: milliV;
    var Na_K__Ki: millimolar {init: Ki_init_mod_Na_K};
    var Na_K__Nai: millimolar {init: Nai_init_mod_Na_K};
    var Nai_init_mod_Na_K: millimolar;
    var Nao_mod_Na_K: millimolar;
    var Nao_mod_i_NaCa: millimolar;
    var P_init_mod_bio: mole;
    var Q10_dmg_mod_bio: dimensionless;
    var Q10_mod_cytosol: dimensionless;
    var R: J_per_mol_K;
    var R_cell_mod_membrane: um;
    var T: kelvin;
    var T_ref_dmg_mod_bio: kelvin;
    var T_ref_mod_cytosol: kelvin;
    var V_gly_mod_cytosol: millimolar_per_s_1;
    var V_hyd_mod_cytosol: millimolar_per_s_1;
    var V_mob_mod_cytosol: millimolar_per_s_1;
    var V_rest_approx_mod_membrane: milliV;
    var V_store_max_mod_cytosol: millimolar_per_s_1;
    var alpha_NaCa_mod_i_NaCa: dimensionless;
    var area_per_lipid_mod_bio: um2;
    var beta_H_mod_H: millimolar;
    var bio__D: dimensionless {init: D_init_mod_bio};
    var bio__J_ATP_bio: mol_per_s;
    var bio__J_RNA: mol_per_s;
    var bio__J_growth_used: mol_per_s;
    var bio__J_lipid: mol_per_s;
    var bio__J_repair: mol_per_s;
    var bio__J_ribo: mol_per_s;
    var bio__M_build_bio: mole;
    var bio__P_growth: mole {init: P_init_mod_bio};
    var bio__R_repair: per_s;
    var bio__f_ATP_bio: dimensionless;
    var bio__f_T_dmg: dimensionless;
    var bio__j_ADP_bio: mol_per_s;
    var bio__j_ATP_bio: mol_per_s;
    var bio__j_Pi_bio: mol_per_s;
    var bio__n_lipid: dimensionless;
    var c_deg_mod_protein: dimensionless;
    var c_lipid_mod_bio: dimensionless;
    var c_m_mod_membrane: uF_per_cm2;
    var c_nt_denovo_mod_bio: dimensionless;
    var c_nt_recycle_mod_bio: dimensionless;
    var c_poly_mod_protein: dimensionless;
    var c_recycle_mod_protein: dimensionless;
    var c_std_mod_H: millimolar;
    var c_std_mod_cytosol: millimolar;
    var c_std_mod_i_H_ATPase: millimolar;
    var c_syn_mod_protein: dimensionless;
    var cytosol__A_gly: J_per_mol;
    var cytosol__A_hyd: J_per_mol;
    var cytosol__A_mob: J_per_mol;
    var cytosol__A_store: J_per_mol;
    var cytosol__C_ADP: millimolar {init: C_ADP_init_mod_cytosol};
    var cytosol__C_ATP: millimolar {init: C_ATP_init_mod_cytosol};
    var cytosol__C_Pi: millimolar {init: C_Pi_init_mod_cytosol};
    var cytosol__C_glc: millimolar {init: C_glc_init_mod_cytosol};
    var cytosol__C_glyc: millimolar {init: C_glyc_init_mod_cytosol};
    var cytosol__C_lac: millimolar {init: C_lac_init_mod_cytosol};
    var cytosol__Gamma_gly: dimensionless;
    var cytosol__Gamma_hyd: dimensionless;
    var cytosol__Gamma_mob: dimensionless;
    var cytosol__Gamma_store: dimensionless;
    var cytosol__J_ATP_turnover: mol_per_s;
    var cytosol__K_eq_gly: dimensionless;
    var cytosol__K_eq_hyd: dimensionless;
    var cytosol__K_eq_mob: dimensionless;
    var cytosol__K_eq_store: dimensionless;
    var cytosol__P_diss: watt;
    var cytosol__Q_met: watt;
    var cytosol__f_T: dimensionless;
    var cytosol__j_H_met: mol_per_s;
    var cytosol__v_gly: millimolar_per_s_2;
    var cytosol__v_hyd: millimolar_per_s_2;
    var cytosol__v_mob: millimolar_per_s_2;
    var cytosol__v_store: millimolar_per_s_2;
    var dG0_ferm_mod_cytosol: J_per_mol;
    var dG0_hyd_mod_cytosol: J_per_mol;
    var dG0_hyd_mod_i_H_ATPase: J_per_mol;
    var dG0_store_mod_cytosol: J_per_mol;
    var dT_Q10_mod_bio: kelvin;
    var dT_Q10_mod_cytosol: kelvin;
    var g_spec_leak_H_mod_i_leak_H: microS_per_um2;
    var g_spec_mod_i_KH: microS_per_um2;
    var g_spec_mod_i_NaH: microS_per_um2;
    var gamma_NaCa_mod_i_NaCa: dimensionless;
    var gamma_leak_Ca_mod_i_leak_Ca: picoS;
    var gamma_leak_K_mod_i_K_Trk: picoS;
    var gamma_leak_Na_mod_i_leak_Na: picoS;
    var genome_nt_mod_bio: dimensionless;
    var h_ATP_mod_cytosol: J_per_mol;
    var h_cell_mod_membrane: um;
    var h_glyc_poly_mod_cytosol: J_per_mol;
    var h_lac_gly_mod_cytosol: J_per_mol;
    var i_H_ATPase__A_ATP: J_per_mol;
    var i_H_ATPase__W_H: J_per_mol;
    var i_H_ATPase__f_thermo: dimensionless;
    var i_H_ATPase__i_H_ATPase: nanoA;
    var i_H_ATPase__j_ADP_H: mol_per_s;
    var i_H_ATPase__j_ATP_H: mol_per_s;
    var i_H_ATPase__j_H_ATPase: mol_per_s;
    var i_H_ATPase__j_H_pumped: mol_per_s;
    var i_H_ATPase__j_Pi_H: mol_per_s;
    var i_H_ATPase__k_H_ATPase: nanoA;
    var i_H_ATPase__v_ATP_H: mol_per_s;
    var i_KH__drive: milliV;
    var i_KH__j_KH_H: mol_per_s;
    var i_KH__j_KH_K: mol_per_s;
    var i_KH__r_cycle: mol_per_s;
    var i_K_Trk__g_leak_K: microS;
    var i_K_Trk__i_leak_K: nanoA;
    var i_K_Trk__j_leak_K: mol_per_s;
    var i_NaCa__i_NaCa: nanoA;
    var i_NaCa__j_NaCa_Ca: mol_per_s;
    var i_NaCa__j_NaCa_Na: mol_per_s;
    var i_NaCa__k_NaCa: nanoA;
    var i_NaH__drive: milliV;
    var i_NaH__i_NaH: nanoA;
    var i_NaH__j_NaH_H: mol_per_s;
    var i_NaH__j_NaH_Na: mol_per_s;
    var i_NaH__r_cycle: mol_per_s;
    var i_leak_Ca__E_Ca: milliV;
    var i_leak_Ca__g_leak_Ca: microS;
    var i_leak_Ca__i_leak_Ca: nanoA;
    var i_leak_Ca__j_leak_Ca: mol_per_s;
    var i_leak_H__g_leak_H: microS;
    var i_leak_H__i_leak_H: nanoA;
    var i_leak_H__j_leak_H: mol_per_s;
    var i_leak_Na__g_leak_Na: microS;
    var i_leak_Na__i_leak_Na: nanoA;
    var i_leak_Na__j_leak_Na: mol_per_s;
    var jmax_glc_mod_membrane_face: mol_per_s_per_um2;
    var jmax_lac_mod_membrane_face: mol_per_s_per_um2;
    var k_bind_Ca_mod_Ca: per_millimolar_s_1;
    var k_deg_mod_protein: per_s;
    var k_lipid_mod_bio: per_s;
    var k_ribo_mod_bio: per_s;
    var k_unbind_Ca_mod_Ca: per_s;
    var membrane__A_mem: um2;
    var membrane__Cm: picoF;
    var membrane__V: milliV {init: V_rest_approx_mod_membrane};
    var membrane__Vol: m3;
    var membrane_face__J_ADP_c: mol_per_s;
    var membrane_face__J_ATP_c: mol_per_s;
    var membrane_face__J_H_lac: mol_per_s;
    var membrane_face__J_Pi_c: mol_per_s;
    var membrane_face__J_glc: mol_per_s;
    var membrane_face__J_glc_c: mol_per_s;
    var membrane_face__J_glc_e: mol_per_s;
    var membrane_face__J_lac: mol_per_s;
    var membrane_face__J_lac_c: mol_per_s;
    var membrane_face__J_lac_e: mol_per_s;
    var membrane_face__X_lac_e: millimolar;
    var membrane_face__X_lac_i: millimolar;
    var multiport_sum_mod_Ca_j_Ca_in__j_Ca_in: mol_per_s;
    var multiport_sum_mod_H_j_H_in__j_H_in: mol_per_s;
    var multiport_sum_mod_H_j_H_prod__j_H_prod: mol_per_s;
    var multiport_sum_mod_Na_K_j_K_total__j_K_total: mol_per_s;
    var multiport_sum_mod_Na_K_j_Na_total__j_Na_total: mol_per_s;
    var multiport_sum_mod_cytosol_J_ADP_in__J_ADP_in: mol_per_s;
    var multiport_sum_mod_cytosol_J_ADP_out__J_ADP_out: mol_per_s;
    var multiport_sum_mod_cytosol_J_ATP_in__J_ATP_in: mol_per_s;
    var multiport_sum_mod_cytosol_J_ATP_out__J_ATP_out: mol_per_s;
    var multiport_sum_mod_cytosol_J_Pi_in__J_Pi_in: mol_per_s;
    var multiport_sum_mod_cytosol_J_Pi_out__J_Pi_out: mol_per_s;
    var multiport_sum_mod_cytosol_J_glc_in__J_glc_in: mol_per_s;
    var multiport_sum_mod_cytosol_J_glc_out__J_glc_out: mol_per_s;
    var multiport_sum_mod_cytosol_J_lac_in__J_lac_in: mol_per_s;
    var multiport_sum_mod_cytosol_J_lac_out__J_lac_out: mol_per_s;
    var multiport_sum_mod_cytosol_j_ADP_ext__j_ADP_ext: mol_per_s;
    var multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext: mol_per_s;
    var multiport_sum_mod_cytosol_j_Pi_ext__j_Pi_ext: mol_per_s;
    var multiport_sum_mod_membrane_i_ion__i_ion: nanoA;
    var n_Glf_mod_protein: dimensionless;
    var n_Glyc_mod_protein: dimensionless;
    var n_H_ATPase_mod_protein: dimensionless;
    var n_H_mod_i_H_ATPase: dimensionless;
    var n_KefC_mod_protein: dimensionless;
    var n_LacT_mod_protein: dimensionless;
    var n_NCX_mod_protein: dimensionless;
    var n_NhaA_mod_protein: dimensionless;
    var n_Trk_mod_protein: dimensionless;
    var n_mRNA_mod_bio: dimensionless;
    var n_proteome_mod_protein: dimensionless;
    var n_ribo_mod_bio: dimensionless;
    var protein__J_ATP_Glf: mol_per_s;
    var protein__J_ATP_Glyc: mol_per_s;
    var protein__J_ATP_H_ATPase: mol_per_s;
    var protein__J_ATP_KefC: mol_per_s;
    var protein__J_ATP_LacT: mol_per_s;
    var protein__J_ATP_NCX: mol_per_s;
    var protein__J_ATP_NhaA: mol_per_s;
    var protein__J_ATP_Trk: mol_per_s;
    var protein__J_ATP_protein: mol_per_s;
    var protein__J_ATP_proteome: mol_per_s;
    var protein__J_ATP_used: mol_per_s;
    var protein__M_build_Glf: mole;
    var protein__M_build_Glyc: mole;
    var protein__M_build_H_ATPase: mole;
    var protein__M_build_KefC: mole;
    var protein__M_build_LacT: mole;
    var protein__M_build_NCX: mole;
    var protein__M_build_NhaA: mole;
    var protein__M_build_Trk: mole;
    var protein__M_build_protein: mole;
    var protein__M_build_proteome: mole;
    var protein__f_ATP_prot: dimensionless;
    var protein__j_ADP_prot: mol_per_s;
    var protein__j_ATP_prot: mol_per_s;
    var protein__j_Pi_prot: mol_per_s;
    var r_H_ATPase_mod_i_H_ATPase: per_s;
    var r_NaCa_mod_i_NaCa: per_s;
    var r_dmg_mod_bio: per_s;
    var r_rep_max_mod_bio: per_s;
    var repair_level_mod_bio: dimensionless;
    var rho_H_ATPase_mod_i_H_ATPase: per_um2;
    var rho_NaCa_mod_i_NaCa: per_um2;
    var rho_leak_Ca_mod_i_leak_Ca: per_um2;
    var rho_leak_K_mod_i_K_Trk: per_um2;
    var rho_leak_Na_mod_i_leak_Na: per_um2;
    var store_alloc_mod_cytosol: dimensionless;
    var surface_factor_mod_bio: dimensionless;
    var t: second;
    var t_half_mRNA_mod_bio: second;
    membrane__A_mem = 2.0{dimensionless}*pi*R_cell_mod_membrane*h_cell_mod_membrane;
    membrane__Vol = pi*sqr(R_cell_mod_membrane)*h_cell_mod_membrane*1e-18{m3_per_um3};
    membrane__Cm = c_m_mod_membrane*membrane__A_mem*0.01{picoF_cm2_per_uF_um2};
    ode(membrane__V, t) = 1000000.0{milliV_per_kiloV}*(I_in_mod_membrane-multiport_sum_mod_membrane_i_ion__i_ion)/membrane__Cm;
    Na_K__E_K = R*T/F*ln(Ko_mod_Na_K/Na_K__Ki)*1000{milliV_per_V};
    Na_K__E_Na = R*T/F*ln(Nao_mod_Na_K/Na_K__Nai)*1000{milliV_per_V};
    ode(Na_K__Nai, t) = multiport_sum_mod_Na_K_j_Na_total__j_Na_total/membrane__Vol;
    ode(Na_K__Ki, t) = multiport_sum_mod_Na_K_j_K_total__j_K_total/membrane__Vol;
    Ca__CaB_Cai = B_Ca_total_mod_Ca-Ca__B_Cai;
    ode(Ca__B_Cai, t) = k_unbind_Ca_mod_Ca*Ca__CaB_Cai-k_bind_Ca_mod_Ca*Ca__Cai*Ca__B_Cai;
    ode(Ca__Cai, t) = multiport_sum_mod_Ca_j_Ca_in__j_Ca_in/membrane__Vol+k_unbind_Ca_mod_Ca*Ca__CaB_Cai-k_bind_Ca_mod_Ca*Ca__Cai*Ca__B_Cai;
    Ca__Ca_total = Ca__Cai+Ca__CaB_Cai;
    ode(H__H_i, t) = (multiport_sum_mod_H_j_H_in__j_H_in+multiport_sum_mod_H_j_H_prod__j_H_prod)/membrane__Vol/(1.0{dimensionless}+beta_H_mod_H/(ln(10.0{dimensionless})*H__H_i));
    H__pH_i = -ln(H__H_i/c_std_mod_H)/ln(10.0{dimensionless});
    H__pH_o = -ln(H_o_mod_H/c_std_mod_H)/ln(10.0{dimensionless});
    H__E_H = R*T/F*ln(H_o_mod_H/H__H_i)*1000.0{milliV_per_V};
    H__H_total_rel = H__H_i-beta_H_mod_H*H__pH_i;
    cytosol__f_T = pow(Q10_mod_cytosol, (T-T_ref_mod_cytosol)/dT_Q10_mod_cytosol);
    cytosol__K_eq_gly = exp(-(dG0_ferm_mod_cytosol-2.0{dimensionless}*dG0_hyd_mod_cytosol)/(R*T));
    cytosol__K_eq_hyd = exp(-dG0_hyd_mod_cytosol/(R*T));
    cytosol__Gamma_gly = sqr(cytosol__C_lac/c_std_mod_cytosol)*sqr(cytosol__C_ATP/c_std_mod_cytosol)/(cytosol__C_glc/c_std_mod_cytosol*sqr(cytosol__C_ADP/c_std_mod_cytosol)*sqr(cytosol__C_Pi/c_std_mod_cytosol));
    cytosol__Gamma_hyd = cytosol__C_ADP/c_std_mod_cytosol*(cytosol__C_Pi/c_std_mod_cytosol)/(cytosol__C_ATP/c_std_mod_cytosol);
    cytosol__v_gly = V_gly_mod_cytosol*cytosol__f_T*(cytosol__C_glc/K_glc_mod_cytosol)*sqr(cytosol__C_ADP/K_ADP_gly_mod_cytosol)*sqr(cytosol__C_Pi/K_Pi_gly_mod_cytosol)*(1.0{dimensionless}-cytosol__Gamma_gly/cytosol__K_eq_gly)/((1.0{dimensionless}+cytosol__C_glc/K_glc_mod_cytosol)*sqr(1.0{dimensionless}+cytosol__C_ADP/K_ADP_gly_mod_cytosol)*sqr(1.0{dimensionless}+cytosol__C_Pi/K_Pi_gly_mod_cytosol)+sqr(1.0{dimensionless}+cytosol__C_lac/K_lac_mod_cytosol)*sqr(1.0{dimensionless}+cytosol__C_ATP/K_ATP_gly_mod_cytosol)-1.0{dimensionless});
    cytosol__v_hyd = V_hyd_mod_cytosol*cytosol__f_T*(cytosol__C_ATP/K_ATP_hyd_mod_cytosol)*(1.0{dimensionless}-cytosol__Gamma_hyd/cytosol__K_eq_hyd)/(1.0{dimensionless}+cytosol__C_ATP/K_ATP_hyd_mod_cytosol+(1.0{dimensionless}+cytosol__C_ADP/K_ADP_hyd_mod_cytosol)*(1.0{dimensionless}+cytosol__C_Pi/K_Pi_hyd_mod_cytosol)-1.0{dimensionless});
    cytosol__A_gly = R*T*(ln(cytosol__K_eq_gly)-ln(abs(cytosol__Gamma_gly)+1e-300{dimensionless}));
    cytosol__A_hyd = R*T*(ln(cytosol__K_eq_hyd)-ln(abs(cytosol__Gamma_hyd)+1e-300{dimensionless}));
    cytosol__K_eq_store = exp(-dG0_store_mod_cytosol/(R*T));
    cytosol__K_eq_mob = exp(-(dG0_ferm_mod_cytosol-dG0_store_mod_cytosol-dG0_hyd_mod_cytosol)/(R*T));
    cytosol__Gamma_store = sqr(cytosol__C_ADP/c_std_mod_cytosol)*sqr(cytosol__C_Pi/c_std_mod_cytosol)/(cytosol__C_glc/c_std_mod_cytosol*sqr(cytosol__C_ATP/c_std_mod_cytosol));
    cytosol__Gamma_mob = sqr(cytosol__C_lac/c_std_mod_cytosol)*pow(cytosol__C_ATP/c_std_mod_cytosol, 3.0{dimensionless})/(pow(cytosol__C_ADP/c_std_mod_cytosol, 3.0{dimensionless})*pow(cytosol__C_Pi/c_std_mod_cytosol, 3.0{dimensionless}));
    cytosol__v_store = V_store_max_mod_cytosol*store_alloc_mod_cytosol*cytosol__f_T*cytosol__C_glc/(K_glc_store_mod_cytosol+cytosol__C_glc)*cytosol__C_ATP/(K_ATP_store_mod_cytosol+cytosol__C_ATP)/(1.0{dimensionless}+pow(cytosol__C_glyc/C_glyc_max_mod_cytosol, 8.0{dimensionless}))*(1.0{dimensionless}-cytosol__Gamma_store/cytosol__K_eq_store);
    cytosol__v_mob = V_mob_mod_cytosol*cytosol__f_T*cytosol__C_glyc/(K_glyc_mob_mod_cytosol+cytosol__C_glyc)*cytosol__C_ADP/(K_ADP_mob_mod_cytosol+cytosol__C_ADP)*cytosol__C_Pi/(K_Pi_mob_mod_cytosol+cytosol__C_Pi)*K_i_ATP_mob_mod_cytosol/(K_i_ATP_mob_mod_cytosol+cytosol__C_ATP)*(1.0{dimensionless}-cytosol__Gamma_mob/cytosol__K_eq_mob);
    cytosol__A_store = R*T*(ln(cytosol__K_eq_store)-ln(abs(cytosol__Gamma_store)+1e-300{dimensionless}));
    cytosol__A_mob = R*T*(ln(cytosol__K_eq_mob)-ln(abs(cytosol__Gamma_mob)+1e-300{dimensionless}));
    cytosol__P_diss = membrane__Vol*(cytosol__v_gly*cytosol__A_gly+cytosol__v_hyd*cytosol__A_hyd+cytosol__v_store*cytosol__A_store+cytosol__v_mob*cytosol__A_mob);
    cytosol__J_ATP_turnover = membrane__Vol*cytosol__v_hyd-multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext;
    cytosol__j_H_met = membrane__Vol*(cytosol__v_hyd+2.0{dimensionless}*cytosol__v_store-cytosol__v_mob)-multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext;
    cytosol__Q_met = membrane__Vol*(cytosol__v_gly*(2.0{dimensionless}*h_lac_gly_mod_cytosol-2.0{dimensionless}*h_ATP_mod_cytosol)+cytosol__v_hyd*h_ATP_mod_cytosol+cytosol__v_store*(2.0{dimensionless}*h_ATP_mod_cytosol+h_glyc_poly_mod_cytosol)+cytosol__v_mob*(2.0{dimensionless}*h_lac_gly_mod_cytosol-h_glyc_poly_mod_cytosol-3.0{dimensionless}*h_ATP_mod_cytosol))-multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext*h_ATP_mod_cytosol;
    ode(cytosol__C_glc, t) = (multiport_sum_mod_cytosol_J_glc_in__J_glc_in+multiport_sum_mod_cytosol_J_glc_out__J_glc_out)/membrane__Vol-cytosol__v_gly-cytosol__v_store;
    ode(cytosol__C_lac, t) = (multiport_sum_mod_cytosol_J_lac_in__J_lac_in+multiport_sum_mod_cytosol_J_lac_out__J_lac_out)/membrane__Vol+2.0{dimensionless}*cytosol__v_gly+2.0{dimensionless}*cytosol__v_mob;
    ode(cytosol__C_ATP, t) = (multiport_sum_mod_cytosol_J_ATP_in__J_ATP_in+multiport_sum_mod_cytosol_J_ATP_out__J_ATP_out+multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext)/membrane__Vol+2.0{dimensionless}*cytosol__v_gly-cytosol__v_hyd-2.0{dimensionless}*cytosol__v_store+3.0{dimensionless}*cytosol__v_mob;
    ode(cytosol__C_ADP, t) = (multiport_sum_mod_cytosol_J_ADP_in__J_ADP_in+multiport_sum_mod_cytosol_J_ADP_out__J_ADP_out+multiport_sum_mod_cytosol_j_ADP_ext__j_ADP_ext)/membrane__Vol-2.0{dimensionless}*cytosol__v_gly+cytosol__v_hyd+2.0{dimensionless}*cytosol__v_store-3.0{dimensionless}*cytosol__v_mob;
    ode(cytosol__C_Pi, t) = (multiport_sum_mod_cytosol_J_Pi_in__J_Pi_in+multiport_sum_mod_cytosol_J_Pi_out__J_Pi_out+multiport_sum_mod_cytosol_j_Pi_ext__j_Pi_ext)/membrane__Vol-2.0{dimensionless}*cytosol__v_gly+cytosol__v_hyd+2.0{dimensionless}*cytosol__v_store-3.0{dimensionless}*cytosol__v_mob;
    ode(cytosol__C_glyc, t) = cytosol__v_store-cytosol__v_mob;
    bio__n_lipid = 2.0{dimensionless}*membrane__A_mem*surface_factor_mod_bio/area_per_lipid_mod_bio;
    bio__f_ATP_bio = cytosol__C_ATP/(K_m_ATP_bio_mod_bio+cytosol__C_ATP)*(K_m_ATP_bio_mod_bio+ATP_ref_mod_bio)/ATP_ref_mod_bio;
    bio__f_T_dmg = pow(Q10_dmg_mod_bio, (T-T_ref_dmg_mod_bio)/dT_Q10_mod_bio);
    bio__J_RNA = n_mRNA_mod_bio*L_mRNA_mod_bio*c_nt_recycle_mod_bio*ln(2.0{dimensionless})/t_half_mRNA_mod_bio/N_A_mod_bio*bio__f_ATP_bio;
    bio__J_ribo = n_ribo_mod_bio*L_rRNA_mod_bio*c_nt_recycle_mod_bio*k_ribo_mod_bio/N_A_mod_bio*bio__f_ATP_bio;
    bio__J_lipid = bio__n_lipid*c_lipid_mod_bio*k_lipid_mod_bio/N_A_mod_bio*bio__f_ATP_bio;
    bio__R_repair = repair_level_mod_bio*r_rep_max_mod_bio*bio__D/(K_D_mod_bio+bio__D)*bio__f_ATP_bio;
    bio__J_repair = bio__R_repair*C_repair_mod_bio;
    bio__J_growth_used = J_growth_mod_bio*bio__f_ATP_bio;
    bio__J_ATP_bio = bio__J_RNA+bio__J_ribo+bio__J_lipid+bio__J_repair+bio__J_growth_used;
    bio__M_build_bio = ((n_mRNA_mod_bio*L_mRNA_mod_bio+n_ribo_mod_bio*L_rRNA_mod_bio+genome_nt_mod_bio)*c_nt_denovo_mod_bio+bio__n_lipid*c_lipid_mod_bio)/N_A_mod_bio;
    bio__j_ATP_bio = -bio__J_ATP_bio;
    bio__j_ADP_bio = bio__J_ATP_bio;
    bio__j_Pi_bio = bio__J_ATP_bio;
    ode(bio__D, t) = r_dmg_mod_bio*bio__f_T_dmg-bio__R_repair;
    ode(bio__P_growth, t) = bio__J_growth_used;
    protein__J_ATP_H_ATPase = n_H_ATPase_mod_protein*L_H_ATPase_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_H_ATPase = n_H_ATPase_mod_protein*L_H_ATPase_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_NhaA = n_NhaA_mod_protein*L_NhaA_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_NhaA = n_NhaA_mod_protein*L_NhaA_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_KefC = n_KefC_mod_protein*L_KefC_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_KefC = n_KefC_mod_protein*L_KefC_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_Trk = n_Trk_mod_protein*L_Trk_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_Trk = n_Trk_mod_protein*L_Trk_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_NCX = n_NCX_mod_protein*L_NCX_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_NCX = n_NCX_mod_protein*L_NCX_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_Glf = n_Glf_mod_protein*L_Glf_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_Glf = n_Glf_mod_protein*L_Glf_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_LacT = n_LacT_mod_protein*L_LacT_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_LacT = n_LacT_mod_protein*L_LacT_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_Glyc = n_Glyc_mod_protein*L_Glyc_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_Glyc = n_Glyc_mod_protein*L_Glyc_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_proteome = n_proteome_mod_protein*L_proteome_mod_protein*(c_poly_mod_protein+c_deg_mod_protein+c_recycle_mod_protein)*k_deg_mod_protein/N_A_mod_protein;
    protein__M_build_proteome = n_proteome_mod_protein*L_proteome_mod_protein*(c_syn_mod_protein+c_poly_mod_protein)/N_A_mod_protein;
    protein__J_ATP_protein = protein__J_ATP_H_ATPase+protein__J_ATP_NhaA+protein__J_ATP_KefC+protein__J_ATP_Trk+protein__J_ATP_NCX+protein__J_ATP_Glf+protein__J_ATP_LacT+protein__J_ATP_Glyc+protein__J_ATP_proteome;
    protein__M_build_protein = protein__M_build_H_ATPase+protein__M_build_NhaA+protein__M_build_KefC+protein__M_build_Trk+protein__M_build_NCX+protein__M_build_Glf+protein__M_build_LacT+protein__M_build_Glyc+protein__M_build_proteome;
    protein__f_ATP_prot = cytosol__C_ATP/(K_m_ATP_prot_mod_protein+cytosol__C_ATP)*(K_m_ATP_prot_mod_protein+ATP_ref_mod_protein)/ATP_ref_mod_protein;
    protein__J_ATP_used = (protein__J_ATP_protein+J_build_mod_protein)*protein__f_ATP_prot;
    protein__j_ATP_prot = -protein__J_ATP_used;
    protein__j_ADP_prot = protein__J_ATP_used;
    protein__j_Pi_prot = protein__J_ATP_used;
    membrane_face__J_glc = jmax_glc_mod_membrane_face*membrane__A_mem*(C_glc_e_mod_membrane_face/(K_glc_t_mod_membrane_face+C_glc_e_mod_membrane_face)-cytosol__C_glc/(K_glc_t_mod_membrane_face+cytosol__C_glc));
    membrane_face__X_lac_e = C_lac_e_mod_membrane_face*H_e_mod_membrane_face/H_ref_mod_membrane_face;
    membrane_face__X_lac_i = cytosol__C_lac*H__H_i/H_ref_mod_membrane_face;
    membrane_face__J_lac = jmax_lac_mod_membrane_face*membrane__A_mem*(membrane_face__X_lac_e/(K_lac_t_mod_membrane_face+membrane_face__X_lac_e)-membrane_face__X_lac_i/(K_lac_t_mod_membrane_face+membrane_face__X_lac_i));
    membrane_face__J_H_lac = membrane_face__J_lac;
    membrane_face__J_glc_e = -membrane_face__J_glc;
    membrane_face__J_lac_e = -membrane_face__J_lac;
    membrane_face__J_glc_c = membrane_face__J_glc;
    membrane_face__J_lac_c = membrane_face__J_lac;
    membrane_face__J_ATP_c = 0.0{mol_per_s};
    membrane_face__J_ADP_c = 0.0{mol_per_s};
    membrane_face__J_Pi_c = 0.0{mol_per_s};
    i_leak_Na__i_leak_Na = i_leak_Na__g_leak_Na*(membrane__V-Na_K__E_Na);
    i_leak_Na__j_leak_Na = -i_leak_Na__i_leak_Na/F*1e-9{A_per_nanoA};
    i_leak_Na__g_leak_Na = membrane__A_mem*rho_leak_Na_mod_i_leak_Na*gamma_leak_Na_mod_i_leak_Na*1e-6{microS_per_picoS};
    i_K_Trk__i_leak_K = i_K_Trk__g_leak_K*(membrane__V-Na_K__E_K);
    i_K_Trk__j_leak_K = -i_K_Trk__i_leak_K/F*1e-9{A_per_nanoA};
    i_K_Trk__g_leak_K = membrane__A_mem*rho_leak_K_mod_i_K_Trk*gamma_leak_K_mod_i_K_Trk*1e-6{microS_per_picoS};
    i_leak_Ca__g_leak_Ca = membrane__A_mem*rho_leak_Ca_mod_i_leak_Ca*gamma_leak_Ca_mod_i_leak_Ca*1e-6{microS_per_picoS};
    i_leak_Ca__E_Ca = R*T/(2.0{dimensionless}*F)*ln(Cao_mod_i_leak_Ca/Ca__Cai)*1000.0{milliV_per_V};
    i_leak_Ca__i_leak_Ca = i_leak_Ca__g_leak_Ca*(membrane__V-i_leak_Ca__E_Ca);
    i_leak_Ca__j_leak_Ca = -i_leak_Ca__i_leak_Ca/(2.0{dimensionless}*F)*1e-9{A_per_nanoA};
    i_leak_H__g_leak_H = membrane__A_mem*g_spec_leak_H_mod_i_leak_H;
    i_leak_H__i_leak_H = i_leak_H__g_leak_H*(membrane__V-H__E_H);
    i_leak_H__j_leak_H = -i_leak_H__i_leak_H/F*1e-9{A_per_nanoA};
    i_H_ATPase__k_H_ATPase = membrane__A_mem*rho_H_ATPase_mod_i_H_ATPase*r_H_ATPase_mod_i_H_ATPase*n_H_mod_i_H_ATPase*1.602176634e-10{nanoC};
    i_H_ATPase__A_ATP = -dG0_hyd_mod_i_H_ATPase-R*T*ln(abs(cytosol__C_ADP/c_std_mod_i_H_ATPase*(cytosol__C_Pi/c_std_mod_i_H_ATPase)/(cytosol__C_ATP/c_std_mod_i_H_ATPase))+1e-300{dimensionless});
    i_H_ATPase__W_H = n_H_mod_i_H_ATPase*F*(H__E_H-membrane__V)*0.001{V_per_milliV};
    i_H_ATPase__f_thermo = 1.0{dimensionless}-exp(-(i_H_ATPase__A_ATP-i_H_ATPase__W_H)/(R*T));
    i_H_ATPase__i_H_ATPase = i_H_ATPase__k_H_ATPase*cytosol__C_ATP/(K_m_ATP_H_mod_i_H_ATPase+cytosol__C_ATP)*H__H_i/(K_act_H_mod_i_H_ATPase+H__H_i)*i_H_ATPase__f_thermo;
    i_H_ATPase__v_ATP_H = i_H_ATPase__i_H_ATPase/(n_H_mod_i_H_ATPase*F)*1e-9{A_per_nanoA};
    i_H_ATPase__j_H_pumped = -n_H_mod_i_H_ATPase*i_H_ATPase__v_ATP_H;
    i_H_ATPase__j_H_ATPase = i_H_ATPase__j_H_pumped;
    i_H_ATPase__j_ATP_H = -i_H_ATPase__v_ATP_H;
    i_H_ATPase__j_ADP_H = i_H_ATPase__v_ATP_H;
    i_H_ATPase__j_Pi_H = i_H_ATPase__v_ATP_H;
    i_NaH__drive = -(membrane__V+Na_K__E_Na-2.0{dimensionless}*H__E_H);
    i_NaH__r_cycle = membrane__A_mem*g_spec_mod_i_NaH*i_NaH__drive/F*1e-9{A_per_nanoA};
    i_NaH__i_NaH = -i_NaH__r_cycle*F*1000000000.0{nanoA_per_A};
    i_NaH__j_NaH_Na = -i_NaH__r_cycle;
    i_NaH__j_NaH_H = 2.0{dimensionless}*i_NaH__r_cycle;
    i_KH__drive = H__E_H-Na_K__E_K;
    i_KH__r_cycle = membrane__A_mem*g_spec_mod_i_KH*i_KH__drive/F*1e-9{A_per_nanoA};
    i_KH__j_KH_K = -i_KH__r_cycle;
    i_KH__j_KH_H = i_KH__r_cycle;
    i_NaCa__i_NaCa = i_NaCa__k_NaCa*(exp(gamma_NaCa_mod_i_NaCa*membrane__V*1e-3{V_per_milliV}*F/(R*T))*pow(Na_K__Nai, 3{dimensionless})*Cao_mod_i_NaCa-exp((gamma_NaCa_mod_i_NaCa-1{dimensionless})*membrane__V*1e-3{V_per_milliV}*F/(R*T))*pow(Nao_mod_i_NaCa, 3{dimensionless})*Ca__Cai*alpha_NaCa_mod_i_NaCa)/((pow(KmNai_mod_i_NaCa, 3{dimensionless})+pow(Nao_mod_i_NaCa, 3{dimensionless}))*(KmCa_mod_i_NaCa+Cao_mod_i_NaCa)*(1{dimensionless}+Ksat_mod_i_NaCa*exp((gamma_NaCa_mod_i_NaCa-1{dimensionless})*membrane__V*1e-3{V_per_milliV}*F/(R*T))));
    i_NaCa__j_NaCa_Ca = i_NaCa__i_NaCa/F*1e-9{A_per_nanoA};
    i_NaCa__j_NaCa_Na = -3{dimensionless}*i_NaCa__i_NaCa/F*1e-9{A_per_nanoA};
    i_NaCa__k_NaCa = membrane__A_mem*rho_NaCa_mod_i_NaCa*r_NaCa_mod_i_NaCa*1.602176634e-10{nanoC};
    multiport_sum_mod_membrane_i_ion__i_ion = i_leak_Na__i_leak_Na+i_K_Trk__i_leak_K+i_leak_Ca__i_leak_Ca+i_leak_H__i_leak_H+i_H_ATPase__i_H_ATPase+i_NaH__i_NaH+i_NaCa__i_NaCa;
    multiport_sum_mod_Na_K_j_Na_total__j_Na_total = i_leak_Na__j_leak_Na+i_NaH__j_NaH_Na+i_NaCa__j_NaCa_Na;
    multiport_sum_mod_Na_K_j_K_total__j_K_total = i_K_Trk__j_leak_K+i_KH__j_KH_K;
    multiport_sum_mod_Ca_j_Ca_in__j_Ca_in = i_leak_Ca__j_leak_Ca+i_NaCa__j_NaCa_Ca;
    multiport_sum_mod_H_j_H_in__j_H_in = i_leak_H__j_leak_H+i_H_ATPase__j_H_ATPase+i_NaH__j_NaH_H+i_KH__j_KH_H+membrane_face__J_H_lac;
    multiport_sum_mod_cytosol_j_ATP_ext__j_ATP_ext = i_H_ATPase__j_ATP_H+protein__j_ATP_prot+bio__j_ATP_bio;
    multiport_sum_mod_cytosol_j_ADP_ext__j_ADP_ext = i_H_ATPase__j_ADP_H+protein__j_ADP_prot+bio__j_ADP_bio;
    multiport_sum_mod_cytosol_j_Pi_ext__j_Pi_ext = i_H_ATPase__j_Pi_H+protein__j_Pi_prot+bio__j_Pi_bio;
    multiport_sum_mod_H_j_H_prod__j_H_prod = cytosol__j_H_met;
    multiport_sum_mod_cytosol_J_glc_in__J_glc_in = membrane_face__J_glc_c;
    multiport_sum_mod_cytosol_J_lac_in__J_lac_in = membrane_face__J_lac_c;
    multiport_sum_mod_cytosol_J_ATP_in__J_ATP_in = membrane_face__J_ATP_c;
    multiport_sum_mod_cytosol_J_ADP_in__J_ADP_in = membrane_face__J_ADP_c;
    multiport_sum_mod_cytosol_J_Pi_in__J_Pi_in = membrane_face__J_Pi_c;
    multiport_sum_mod_cytosol_J_glc_out__J_glc_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_lac_out__J_lac_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_ATP_out__J_ATP_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_ADP_out__J_ADP_out = 0{mol_per_s};
    multiport_sum_mod_cytosol_J_Pi_out__J_Pi_out = 0{mol_per_s};
  enddef;
enddef;
